PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = Tahir
  Screen = 1
  Units = norm
  Use version = 2023.1.0
  Window size (pixels) = [1920, 1080]
  expName = replication_of_konstantinaou_beal_lavie_exp1b
  keyboardBackend = ioHub
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Routines
  Routine Yonerge
    KeyboardComponent KAYonerge
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent TAYonerge
      font = Times New Roman
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        Welcome to our study.

        Some colors in tiles will soon be presented with 2 letters (X and Z) inside and outside a circle of dots. You are expected to remember the color and position of the tiles on your screen as well as the letter inside the circle.

        After this presentation, you will first be asked what the letter inside the circle is (click 0 for X and 2 for Z) and then you will be presented with one of the tiles in the position that appeared on the first screen and you will be asked to answer whether the color and position information is correct or not (click S if there is a match, A if there is no match).

        The first 16 trials are as practice and the experiment will start after the 16th trial.

        When you are ready to proceed to the practice phase, click on any key.
  Routine AlistirmaFlankerFalse
  Routine AlistirmaFlankerTrue
  Routine routine_2000msCross
    PolygonComponent A_Fix2000ms
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.022, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = FrameN
      units = norm
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    CodeComponent A_FixCode2000ms
      Code Type = Auto->JS
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      Begin Routine:
        FrameRate = 1000 / int(round(win.getActualFrameRate(),2))
        FrameN = int(2000 / FrameRate)
        frame = 0
      Each Frame:
        frame = frame + 1
        requirement = 2000 / FrameRate
        if frame >= requirement:
            continueRoutine = False
  Routine CA1000ms
    PolygonComponent PA1000
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.022, 0.04)
      startVal [frame N] = 0
      stopVal [frame N] = 60
      units = norm
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    CodeComponent CA1000
      Code Type = Auto->JS
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      Begin Experiment:
        counter = 0
      End Routine:
        counter = counter + 1
  Routine CA1850ms
    PolygonComponent PA1850
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.022, 0.04)
      startVal [frame N] = 0
      stopVal [frame N] = 111
      units = norm
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    CodeComponent CA1850
      Code Type = Auto->JS
  Routine LA3000msR
    ImageComponent IA1R
      image = white.png
      pos = (-0.0295, 0.053)
      size = (0,0)
      startVal [frame N] = 0
      stopVal [frame N] = 180
      units = norm
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    ImageComponent IA2R
      image = white.png
      pos = (0, 0.053)
      size = (0,0)
      startVal [frame N] = 0
      stopVal [frame N] = 180
      units = norm
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    ImageComponent IA3R
      image = white.png
      pos = (0.0295, 0.053)
      size = (0,0)
      startVal [frame N] = 0
      stopVal [frame N] = 180
      units = norm
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    ImageComponent IA4R
      image = white.png
      pos = (-0.0295, 0)
      size = (0,0)
      startVal [frame N] = 0
      stopVal [frame N] = 180
      units = norm
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    ImageComponent IA5R
      image = white.png
      size = (0,0)
      startVal [frame N] = 0
      stopVal [frame N] = 180
      units = norm
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    ImageComponent IA6R
      image = white.png
      pos = (0.0295, 0)
      size = (0,0)
      startVal [frame N] = 0
      stopVal [frame N] = 180
      units = norm
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    ImageComponent IA7R
      image = white.png
      pos = (-0.0295, -0.053)
      size = (0,0)
      startVal [frame N] = 0
      stopVal [frame N] = 180
      units = norm
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    ImageComponent IA8R
      image = white.png
      pos = (0, -0.053)
      size = (0,0)
      startVal [frame N] = 0
      stopVal [frame N] = 180
      units = norm
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    ImageComponent IA9R
      image = white.png
      pos = (0.0295, -0.053)
      size = (0,0)
      startVal [frame N] = 0
      stopVal [frame N] = 180
      units = norm
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    TextComponent TADYR
      letterHeight = 0.00
      startVal [frame N] = 0
      stopVal [frame N] = 180
      text [set every repeat] = $taskcevap
      units = norm
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    KeyboardComponent KALoadR
      allowedKeys = 'a','s'
      correctAns = $taskcevap
      forceEndRoutine = True
      startVal [frame N] = 0
      stopVal [frame N] = 180
      storeCorrect = True
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    CodeComponent CALoadR
      Code Type = Auto->JS
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      Begin Routine:
        FRate = 1000 / int(round(win.getActualFrameRate(),2))
        FrameN = int(3000 / FRate)
        frame = 0

        dizi = [kutu1,kutu2,kutu3,kutu4]
        shuffle(dizi)
        deger = dizi[0]

        if deger == 1:
            if TADYR.text == "s":
                IA1R.color = IA1L.color
                IA1R.size = (0.022, 0.04)
            else:
                IA1R.color = IA2L.color
                IA1R.size = (0.022, 0.04)
        elif deger == 2:
            if TADYR.text == "s":
                IA2R.color = IA2L.color
                IA2R.size = (0.022, 0.04)
            else:
                IA2R.color = IA3L.color
                IA2R.size = (0.022, 0.04)
        elif deger == 3:
            if TADYR.text == "s":
                IA3R.color = IA3L.color
                IA3R.size = (0.022, 0.04)
            else:
                IA3R.color = IA4L.color
                IA3R.size = (0.022, 0.04)
        elif deger == 4:
            if TADYR.text == "s":
                IA4R.color = IA4L.color
                IA4R.size = (0.022, 0.04)
            else:
                IA4R.color = IA5L.color
                IA4R.size = (0.022, 0.04)
        elif deger ==5:
            if TADYR.text == "s":
                IA5R.color = IA5L.color
                IA5R.size = (0.022, 0.04)
            else:
                IA5R.color = IA6L.color
                IA5R.size = (0.022, 0.04)
        elif deger == 6:
            if TADYR.text == "s":
                IA6R.color = IA6L.color
                IA6R.size = (0.022, 0.04)
            else:
                IA6R.color = IA7L.color
                IA6R.size = (0.022, 0.04)
        elif deger == 7:
            if TADYR.text == "s":
                IA7R.color = IA7L.color
                IA7R.size = (0.022, 0.04)
            else:
                IA7R.color = IA8L.color
                IA7R.size = (0.022, 0.04)
        elif deger == 8:
            if TADYR.text == "s":
                IA8R.color = IA8L.color
                IA8R.size = (0.022, 0.04)
            else:
                IA8R.color = IA9L.color
                IA8R.size = (0.022, 0.04)
        elif deger == 9:
            if TADYR.text == "s":
                IA9R.color = IA9L.color
                IA9R.size = (0.022, 0.04)
            else:
                IA9R.color = IA1L.color
                IA9R.size = (0.022, 0.04)
      Each Frame:
        frame = frame + 1
        requirement = 3000 / FRate
        if frame >= requirement:
            continueRoutine = False
      End Routine:
        if counter == 16:
            LoopAlistirma.finished = True
  Routine FA1850msR
    TextComponent TAFlankerR
      color = black
      font = Times New Roman
      letterHeight = 0.04
      startVal [frame N] = 0
      stopVal [frame N] = 111
      text = ?
      units = norm
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    KeyboardComponent KAFlankerR
      allowedKeys = '0','2'
      correctAns = $flankercevap
      forceEndRoutine = True
      startVal [frame N] = 0
      stopVal [frame N] = 111
      storeCorrect = True
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    SoundComponent SAFlankerR
      sound = yanlis.wav
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    CodeComponent CAFlankerR
      Code Type = Auto->JS
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      Begin Routine:
        FRate = 1000 / int(round(win.getActualFrameRate(),2))
        FrameN = int(1850 / FRate)
        frame = 0
      Each Frame:
        frame = frame + 1
        requirement = 1850 / FRate
        if frame >= requirement:
            continueRoutine = False
      End Routine:
        if KAFlankerR.corr == 0:
            SAFlankerR.play()
  Routine FA150msL
    ImageComponent IABackgroundL
      image [set every repeat] = $pozisyonhedef
      size = (2.0, 2.0)
      startVal [frame N] = 0
      stopVal [frame N] = 9
      units = norm
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    TextComponent TAHedefL
      color = black
      font = Times New Roman
      letterHeight = 0.105
      pos [set every repeat] = pozisyonharf
      startVal [frame N] = 0
      stopVal [frame N] = 9
      text [set every repeat] = $hedef
      units = norm
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    TextComponent TACeldiriciL
      color = black
      font = Times New Roman
      letterHeight = 0.18
      pos [set every repeat] = pozisyonceldirici
      startVal [frame N] = 0
      stopVal [frame N] = 9
      text [set every repeat] = $celdirici
      units = norm
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    CodeComponent CAFlankerL
      Code Type = Auto->JS
  Routine LA150msL
    TextComponent TALoadL
      font = Times New Roman
      letterHeight = 0.00
      startVal [frame N] = 0
      stopVal [frame N] = 9
      text [set every repeat] = $yuk
      units = norm
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    ImageComponent IA1L
      image = white.png
      pos = (-0.0295, 0.053)
      size = (0,0)
      startVal [frame N] = 0
      stopVal [frame N] = 9
      units = norm
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    ImageComponent IA2L
      image = white.png
      pos = (0, 0.053)
      size = (0,0)
      startVal [frame N] = 0
      stopVal [frame N] = 9
      units = norm
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    ImageComponent IA3L
      image = white.png
      pos = (0.0295, 0.053)
      size = (0,0)
      startVal [frame N] = 0
      stopVal [frame N] = 9
      units = norm
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    ImageComponent IA4L
      image = white.png
      pos = (-0.0295, 0)
      size = (0,0)
      startVal [frame N] = 0
      stopVal [frame N] = 9
      units = norm
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    ImageComponent IA5L
      image = white.png
      size = (0,0)
      startVal [frame N] = 0
      stopVal [frame N] = 9
      units = norm
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    ImageComponent IA6L
      image = white.png
      pos = (0.0295, 0)
      size = (0,0)
      startVal [frame N] = 0
      stopVal [frame N] = 9
      units = norm
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    ImageComponent IA7L
      image = white.png
      pos = (-0.0295, -0.053)
      size = (0,0)
      startVal [frame N] = 0
      stopVal [frame N] = 9
      units = norm
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    ImageComponent IA8L
      image = white.png
      pos = (0, -0.053)
      size = (0,0)
      startVal [frame N] = 0
      stopVal [frame N] = 9
      units = norm
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    ImageComponent IA9L
      image = white.png
      pos = (0.0295, -0.053)
      size = (0,0)
      startVal [frame N] = 0
      stopVal [frame N] = 9
      units = norm
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    CodeComponent CALoadL
      Code Type = Auto->JS
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      Begin Routine:
        YanitD = 0
        YanitY = 0

        IA1L.size = (0,0)
        IA2L.size = (0,0)
        IA3L.size = (0,0)
        IA4L.size = (0,0)
        IA5L.size = (0,0)
        IA6L.size = (0,0)
        IA7L.size = (0,0)
        IA8L.size = (0,0)
        IA9L.size = (0,0)

        renkler = ["black","blue","cyan","green","magenta","pink","red","white","yellow"]
        shuffle(renkler)
        IA1L.color = renkler[0]
        renkler.pop(0)

        shuffle(renkler)
        IA2L.color = renkler[0]
        renkler.pop(0)

        shuffle(renkler)
        IA3L.color = renkler[0]
        renkler.pop(0)

        shuffle(renkler)
        IA4L.color = renkler[0]
        renkler.pop(0)

        shuffle(renkler)
        IA5L.color = renkler[0]
        renkler.pop(0)

        shuffle(renkler)
        IA6L.color = renkler[0]
        renkler.pop(0)

        shuffle(renkler)
        IA7L.color = renkler[0]
        renkler.pop(0)

        shuffle(renkler)
        IA8L.color = renkler[0]
        renkler.pop(0)

        shuffle(renkler)
        IA9L.color = renkler[0]
        renkler.pop(0)

        kutucuklar = [1,2,3,4,5,6,7,8,9]
        shuffle(kutucuklar)
        kutu1 = kutucuklar[0]
        kutucuklar.pop(0)

        shuffle(kutucuklar)
        kutu2 = kutucuklar[0]
        kutucuklar.pop(0)

        shuffle(kutucuklar)
        kutu3 = kutucuklar[0]
        kutucuklar.pop(0)

        shuffle(kutucuklar)
        kutu4 = kutucuklar[0]
        kutucuklar.pop(0)

        if TALoadL.text == "low":
            if kutu1 == 1:
                IA1L.size = (0.022, 0.04)
            elif kutu1 == 2:
                IA2L.size = (0.022, 0.04)
            elif kutu1 == 3:
                IA3L.size = (0.022, 0.04)
            elif kutu1 == 4:
                IA4L.size = (0.022, 0.04)
            elif kutu1 == 5:
                IA5L.size = (0.022, 0.04)
            elif kutu1 == 6:
                IA6L.size = (0.022, 0.04)
            elif kutu1 == 7:
                IA7L.size = (0.022, 0.04)
            elif kutu1 == 8:
                IA8L.size = (0.022, 0.04)
            elif kutu1 == 9:
                IA9L.size = (0.022, 0.04)

        else:
            if kutu1 == 1:
                IA1L.size = (0.022, 0.04)
            elif kutu1 == 2:
                IA2L.size = (0.022, 0.04)
            elif kutu1 == 3:
                IA3L.size = (0.022, 0.04)
            elif kutu1 == 4:
                IA4L.size = (0.022, 0.04)
            elif kutu1 == 5:
                IA5L.size = (0.022, 0.04)
            elif kutu1 == 6:
                IA6L.size = (0.022, 0.04)
            elif kutu1 == 7:
                IA7L.size = (0.022, 0.04)
            elif kutu1 == 8:
                IA8L.size = (0.022, 0.04)
            elif kutu1 == 9:
                IA9L.size = (0.022, 0.04)
            if kutu2 == 1:
                IA1L.size = (0.022, 0.04)
            elif kutu2 == 2:
                IA2L.size = (0.022, 0.04)
            elif kutu2 == 3:
                IA3L.size = (0.022, 0.04)
            elif kutu2 == 4:
                IA4L.size = (0.022, 0.04)
            elif kutu2 == 5:
                IA5L.size = (0.022, 0.04)
            elif kutu2 == 6:
                IA6L.size = (0.022, 0.04)
            elif kutu2 == 7:
                IA7L.size = (0.022, 0.04)
            elif kutu2 == 8:
                IA8L.size = (0.022, 0.04)
            elif kutu2 == 9:
                IA9L.size = (0.022, 0.04)
            if kutu3 == 1:
                IA1L.size = (0.022, 0.04)
            elif kutu3 == 2:
                IA2L.size = (0.022, 0.04)
            elif kutu3 == 3:
                IA3L.size = (0.022, 0.04)
            elif kutu3 == 4:
                IA4L.size = (0.022, 0.04)
            elif kutu3 == 5:
                IA5L.size = (0.022, 0.04)
            elif kutu3 == 6:
                IA6L.size = (0.022, 0.04)
            elif kutu3 == 7:
                IA7L.size = (0.022, 0.04)
            elif kutu3 == 8:
                IA8L.size = (0.022, 0.04)
            elif kutu3 == 9:
                IA9L.size = (0.022, 0.04)
            if kutu4 == 1:
                IA1L.size = (0.022, 0.04)
            elif kutu4 == 2:
                IA2L.size = (0.022, 0.04)
            elif kutu4 == 3:
                IA3L.size = (0.022, 0.04)
            elif kutu4 == 4:
                IA4L.size = (0.022, 0.04)
            elif kutu4 == 5:
                IA5L.size = (0.022, 0.04)
            elif kutu4 == 6:
                IA6L.size = (0.022, 0.04)
            elif kutu4 == 7:
                IA7L.size = (0.022, 0.04)
            elif kutu4 == 8:
                IA8L.size = (0.022, 0.04)
            elif kutu4 == 9:
                IA9L.size = (0.022, 0.04)
  Routine DeneyGecis
    KeyboardComponent KADGecis
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent TADGecis
      color = black
      font = Times New Roman
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text = Click on any button when you are ready to proceed to the experiment phase.
      units = norm
      wrapWidth = 1.5
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  Routine CD1000ms
    PolygonComponent PD1000
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.022, 0.04)
      startVal [frame N] = 0
      stopVal [frame N] = 60
      units = norm
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    CodeComponent CD1000
      Code Type = Auto->JS
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      Begin Experiment:
        counter = 0
      End Routine:
        counter = counter + 1
  Routine LD150msL
    TextComponent TDLoadL
      font = Times New Roman
      letterHeight = 0.00
      startVal [frame N] = 9
      stopVal [frame N] = 9
      text [set every repeat] = $yuk
      units = norm
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    ImageComponent ID1L
      image = white.png
      pos = (-0.0295, 0.053)
      size = (0,0)
      startVal [frame N] = 0
      stopVal [frame N] = 9
      units = norm
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    ImageComponent ID2L
      image = white.png
      pos = (0, 0.053)
      size = (0,0)
      startVal [frame N] = 0
      stopVal [frame N] = 9
      units = norm
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    ImageComponent ID3L
      image = white.png
      pos = (0.0295, 0.053)
      size = (0,0)
      startVal [frame N] = 0
      stopVal [frame N] = 9
      units = norm
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    ImageComponent ID4L
      image = white.png
      pos = (-0.0295, 0)
      size = (0,0)
      startVal [frame N] = 0
      stopVal [frame N] = 9
      units = norm
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    ImageComponent ID5L
      image = white.png
      size = (0,0)
      startVal [frame N] = 0
      stopVal [frame N] = 9
      units = norm
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    ImageComponent ID6L
      image = white.png
      pos = (0.0295, 0)
      size = (0,0)
      startVal [frame N] = 0
      stopVal [frame N] = 9
      units = norm
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    ImageComponent ID7L
      image = white.png
      pos = (-0.0295, -0.053)
      size = (0,0)
      startVal [frame N] = 0
      stopVal [frame N] = 9
      units = norm
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    ImageComponent ID8L
      image = white.png
      pos = (0, -0.053)
      size = (0,0)
      startVal [frame N] = 0
      stopVal [frame N] = 9
      units = norm
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    ImageComponent ID9L
      image = white.png
      pos = (0.0295, -0.053)
      size = (0,0)
      startVal [frame N] = 0
      stopVal [frame N] = 9
      units = norm
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    CodeComponent CDLoadL
      Code Type = Auto->JS
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      Begin Routine:
        YanitD = 0
        YanitY = 0

        ID1L.size = (0,0)
        ID2L.size = (0,0)
        ID3L.size = (0,0)
        ID4L.size = (0,0)
        ID5L.size = (0,0)
        ID6L.size = (0,0)
        ID7L.size = (0,0)
        ID8L.size = (0,0)
        ID9L.size = (0,0)

        renkler = ["black","blue","cyan","green","magenta","pink","red","white","yellow"]
        shuffle(renkler)
        ID1L.color = renkler[0]
        renkler.pop(0)

        shuffle(renkler)
        ID2L.color = renkler[0]
        renkler.pop(0)

        shuffle(renkler)
        ID3L.color = renkler[0]
        renkler.pop(0)

        shuffle(renkler)
        ID4L.color = renkler[0]
        renkler.pop(0)

        shuffle(renkler)
        ID5L.color = renkler[0]
        renkler.pop(0)

        shuffle(renkler)
        ID6L.color = renkler[0]
        renkler.pop(0)

        shuffle(renkler)
        ID7L.color = renkler[0]
        renkler.pop(0)

        shuffle(renkler)
        ID8L.color = renkler[0]
        renkler.pop(0)

        shuffle(renkler)
        ID9L.color = renkler[0]
        renkler.pop(0)

        kutucuklar = [1,2,3,4,5,6,7,8,9]
        shuffle(kutucuklar)
        kutu1 = kutucuklar[0]
        kutucuklar.pop(0)

        shuffle(kutucuklar)
        kutu2 = kutucuklar[0]
        kutucuklar.pop(0)

        shuffle(kutucuklar)
        kutu3 = kutucuklar[0]
        kutucuklar.pop(0)

        shuffle(kutucuklar)
        kutu4 = kutucuklar[0]
        kutucuklar.pop(0)

        if TDLoadL.text == "low":
            if kutu1 == 1:
                ID1L.size = (0.022, 0.04)
            elif kutu1 == 2:
                ID2L.size = (0.022, 0.04)
            elif kutu1 == 3:
                ID3L.size = (0.022, 0.04)
            elif kutu1 == 4:
                ID4L.size = (0.022, 0.04)
            elif kutu1 == 5:
                ID5L.size = (0.022, 0.04)
            elif kutu1 == 6:
                ID6L.size = (0.022, 0.04)
            elif kutu1 == 7:
                ID7L.size = (0.022, 0.04)
            elif kutu1 == 8:
                ID8L.size = (0.022, 0.04)
            elif kutu1 == 9:
                ID9L.size = (0.022, 0.04)

        else:
            if kutu1 == 1:
                ID1L.size = (0.022, 0.04)
            elif kutu1 == 2:
                ID2L.size = (0.022, 0.04)
            elif kutu1 == 3:
                ID3L.size = (0.022, 0.04)
            elif kutu1 == 4:
                ID4L.size = (0.022, 0.04)
            elif kutu1 == 5:
                ID5L.size = (0.022, 0.04)
            elif kutu1 == 6:
                ID6L.size = (0.022, 0.04)
            elif kutu1 == 7:
                ID7L.size = (0.022, 0.04)
            elif kutu1 == 8:
                ID8L.size = (0.022, 0.04)
            elif kutu1 == 9:
                ID9L.size = (0.022, 0.04)
            if kutu2 == 1:
                ID1L.size = (0.022, 0.04)
            elif kutu2 == 2:
                ID2L.size = (0.022, 0.04)
            elif kutu2 == 3:
                ID3L.size = (0.022, 0.04)
            elif kutu2 == 4:
                ID4L.size = (0.022, 0.04)
            elif kutu2 == 5:
                ID5L.size = (0.022, 0.04)
            elif kutu2 == 6:
                ID6L.size = (0.022, 0.04)
            elif kutu2 == 7:
                ID7L.size = (0.022, 0.04)
            elif kutu2 == 8:
                ID8L.size = (0.022, 0.04)
            elif kutu2 == 9:
                ID9L.size = (0.022, 0.04)
            if kutu3 == 1:
                ID1L.size = (0.022, 0.04)
            elif kutu3 == 2:
                ID2L.size = (0.022, 0.04)
            elif kutu3 == 3:
                ID3L.size = (0.022, 0.04)
            elif kutu3 == 4:
                ID4L.size = (0.022, 0.04)
            elif kutu3 == 5:
                ID5L.size = (0.022, 0.04)
            elif kutu3 == 6:
                ID6L.size = (0.022, 0.04)
            elif kutu3 == 7:
                ID7L.size = (0.022, 0.04)
            elif kutu3 == 8:
                ID8L.size = (0.022, 0.04)
            elif kutu3 == 9:
                ID9L.size = (0.022, 0.04)
            if kutu4 == 1:
                ID1L.size = (0.022, 0.04)
            elif kutu4 == 2:
                ID2L.size = (0.022, 0.04)
            elif kutu4 == 3:
                ID3L.size = (0.022, 0.04)
            elif kutu4 == 4:
                ID4L.size = (0.022, 0.04)
            elif kutu4 == 5:
                ID5L.size = (0.022, 0.04)
            elif kutu4 == 6:
                ID6L.size = (0.022, 0.04)
            elif kutu4 == 7:
                ID7L.size = (0.022, 0.04)
            elif kutu4 == 8:
                ID8L.size = (0.022, 0.04)
            elif kutu4 == 9:
                ID9L.size = (0.022, 0.04)
  Routine CD1850ms
    PolygonComponent PD1850
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.022, 0.04)
      startVal [frame N] = 0
      stopVal [frame N] = 111
      units = norm
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    CodeComponent CD1850
      Code Type = Auto->JS
  Routine FD150msL
    ImageComponent IDBackgroundL
      image [set every repeat] = $pozisyonhedef
      size = (2.0, 2.0)
      startVal [frame N] = 0
      stopVal [frame N] = 9
      units = norm
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    TextComponent TDHedefL
      color = black
      font = Times New Roman
      letterHeight = 0.105
      pos [set every repeat] = pozisyonharf
      startVal [frame N] = 0
      stopVal [frame N] = 9
      text [set every repeat] = $hedef
      units = norm
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    TextComponent TDCeldiriciL
      color = black
      font = Times New Roman
      letterHeight = 0.18
      pos [set every repeat] = pozisyonceldirici
      startVal [frame N] = 0
      stopVal [frame N] = 9
      text [set every repeat] = $celdirici
      units = norm
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    CodeComponent CDFlankerL
      Code Type = Auto->JS
  Routine FD1850msR
    TextComponent TDFlankerR
      color = black
      font = Times New Roman
      letterHeight = 0.04
      startVal [frame N] = 0
      stopVal [frame N] = 111
      text = ?
      units = norm
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    KeyboardComponent KDFlankerR
      allowedKeys = '0','2'
      correctAns = $flankercevap
      forceEndRoutine = True
      startVal [frame N] = 0
      stopVal [frame N] = 111
      storeCorrect = True
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    SoundComponent SDFlankerR
      sound = yanlis.wav
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    CodeComponent CDFlankerR
      Code Type = Auto->JS
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      Begin Routine:
        FRate = 1000 / int(round(win.getActualFrameRate(),2))
        FrameN = int(1850 / FRate)
        frame = 0
      Each Frame:
        frame = frame + 1
        requirement = 1850 / FRate
        if frame >= requirement:
            continueRoutine = False
      End Routine:
        if KDFlankerR.corr == 0:
            SDFlankerR.play()
  Routine LD3000msR
    ImageComponent ID1R
      image = white.png
      pos = (-0.0295, 0.053)
      size = (0,0)
      startVal [frame N] = 0
      stopVal [frame N] = 180
      units = norm
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    ImageComponent ID2R
      image = white.png
      pos = (0, 0.053)
      size = (0,0)
      startVal [frame N] = 0
      stopVal [frame N] = 180
      units = norm
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    ImageComponent ID3R
      image = white.png
      pos = (0.0295, 0.053)
      size = (0,0)
      startVal [frame N] = 0
      stopVal [frame N] = 180
      units = norm
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    ImageComponent ID4R
      image = white.png
      pos = (-0.0295, 0)
      size = (0,0)
      startVal [frame N] = 0
      stopVal [frame N] = 180
      units = norm
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    ImageComponent ID5R
      image = white.png
      size = (0,0)
      startVal [frame N] = 0
      stopVal [frame N] = 180
      units = norm
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    ImageComponent ID6R
      image = white.png
      pos = (0.0295, 0)
      size = (0,0)
      startVal [frame N] = 0
      stopVal [frame N] = 180
      units = norm
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    ImageComponent ID7R
      image = white.png
      pos = (-0.0295, -0.053)
      size = (0,0)
      startVal [frame N] = 0
      stopVal [frame N] = 180
      units = norm
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    ImageComponent ID8R
      image = white.png
      pos = (0, -0.053)
      size = (0,0)
      startVal [frame N] = 0
      stopVal [frame N] = 180
      units = norm
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    ImageComponent ID9R
      image = white.png
      pos = (0.0295, -0.053)
      size = (0,0)
      startVal [frame N] = 0
      stopVal [frame N] = 180
      units = norm
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    TextComponent TDDYR
      letterHeight = 0.00
      startVal [frame N] = 0
      stopVal [frame N] = 180
      text [set every repeat] = $taskcevap
      units = norm
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    KeyboardComponent KDLoadR
      allowedKeys = 'a','s'
      correctAns = $taskcevap
      forceEndRoutine = True
      startVal [frame N] = 0
      stopVal [frame N] = 180
      storeCorrect = True
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    CodeComponent CDLoadR
      Code Type = Auto->JS
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      Begin Routine:
        FRate = 1000 / int(round(win.getActualFrameRate(),2))
        FrameN = int(3000 / FRate)
        frame = 0

        dizi = [kutu1,kutu2,kutu3,kutu4]
        shuffle(dizi)
        deger = dizi[0]

        if deger == 1:
            if TDDYR.text == "s":
                ID1R.color = ID1L.color
                ID1R.size = (0.022, 0.04)
            else:
                ID1R.color = ID2L.color
                ID1R.size = (0.022, 0.04)
        elif deger == 2:
            if TDDYR.text == "s":
                ID2R.color = ID2L.color
                ID2R.size = (0.022, 0.04)
            else:
                ID2R.color = ID3L.color
                ID2R.size = (0.022, 0.04)
        elif deger == 3:
            if TDDYR.text == "s":
                ID3R.color = ID3L.color
                ID3R.size = (0.022, 0.04)
            else:
                ID3R.color = ID4L.color
                ID3R.size = (0.022, 0.04)
        elif deger == 4:
            if TDDYR.text == "s":
                ID4R.color = ID4L.color
                ID4R.size = (0.022, 0.04)
            else:
                ID4R.color = ID5L.color
                ID4R.size = (0.022, 0.04)
        elif deger ==5:
            if TDDYR.text == "s":
                ID5R.color = ID5L.color
                ID5R.size = (0.022, 0.04)
            else:
                ID5R.color = ID6L.color
                ID5R.size = (0.022, 0.04)
        elif deger == 6:
            if TDDYR.text == "s":
                ID6R.color = ID6L.color
                ID6R.size = (0.022, 0.04)
            else:
                ID6R.color = ID7L.color
                ID6R.size = (0.022, 0.04)
        elif deger == 7:
            if TDDYR.text == "s":
                ID7R.color = ID7L.color
                ID7R.size = (0.022, 0.04)
            else:
                ID7R.color = ID8L.color
                ID7R.size = (0.022, 0.04)
        elif deger == 8:
            if TDDYR.text == "s":
                ID8R.color = ID8L.color
                ID8R.size = (0.022, 0.04)
            else:
                ID8R.color = ID9L.color
                ID8R.size = (0.022, 0.04)
        elif deger == 9:
            if TDDYR.text == "s":
                ID9R.color = ID9L.color
                ID9R.size = (0.022, 0.04)
            else:
                IA9R.color = ID1L.color
                IA9R.size = (0.022, 0.04)
      Each Frame:
        frame = frame + 1
        requirement = 3000 / FRate
        if frame >= requirement:
            continueRoutine = False
Flow
  Routine Yonerge
  LoopInitiator LoopAlistirma loopType="TrialHandler"
    conditionsFile = replication_of_konstantinaou_beal_and_lavie_exp1b.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'yuk': 'low', 'hedef': 'X', 'celdirici': 'Z', 'pozisyonhedef': '1.png', 'pozisyonceldirici': (0.5, 0), 'pozisyonharf': (0, 0.75), 'flankercevap': 0, 'taskcevap': 's'},
      {'yuk': 'low', 'hedef': 'Z', 'celdirici': 'X', 'pozisyonhedef': '1.png', 'pozisyonceldirici': (0.5, 0), 'pozisyonharf': (0, 0.75), 'flankercevap': 2, 'taskcevap': 'a'},
      {'yuk': 'low', 'hedef': 'X', 'celdirici': 'X', 'pozisyonhedef': '1.png', 'pozisyonceldirici': (0.5, 0), 'pozisyonharf': (0, 0.75), 'flankercevap': 0, 'taskcevap': 'a'},
      {'yuk': 'low', 'hedef': 'Z', 'celdirici': 'Z', 'pozisyonhedef': '1.png', 'pozisyonceldirici': (0.5, 0), 'pozisyonharf': (0, 0.75), 'flankercevap': 2, 'taskcevap': 's'},
      {'yuk': 'low', 'hedef': 'X', 'celdirici': 'Z', 'pozisyonhedef': '1.png', 'pozisyonceldirici': (-0.5, 0), 'pozisyonharf': (0, 0.75), 'flankercevap': 0, 'taskcevap': 'a'},
      {'yuk': 'low', 'hedef': 'Z', 'celdirici': 'X', 'pozisyonhedef': '1.png', 'pozisyonceldirici': (-0.5, 0), 'pozisyonharf': (0, 0.75), 'flankercevap': 2, 'taskcevap': 's'},
      {'yuk': 'low', 'hedef': 'X', 'celdirici': 'X', 'pozisyonhedef': '1.png', 'pozisyonceldirici': (-0.5, 0), 'pozisyonharf': (0, 0.75), 'flankercevap': 0, 'taskcevap': 's'},
      {'yuk': 'low', 'hedef': 'Z', 'celdirici': 'Z', 'pozisyonhedef': '1.png', 'pozisyonceldirici': (-0.5, 0), 'pozisyonharf': (0, 0.75), 'flankercevap': 2, 'taskcevap': 'a'}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
    Routine CA1000ms
    Routine LA150msL
    Routine CA1850ms
    Routine FA150msL
    Routine FA1850msR
    Routine LA3000msR
  LoopTerminator LoopAlistirma
  Routine DeneyGecis
  LoopInitiator LoopDeney loopType="TrialHandler"
    conditionsFile = replication_of_konstantinaou_beal_and_lavie_exp1b.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'yuk': 'low', 'hedef': 'X', 'celdirici': 'Z', 'pozisyonhedef': '1.png', 'pozisyonceldirici': (0.5, 0), 'pozisyonharf': (0, 0.75), 'flankercevap': 0, 'taskcevap': 's'},
      {'yuk': 'low', 'hedef': 'Z', 'celdirici': 'X', 'pozisyonhedef': '1.png', 'pozisyonceldirici': (0.5, 0), 'pozisyonharf': (0, 0.75), 'flankercevap': 2, 'taskcevap': 'a'},
      {'yuk': 'low', 'hedef': 'X', 'celdirici': 'X', 'pozisyonhedef': '1.png', 'pozisyonceldirici': (0.5, 0), 'pozisyonharf': (0, 0.75), 'flankercevap': 0, 'taskcevap': 'a'},
      {'yuk': 'low', 'hedef': 'Z', 'celdirici': 'Z', 'pozisyonhedef': '1.png', 'pozisyonceldirici': (0.5, 0), 'pozisyonharf': (0, 0.75), 'flankercevap': 2, 'taskcevap': 's'},
      {'yuk': 'low', 'hedef': 'X', 'celdirici': 'Z', 'pozisyonhedef': '1.png', 'pozisyonceldirici': (-0.5, 0), 'pozisyonharf': (0, 0.75), 'flankercevap': 0, 'taskcevap': 'a'},
      {'yuk': 'low', 'hedef': 'Z', 'celdirici': 'X', 'pozisyonhedef': '1.png', 'pozisyonceldirici': (-0.5, 0), 'pozisyonharf': (0, 0.75), 'flankercevap': 2, 'taskcevap': 's'},
      {'yuk': 'low', 'hedef': 'X', 'celdirici': 'X', 'pozisyonhedef': '1.png', 'pozisyonceldirici': (-0.5, 0), 'pozisyonharf': (0, 0.75), 'flankercevap': 0, 'taskcevap': 's'},
      {'yuk': 'low', 'hedef': 'Z', 'celdirici': 'Z', 'pozisyonhedef': '1.png', 'pozisyonceldirici': (-0.5, 0), 'pozisyonharf': (0, 0.75), 'flankercevap': 2, 'taskcevap': 'a'}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
    Routine CD1000ms
    Routine LD150msL
    Routine CD1850ms
    Routine FD150msL
    Routine FD1850msR
    Routine LD3000msR
  LoopTerminator LoopDeney
