PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = Tahir
  Screen = 1
  Units = height
  Use version = 2023.1.0
  Window size (pixels) = [1920, 1080]
  expName = replication_of_konstantinaou_beal_and_lavie_exp2a
  keyboardBackend = ioHub
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Routines
  Routine Yonerge
    KeyboardComponent KAYonerge
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent TAYonerge
      font = Times New Roman
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        Welcome to our study.

        In a moment you will be presented with a letter or letters. You are expected to memorize the letters or letter sequences that appear on the screen, regardless of their position. Then you will be presented with 2 letters (N and Z) inside and outside a circle. You are also expected to memorize the letter inside the circle (press 0 for N and 2 for Z).

        After this presentation, you will be asked to answer first what the letter inside the circle is and then whether the letter that appears on the first screen is any of the letters on the first screen (press S if it contains the letter and A if it does not).

        The first 16 trials are as a practice and the experiment will start after the 16th trial.



        When you are ready to move to the practice phase, click on any key.
  Routine CA500ms
    ImageComponent IA500
      image = fixation.png
      size = (2.0, 2.0)
      startVal [frame N] = 0
      stopVal [frame N] = 30
      units = norm
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    CodeComponent CA500
      Code Type = Auto->JS
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      Begin Experiment:
        counter = 0
      End Routine:
        counter = counter + 1
  Routine LA500msL
    ImageComponent IALoadBackgroundL
      image [set every repeat] = $pozisyonhedef
      size = (2.0, 2.0)
      startVal [frame N] = 0
      stopVal [frame N] = 30
      units = norm
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    TextComponent TALoadL
      font = Times New Roman
      letterHeight = 0.00
      startVal [frame N] = 0
      stopVal [frame N] = 30
      text [set every repeat] = $yuk
      units = norm
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    TextComponent TA1L
      color = black
      font = Times New Roman
      letterHeight = 0.18
      pos = (0,0.75)
      startVal [frame N] = 0
      stopVal [frame N] = 30
      units = norm
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    TextComponent TA2L
      color = black
      font = Times New Roman
      letterHeight = 0.18
      pos = (0.375,0.375)
      startVal [frame N] = 0
      stopVal [frame N] = 30
      units = norm
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    TextComponent TA3L
      color = black
      font = Times New Roman
      letterHeight = 0.18
      pos = (0.375, -0.375)
      startVal [frame N] = 0
      stopVal [frame N] = 30
      units = norm
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    TextComponent TA4L
      color = black
      font = Times New Roman
      letterHeight = 0.18
      pos = (0,-0.75)
      startVal [frame N] = 0
      stopVal [frame N] = 30
      units = norm
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    TextComponent TA5L
      color = black
      font = Times New Roman
      letterHeight = 0.18
      pos = (-0.375, -0.375)
      startVal [frame N] = 0
      stopVal [frame N] = 30
      units = norm
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    TextComponent TA6L
      color = black
      font = Times New Roman
      letterHeight = 0.18
      pos = (-0.375, 0.375)
      startVal [frame N] = 0
      stopVal [frame N] = 30
      units = norm
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    TextComponent TABosL
      color = black
      font = Times New Roman
      letterHeight = 0.00
      pos = (-0.375, 0.375)
      startVal [frame N] = 0
      stopVal [frame N] = 30
      units = norm
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    CodeComponent CALoadL
      Code Type = Auto->JS
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      Begin Routine:
        YanitD = 0
        YanitY = 0

        TA1L.height = 0.00
        TA2L.height = 0.00
        TA3L.height = 0.00
        TA4L.height = 0.00
        TA5L.height = 0.00
        TA6L.height = 0.00

        harfler = ["F","H","K","L","M","T","V","W","Y","X"]
        shuffle(harfler)
        TA1L.text = harfler[0]
        harfler.pop(0)

        shuffle(harfler)
        TA2L.text = harfler[0]
        harfler.pop(0)

        shuffle(harfler)
        TA3L.text = harfler[0]
        harfler.pop(0)

        shuffle(harfler)
        TA4L.text = harfler[0]
        harfler.pop(0)

        shuffle(harfler)
        TA5L.text = harfler[0]
        harfler.pop(0)

        shuffle(harfler)
        TA6L.text = harfler[0]
        harfler.pop(0)

        shuffle(harfler)
        TABosL.text = harfler[0]
        harfler.pop(0)


        if TALoadL.text == "low":
            if IALoadBackgroundL.image == '1.png':
                TA1L.height = 0.18
            elif IALoadBackgroundL.image == '2.png':
                TA2L.height = 0.18
            elif IALoadBackgroundL.image == '3.png':
                TA3L.height = 0.18
            elif IALoadBackgroundL.image == '4.png':
                TA4L.height = 0.18
            elif IALoadBackgroundL.image == '5.png':
                TA5L.height = 0.18
            elif IALoadBackgroundL.image == '6.png':
                TA6L.height = 0.18

        else:
            TA1L.height = 0.18
            TA2L.height = 0.18
            TA3L.height = 0.18
            TA4L.height = 0.18
            TA5L.height = 0.18
            TA6L.height = 0.18
  Routine CA2000ms
    ImageComponent IA2000
      image = blank.png
      size = (2.0, 2.0)
      startVal [frame N] = 0
      stopVal [frame N] = 120
      units = norm
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    CodeComponent CA2000
      Code Type = Auto->JS
  Routine FA150msL
    ImageComponent IAFlankerBackgroundL
      image [set every repeat] = $pozisyonhedef
      size = (2.0, 2.0)
      startVal [frame N] = 0
      stopVal [frame N] = 9
      units = norm
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    TextComponent TAHedefL
      color = black
      font = Times New Roman
      letterHeight = 0.105
      pos [set every repeat] = pozisyonharf
      startVal [frame N] = 0
      stopVal [frame N] = 9
      text [set every repeat] = $hedef
      units = norm
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    TextComponent TACeldiriciL
      color = black
      font = Times New Roman
      letterHeight = 0.18
      pos [set every repeat] = pozisyonceldirici
      startVal [frame N] = 0
      stopVal [frame N] = 9
      text [set every repeat] = $celdirici
      units = norm
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    CodeComponent CAFlankerL
      Code Type = Auto->JS
  Routine FA1850msR
    ImageComponent IA1850
      image = blank.png
      size = (2.0, 2.0)
      startVal [frame N] = 0
      stopVal [frame N] = 111
      units = norm
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    KeyboardComponent KAFlankerR
      allowedKeys = '0','2'
      correctAns = $flankercevap
      forceEndRoutine = True
      startVal [frame N] = 0
      stopVal [frame N] = 111
      storeCorrect = True
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    CodeComponent CAFlankerR
      Code Type = Auto->JS
  Routine LA3000msR
    ImageComponent IALoadBackgroundR
      image [set every repeat] = 1.png
      size = (2.0, 2.0)
      startVal [frame N] = 0
      stopVal [frame N] = 180
      units = norm
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    TextComponent TA1R
      color = black
      font = Times New Roman
      letterHeight = 0.18
      pos = (0,0.75)
      startVal [frame N] = 0
      stopVal [frame N] = 180
      units = norm
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    TextComponent TA2R
      color = black
      font = Times New Roman
      letterHeight = 0.18
      pos = (0.375,0.375)
      startVal [frame N] = 0
      stopVal [frame N] = 180
      units = norm
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    TextComponent TA3R
      color = black
      font = Times New Roman
      letterHeight = 0.18
      pos = (0.375, -0.375)
      startVal [frame N] = 0
      stopVal [frame N] = 180
      units = norm
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    TextComponent TA4R
      color = black
      font = Times New Roman
      letterHeight = 0.18
      pos = (0,-0.75)
      startVal [frame N] = 0
      stopVal [frame N] = 180
      units = norm
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    TextComponent TA5R
      color = black
      font = Times New Roman
      letterHeight = 0.18
      pos = (-0.375, -0.375)
      startVal [frame N] = 0
      stopVal [frame N] = 180
      units = norm
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    TextComponent TA6R
      color = black
      font = Times New Roman
      letterHeight = 0.18
      pos = (-0.375, 0.375)
      startVal [frame N] = 0
      stopVal [frame N] = 180
      units = norm
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    TextComponent TADYR
      letterHeight = 0.00
      startVal [frame N] = 0
      stopVal [frame N] = 180
      text [set every repeat] = $taskcevap
      units = norm
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    KeyboardComponent KALoadR
      allowedKeys = 'a','s'
      correctAns = $taskcevap
      forceEndRoutine = True
      startVal [frame N] = 0
      stopVal [frame N] = 180
      storeCorrect = True
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    SoundComponent SAFlankerR
      sound = yanlis.wav
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    CodeComponent CALoadR
      Code Type = Auto->JS
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      Begin Routine:
        FRate = 1000 / int(round(win.getActualFrameRate(),2))
        FrameN = int(3000 / FRate)
        frame = 0

        TA1R.height = 0.00
        TA2R.height = 0.00
        TA3R.height = 0.00
        TA4R.height = 0.00
        TA5R.height = 0.00
        TA6R.height = 0.00

        dizi = [1,2,3,4,5,6]
        shuffle(dizi)
        deger = dizi[0]

        karistir = [TA1L.text,TA2L.text,TA3L.text,TA4L.text,TA5L.text,TA6L.text,]
        shuffle(karistir)
        harf = karistir[0]

        if deger == 1:
            if TADYR.text == "s":
                TA1R.height = 0.18
                TA1R.text = harf
                IALoadBackgroundR.image = '1.png'
            else:
                TA1R.height = 0.18
                TA1R.text = TABosL.text
                IALoadBackgroundR.image = '1.png'
        elif deger == 2:
            if TADYR.text == "s":
                TA2R.height = 0.18
                TA2R.text = harf
                IALoadBackgroundR.image = '2.png'
            else:
                TA2R.height = 0.18
                TA2R.text = TABosL.text
                IALoadBackgroundR.image = '2.png'
        elif deger == 3:
            if TADYR.text == "s":
                TA3R.height = 0.18
                TA3R.text = harf
                IALoadBackgroundR.image = '3.png'
            else:
                TA3R.height = 0.18
                TA3R.text = TABosL.text
                IALoadBackgroundR.image = '3.png'
        elif deger == 4:
            if TADYR.text == "s":
                TA4R.height = 0.18
                TA4R.text = harf
                IALoadBackgroundR.image = '4.png'
            else:
                TA4R.height = 0.18
                TA4R.text = TABosL.text
                IALoadBackgroundR.image = '4.png'
        elif deger ==5:
            if TADYR.text == "s":
                TA5R.height = 0.18
                TA5R.text = harf
                IALoadBackgroundR.image = '5.png'
            else:
                TA5R.height = 0.18
                TA5R.text = TABosL.text
                IALoadBackgroundR.image = '5.png'
        elif deger == 6:
            if TADYR.text == "s":
                TA6R.height = 0.18
                TA6R.text = harf
                IALoadBackgroundR.image = '6.png'
            else:
                TA6R.height = 0.18
                TA6R.text = TABosL.text
                IALoadBackgroundR.image = '6.png'
      Each Frame:
        frame = frame + 1
        requirement = 3000 / FRate
        if frame >= requirement:
            continueRoutine = False
      End Routine:
        if KALoadR.corr == 0:
            SAFlankerR.play()

        if counter == 16:
            LoopAlistirma.finished = True
  Routine DeneyGecis
    KeyboardComponent KADGecis
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent TADGecis
      color = black
      font = Times New Roman
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text = Click on any button when you are ready to proceed to the experiment phase.
      units = norm
      wrapWidth = 1.5
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  Routine CD500ms
    ImageComponent ID500
      image = fixation.png
      size = (2.0, 2.0)
      startVal [frame N] = 0
      stopVal [frame N] = 30
      units = norm
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    CodeComponent CD500
      Code Type = Auto->JS
  Routine LD500msL
    ImageComponent IDLoadBackgroundL
      image [set every repeat] = $pozisyonhedef
      size = (2.0, 2.0)
      startVal [frame N] = 0
      stopVal [frame N] = 30
      units = norm
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    TextComponent TDLoadL
      font = Times New Roman
      letterHeight = 0.00
      startVal [frame N] = 0
      stopVal [frame N] = 30
      text [set every repeat] = $yuk
      units = norm
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    TextComponent TD1L
      color = black
      font = Times New Roman
      letterHeight = 0.18
      pos = (0,0.75)
      startVal [frame N] = 0
      stopVal [frame N] = 30
      units = norm
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    TextComponent TD2L
      color = black
      font = Times New Roman
      letterHeight = 0.18
      pos = (0.375,0.375)
      startVal [frame N] = 0
      stopVal [frame N] = 30
      units = norm
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    TextComponent TD3L
      color = black
      font = Times New Roman
      letterHeight = 0.18
      pos = (0.375, -0.375)
      startVal [frame N] = 0
      stopVal [frame N] = 30
      units = norm
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    TextComponent TD4L
      color = black
      font = Times New Roman
      letterHeight = 0.18
      pos = (0,-0.75)
      startVal [frame N] = 0
      stopVal [frame N] = 30
      units = norm
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    TextComponent TD5L
      color = black
      font = Times New Roman
      letterHeight = 0.18
      pos = (-0.375, -0.375)
      startVal [frame N] = 0
      stopVal [frame N] = 30
      units = norm
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    TextComponent TD6L
      color = black
      font = Times New Roman
      letterHeight = 0.18
      pos = (-0.375, 0.375)
      startVal [frame N] = 0
      stopVal [frame N] = 30
      units = norm
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    TextComponent TDBosL
      color = black
      font = Times New Roman
      letterHeight = 0.00
      pos = (-0.375, 0.375)
      startVal [frame N] = 0
      stopVal [frame N] = 30
      units = norm
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    CodeComponent CDLoadL
      Code Type = Auto->JS
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      Begin Routine:
        YanitD = 0
        YanitY = 0

        TD1L.height = 0.00
        TD2L.height = 0.00
        TD3L.height = 0.00
        TD4L.height = 0.00
        TD5L.height = 0.00
        TD6L.height = 0.00

        harfler = ["F","H","K","L","M","T","V","W","Y","X"]
        shuffle(harfler)
        TD1L.text = harfler[0]
        harfler.pop(0)

        shuffle(harfler)
        TD2L.text = harfler[0]
        harfler.pop(0)

        shuffle(harfler)
        TD3L.text = harfler[0]
        harfler.pop(0)

        shuffle(harfler)
        TD4L.text = harfler[0]
        harfler.pop(0)

        shuffle(harfler)
        TD5L.text = harfler[0]
        harfler.pop(0)

        shuffle(harfler)
        TD6L.text = harfler[0]
        harfler.pop(0)

        shuffle(harfler)
        TDBosL.text = harfler[0]
        harfler.pop(0)


        if TDLoadL.text == "low":
            if IDLoadBackgroundL.image == '1.png':
                TD1L.height = 0.18
            elif IDLoadBackgroundL.image == '2.png':
                TD2L.height = 0.18
            elif IDLoadBackgroundL.image == '3.png':
                TD3L.height = 0.18
            elif IDLoadBackgroundL.image == '4.png':
                TD4L.height = 0.18
            elif IDLoadBackgroundL.image == '5.png':
                TD5L.height = 0.18
            elif IDLoadBackgroundL.image == '6.png':
                TD6L.height = 0.18

        else:
            TD1L.height = 0.18
            TD2L.height = 0.18
            TD3L.height = 0.18
            TD4L.height = 0.18
            TD5L.height = 0.18
            TD6L.height = 0.18
  Routine CD2000ms
    ImageComponent ID2000
      image = blank.png
      size = (2.0, 2.0)
      startVal [frame N] = 0
      stopVal [frame N] = 120
      units = norm
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    CodeComponent CD2000
      Code Type = Auto->JS
  Routine FD1850msR
    ImageComponent ID1850
      image = blank.png
      size = (2.0, 2.0)
      startVal [frame N] = 0
      stopVal [frame N] = 111
      units = norm
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    KeyboardComponent KDFlankerR
      allowedKeys = '0','2'
      correctAns = $flankercevap
      forceEndRoutine = True
      startVal [frame N] = 0
      stopVal [frame N] = 111
      storeCorrect = True
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    CodeComponent CDFlankerR
      Code Type = Auto->JS
  Routine LD3000msR
    ImageComponent IDLoadBackgroundR
      image [set every repeat] = 1.png
      size = (2.0, 2.0)
      startVal [frame N] = 0
      stopVal [frame N] = 180
      units = norm
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    TextComponent TD1R
      color = black
      font = Times New Roman
      letterHeight = 0.18
      pos = (0,0.75)
      startVal [frame N] = 0
      stopVal [frame N] = 180
      units = norm
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    TextComponent TD2R
      color = black
      font = Times New Roman
      letterHeight = 0.18
      pos = (0.375,0.375)
      startVal [frame N] = 0
      stopVal [frame N] = 180
      units = norm
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    TextComponent TD3R
      color = black
      font = Times New Roman
      letterHeight = 0.18
      pos = (0.375, -0.375)
      startVal [frame N] = 0
      stopVal [frame N] = 180
      units = norm
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    TextComponent TD4R
      color = black
      font = Times New Roman
      letterHeight = 0.18
      pos = (0,-0.75)
      startVal [frame N] = 0
      stopVal [frame N] = 180
      units = norm
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    TextComponent TD5R
      color = black
      font = Times New Roman
      letterHeight = 0.18
      pos = (-0.375, -0.375)
      startVal [frame N] = 0
      stopVal [frame N] = 180
      units = norm
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    TextComponent TD6R
      color = black
      font = Times New Roman
      letterHeight = 0.18
      pos = (-0.375, 0.375)
      startVal [frame N] = 0
      stopVal [frame N] = 180
      units = norm
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    TextComponent TDDYR
      letterHeight = 0.00
      startVal [frame N] = 0
      stopVal [frame N] = 180
      text [set every repeat] = $taskcevap
      units = norm
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    KeyboardComponent KDLoadR
      allowedKeys = 'a','s'
      correctAns = $taskcevap
      forceEndRoutine = True
      startVal [frame N] = 0
      stopVal [frame N] = 180
      storeCorrect = True
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    SoundComponent SDFlankerR
      sound = yanlis.wav
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    CodeComponent CDLoadR
      Code Type = Auto->JS
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      Begin Routine:
        FRate = 1000 / int(round(win.getActualFrameRate(),2))
        FrameN = int(3000 / FRate)
        frame = 0

        TD1R.height = 0.00
        TD2R.height = 0.00
        TD3R.height = 0.00
        TD4R.height = 0.00
        TD5R.height = 0.00
        TD6R.height = 0.00

        dizi = [1,2,3,4,5,6]
        shuffle(dizi)
        deger = dizi[0]

        karistir = [TD1L.text,TD2L.text,TD3L.text,TD4L.text,TD5L.text,TD6L.text,]
        shuffle(karistir)
        harf = karistir[0]

        if deger == 1:
            if TDDYR.text == "s":
                TD1R.height = 0.18
                TD1R.text = harf
                IDLoadBackgroundR.image = '1.png'
            else:
                TD1R.height = 0.18
                TD1R.text = TABosL.text
                IDLoadBackgroundR.image = '1.png'
        elif deger == 2:
            if TDDYR.text == "s":
                TD2R.height = 0.18
                TD2R.text = harf
                IDLoadBackgroundR.image = '2.png'
            else:
                TD2R.height = 0.18
                TD2R.text = TABosL.text
                IDLoadBackgroundR.image = '2.png'
        elif deger == 3:
            if TDDYR.text == "s":
                TD3R.height = 0.18
                TD3R.text = harf
                IDLoadBackgroundR.image = '3.png'
            else:
                TD3R.height = 0.18
                TD3R.text = TABosL.text
                IDLoadBackgroundR.image = '3.png'
        elif deger == 4:
            if TDDYR.text == "s":
                TD4R.height = 0.18
                TD4R.text = harf
                IDLoadBackgroundR.image = '4.png'
            else:
                TD4R.height = 0.18
                TD4R.text = TABosL.text
                IDLoadBackgroundR.image = '4.png'
        elif deger ==5:
            if TDDYR.text == "s":
                TD5R.height = 0.18
                TD5R.text = harf
                IDLoadBackgroundR.image = '5.png'
            else:
                TD5R.height = 0.18
                TD5R.text = TABosL.text
                IDLoadBackgroundR.image = '5.png'
        elif deger == 6:
            if TDDYR.text == "s":
                TD6R.height = 0.18
                TD6R.text = harf
                IDLoadBackgroundR.image = '6.png'
            else:
                TD6R.height = 0.18
                TD6R.text = TABosL.text
                IDLoadBackgroundR.image = '6.png'
      Each Frame:
        frame = frame + 1
        requirement = 3000 / FRate
        if frame >= requirement:
            continueRoutine = False
      End Routine:
        if KDLoadR.corr == 0:
            SDFlankerR.play()
  Routine FD150msL
    ImageComponent IDFlankerBackgroundL
      image [set every repeat] = $pozisyonhedef
      size = (2.0, 2.0)
      startVal [frame N] = 0
      stopVal [frame N] = 9
      units = norm
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    TextComponent TDHedefL
      color = black
      font = Times New Roman
      letterHeight = 0.105
      pos [set every repeat] = pozisyonharf
      startVal [frame N] = 0
      stopVal [frame N] = 9
      text [set every repeat] = $hedef
      units = norm
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    TextComponent TdCeldiriciL
      color = black
      font = Times New Roman
      letterHeight = 0.18
      pos [set every repeat] = pozisyonceldirici
      startVal [frame N] = 0
      stopVal [frame N] = 9
      text [set every repeat] = $celdirici
      units = norm
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    CodeComponent CDFlankerL
      Code Type = Auto->JS
Flow
  Routine Yonerge
  LoopInitiator LoopAlistirma loopType="TrialHandler"
    conditionsFile = replication_of_konstantinaou_beal_and_lavie_exp2a.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'yuk': 'low', 'hedef': 'N', 'celdirici': 'Z', 'pozisyonhedef': '1.png', 'pozisyonceldirici': (0.5, 0), 'pozisyonharf': (0, 0.75), 'flankercevap': 0, 'taskcevap': 's'},
      {'yuk': 'low', 'hedef': 'Z', 'celdirici': 'N', 'pozisyonhedef': '1.png', 'pozisyonceldirici': (0.5, 0), 'pozisyonharf': (0, 0.75), 'flankercevap': 2, 'taskcevap': 'a'},
      {'yuk': 'low', 'hedef': 'N', 'celdirici': 'N', 'pozisyonhedef': '1.png', 'pozisyonceldirici': (0.5, 0), 'pozisyonharf': (0, 0.75), 'flankercevap': 0, 'taskcevap': 'a'},
      {'yuk': 'low', 'hedef': 'Z', 'celdirici': 'Z', 'pozisyonhedef': '1.png', 'pozisyonceldirici': (0.5, 0), 'pozisyonharf': (0, 0.75), 'flankercevap': 2, 'taskcevap': 's'},
      {'yuk': 'low', 'hedef': 'N', 'celdirici': 'Z', 'pozisyonhedef': '1.png', 'pozisyonceldirici': (-0.5, 0), 'pozisyonharf': (0, 0.75), 'flankercevap': 0, 'taskcevap': 'a'},
      {'yuk': 'low', 'hedef': 'Z', 'celdirici': 'N', 'pozisyonhedef': '1.png', 'pozisyonceldirici': (-0.5, 0), 'pozisyonharf': (0, 0.75), 'flankercevap': 2, 'taskcevap': 's'},
      {'yuk': 'low', 'hedef': 'N', 'celdirici': 'N', 'pozisyonhedef': '1.png', 'pozisyonceldirici': (-0.5, 0), 'pozisyonharf': (0, 0.75), 'flankercevap': 0, 'taskcevap': 's'},
      {'yuk': 'low', 'hedef': 'Z', 'celdirici': 'Z', 'pozisyonhedef': '1.png', 'pozisyonceldirici': (-0.5, 0), 'pozisyonharf': (0, 0.75), 'flankercevap': 2, 'taskcevap': 'a'}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
    Routine CA500ms
    Routine LA500msL
    Routine CA2000ms
    Routine FA150msL
    Routine FA1850msR
    Routine LA3000msR
  LoopTerminator LoopAlistirma
  Routine DeneyGecis
  LoopInitiator LoopDeney loopType="TrialHandler"
    conditionsFile = replication_of_konstantinaou_beal_and_lavie_exp2a.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'yuk': 'low', 'hedef': 'N', 'celdirici': 'Z', 'pozisyonhedef': '1.png', 'pozisyonceldirici': (0.5, 0), 'pozisyonharf': (0, 0.75), 'flankercevap': 0, 'taskcevap': 's'},
      {'yuk': 'low', 'hedef': 'Z', 'celdirici': 'N', 'pozisyonhedef': '1.png', 'pozisyonceldirici': (0.5, 0), 'pozisyonharf': (0, 0.75), 'flankercevap': 2, 'taskcevap': 'a'},
      {'yuk': 'low', 'hedef': 'N', 'celdirici': 'N', 'pozisyonhedef': '1.png', 'pozisyonceldirici': (0.5, 0), 'pozisyonharf': (0, 0.75), 'flankercevap': 0, 'taskcevap': 'a'},
      {'yuk': 'low', 'hedef': 'Z', 'celdirici': 'Z', 'pozisyonhedef': '1.png', 'pozisyonceldirici': (0.5, 0), 'pozisyonharf': (0, 0.75), 'flankercevap': 2, 'taskcevap': 's'},
      {'yuk': 'low', 'hedef': 'N', 'celdirici': 'Z', 'pozisyonhedef': '1.png', 'pozisyonceldirici': (-0.5, 0), 'pozisyonharf': (0, 0.75), 'flankercevap': 0, 'taskcevap': 'a'},
      {'yuk': 'low', 'hedef': 'Z', 'celdirici': 'N', 'pozisyonhedef': '1.png', 'pozisyonceldirici': (-0.5, 0), 'pozisyonharf': (0, 0.75), 'flankercevap': 2, 'taskcevap': 's'},
      {'yuk': 'low', 'hedef': 'N', 'celdirici': 'N', 'pozisyonhedef': '1.png', 'pozisyonceldirici': (-0.5, 0), 'pozisyonharf': (0, 0.75), 'flankercevap': 0, 'taskcevap': 's'},
      {'yuk': 'low', 'hedef': 'Z', 'celdirici': 'Z', 'pozisyonhedef': '1.png', 'pozisyonceldirici': (-0.5, 0), 'pozisyonharf': (0, 0.75), 'flankercevap': 2, 'taskcevap': 'a'}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
    Routine CD500ms
    Routine LD500msL
    Routine CD2000ms
    Routine FD150msL
    Routine FD1850msR
    Routine LD3000msR
  LoopTerminator LoopDeney
