PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2023.1.0
  Window size (pixels) = [1920, 1080]
  expName = replication_of_konstantinaou_beal_lavie_exp2b
  keyboardBackend = ioHub
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Routines
  Routine Yonerge
    KeyboardComponent KAYonerge
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent TAYonerge
      font = Times New Roman
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        Welcome to our study.



        In a moment you will be presented with a symbol or symbols. You will be expected to memorize the symbol or series of symbols regardless of their position. Then you will be presented with 2 letters (N and Z) inside and outside a circle. You are also expected to memorize the letter inside the circle (press 0 for N and 2 for Z).



        After this presentation, you will be asked to answer first what the letter inside the circle is and then whether the symbol that appears on the first screen is any of the symbols on the first screen (press S if it contains the symbol and A if it does not).



        The first 16 trials are as a practice and the experiment will start after the 16th trial.



        When you are ready to move to the practice phase, click on any key.
  Routine CA500ms
    ImageComponent IA500
      image = fixation.png
      size = (2.0, 2.0)
      startVal [frame N] = 0
      stopVal [frame N] = 30
      units = norm
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    CodeComponent CA500
      Code Type = Auto->JS
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      Begin Experiment:
        counter = 0
      End Routine:
        counter = counter + 1
  Routine LA500msL
    ImageComponent IALoadBackgroundL
      image [set every repeat] = $pozisyonhedef
      size = (2.0, 2.0)
      startVal [frame N] = 0
      stopVal [frame N] = 30
      units = norm
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    TextComponent TALoadL
      font = Times New Roman
      letterHeight = 0.00
      startVal [frame N] = 0
      stopVal [frame N] = 30
      text [set every repeat] = $yuk
      units = norm
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    TextComponent TAPosL
      font = Times New Roman
      letterHeight = 0.00
      startVal [frame N] = 0
      stopVal [frame N] = 30
      text [set every repeat] = $pozisyonsembol
      units = norm
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    TextComponent TA1L
      color = black
      font = Times New Roman
      letterHeight = 0.00
      pos = (0,0.75)
      startVal [frame N] = 0
      stopVal [frame N] = 30
      units = norm
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    TextComponent TA4L
      color = black
      font = Times New Roman
      letterHeight = 0.00
      pos = (0,-0.75)
      startVal [frame N] = 0
      stopVal [frame N] = 30
      units = norm
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    TextComponent TA6L
      color = black
      font = Times New Roman
      letterHeight = 0.00
      pos = (-0.350, 0.350)
      startVal [frame N] = 0
      stopVal [frame N] = 30
      units = norm
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    TextComponent TABosL
      color = black
      font = Times New Roman
      letterHeight = 0.00
      pos = (-0.375, 0.375)
      startVal [frame N] = 0
      stopVal [frame N] = 30
      units = norm
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    CodeComponent CALoadL
      Code Type = Auto->JS
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      Begin Routine:
        YanitD = 0
        YanitY = 0

        TA1L.height = 0.00
        TA4L.height = 0.00
        TA6L.height = 0.00

        semboller = ["✓","✿","♪","♥","♦","♣","♠","♛","❅","◕"]
        shuffle(semboller)
        TA1L.text = semboller[0]
        semboller.pop(0)

        shuffle(semboller)
        TA4L.text = semboller[0]
        semboller.pop(0)

        shuffle(semboller)
        TA6L.text = semboller[0]
        semboller.pop(0)

        shuffle(semboller)
        TABosL.text = semboller[0]
        semboller.pop(0)


        if TALoadL.text == "low":
            if TAPosL.text == "(0, 0.75)":
                TA1L.height = 0.18
            elif TAPosL.text == "(0, -0.75)":
                TA4L.height = 0.18
            elif TAPosL.text == "(-0.35, 0.35)":
                TA6L.height = 0.18

        else:
            TA1L.height = 0.18
            TA4L.height = 0.18
            TA6L.height = 0.18
  Routine CA2000ms
    ImageComponent IA2000
      image = load.png
      size = (2.0, 2.0)
      startVal [frame N] = 0
      stopVal [frame N] = 120
      units = norm
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    CodeComponent CA2000
      Code Type = Auto->JS
  Routine FA150msL
    ImageComponent IAFlankerBackgroundL
      image [set every repeat] = load.png
      size = (2.0, 2.0)
      startVal [frame N] = 0
      stopVal [frame N] = 9
      units = norm
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    TextComponent TAPosFL
      font = Times New Roman
      letterHeight = 0.00
      startVal [frame N] = 0
      stopVal [frame N] = 9
      text [set every repeat] = $pozisyonharf
      units = norm
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    TextComponent TAHedefL
      color = black
      font = Times New Roman
      letterHeight = 0.105
      pos [set every repeat] = pozisyonharf
      startVal [frame N] = 0
      stopVal [frame N] = 9
      text [set every repeat] = $hedef
      units = norm
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    TextComponent TACeldiriciL
      color = black
      font = Times New Roman
      letterHeight = 0.18
      pos [set every repeat] = pozisyonceldirici
      startVal [frame N] = 0
      stopVal [frame N] = 9
      text [set every repeat] = $celdirici
      units = norm
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    CodeComponent CAFlankerL
      Code Type = Auto->JS
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      Begin Routine:
        if TAPosFL.text == "(0.35, 0.35)":
            IAFlankerBackgroundL.setImage('load_2.png')
        if TAPosFL.text == "(0.35, -0.35)":
            IAFlankerBackgroundL.setImage('load_3.png')
        if TAPosFL.text == "(-0.35, -0.35)":
            IAFlankerBackgroundL.setImage('load_5.png')
  Routine FA1850msR
    ImageComponent IA1850
      image = load.png
      size = (2.0, 2.0)
      startVal [frame N] = 0
      stopVal [frame N] = 111
      units = norm
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    KeyboardComponent KAFlankerR
      allowedKeys = '0','2'
      correctAns = $flankercevap
      forceEndRoutine = True
      startVal [frame N] = 0
      stopVal [frame N] = 111
      storeCorrect = True
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    CodeComponent CA1850
      Code Type = Auto->JS
  Routine DeneyGecis
    KeyboardComponent KADGecis
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent TADGecis
      color = black
      font = Times New Roman
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text = Deney aşamasına geçmek için hazır olduğunuzda herhangi bir tuşa tıklayınız.
      units = norm
      wrapWidth = 1.5
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  Routine CD500ms
    ImageComponent ID500
      image = fixation.png
      size = (2.0, 2.0)
      startVal [frame N] = 0
      stopVal [frame N] = 30
      units = norm
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    CodeComponent CD500
      Code Type = Auto->JS
  Routine LD500msL
    ImageComponent IDLoadBackgroundL
      image [set every repeat] = $pozisyonhedef
      size = (2.0, 2.0)
      startVal [frame N] = 0
      stopVal [frame N] = 30
      units = norm
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    TextComponent TDLoadL
      font = Times New Roman
      letterHeight = 0.00
      startVal [frame N] = 0
      stopVal [frame N] = 30
      text [set every repeat] = $yuk
      units = norm
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    TextComponent TDPosL
      font = Times New Roman
      letterHeight = 0.00
      startVal [frame N] = 0
      stopVal [frame N] = 30
      text [set every repeat] = $pozisyonsembol
      units = norm
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    TextComponent TD1L
      color = black
      font = Times New Roman
      letterHeight = 0.00
      pos = (0,0.75)
      startVal [frame N] = 0
      stopVal [frame N] = 30
      units = norm
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    TextComponent TD4L
      color = black
      font = Times New Roman
      letterHeight = 0.00
      pos = (0,-0.75)
      startVal [frame N] = 0
      stopVal [frame N] = 30
      units = norm
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    TextComponent TD6L
      color = black
      font = Times New Roman
      letterHeight = 0.00
      pos = (-0.350, 0.350)
      startVal [frame N] = 0
      stopVal [frame N] = 30
      units = norm
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    TextComponent TDBosL
      color = black
      font = Times New Roman
      letterHeight = 0.00
      pos = (-0.375, 0.375)
      startVal [frame N] = 0
      stopVal [frame N] = 30
      units = norm
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    CodeComponent CDLoadL
      Code Type = Auto->JS
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      Begin Routine:
        YanitD = 0
        YanitY = 0

        TD1L.height = 0.00
        TD4L.height = 0.00
        TD6L.height = 0.00

        semboller = ["✓","✿","♪","♥","♦","♣","♠","♛","❅","◕"]
        shuffle(semboller)
        TD1L.text = semboller[0]
        semboller.pop(0)

        shuffle(semboller)
        TD4L.text = semboller[0]
        semboller.pop(0)

        shuffle(semboller)
        TD6L.text = semboller[0]
        semboller.pop(0)

        shuffle(semboller)
        TDBosL.text = semboller[0]
        semboller.pop(0)


        if TDLoadL.text == "low":
            if TDPosL.text == "(0, 0.75)":
                TD1L.height = 0.18
            elif TDPosL.text == "(0, -0.75)":
                TD4L.height = 0.18
            elif TDPosL.text == "(-0.35, 0.35)":
                TD6L.height = 0.18

        else:
            TD1L.height = 0.18
            TD4L.height = 0.18
            TD6L.height = 0.18
  Routine CD2000ms
    ImageComponent ID2000
      image = load.png
      size = (2.0, 2.0)
      startVal [frame N] = 0
      stopVal [frame N] = 120
      units = norm
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    CodeComponent CD2000
      Code Type = Auto->JS
  Routine FD150msL
    ImageComponent IDFlankerBackgroundL
      image [set every repeat] = load.png
      size = (2.0, 2.0)
      startVal [frame N] = 0
      stopVal [frame N] = 9
      units = norm
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    TextComponent TDPosFL
      font = Times New Roman
      letterHeight = 0.00
      startVal [frame N] = 0
      stopVal [frame N] = 9
      text [set every repeat] = $pozisyonharf
      units = norm
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    TextComponent TDHedefL
      color = black
      font = Times New Roman
      letterHeight = 0.105
      pos [set every repeat] = pozisyonharf
      startVal [frame N] = 0
      stopVal [frame N] = 9
      text [set every repeat] = $hedef
      units = norm
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    TextComponent TDCeldiriciL
      color = black
      font = Times New Roman
      letterHeight = 0.18
      pos [set every repeat] = pozisyonceldirici
      startVal [frame N] = 0
      stopVal [frame N] = 9
      text [set every repeat] = $celdirici
      units = norm
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    CodeComponent CDFlankerL
      Code Type = Auto->JS
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      Begin Routine:
        if TDPosFL.text == "(0.35, 0.35)":
            IDFlankerBackgroundL.setImage('load_2.png')
        if TDPosFL.text == "(0.35, -0.35)":
            IDFlankerBackgroundL.setImage('load_3.png')
        if TDPosFL.text == "(-0.35, -0.35)":
            IDFlankerBackgroundL.setImage('load_5.png')
  Routine FD1850msR
    ImageComponent ID1850
      image = load.png
      size = (2.0, 2.0)
      startVal [frame N] = 0
      stopVal [frame N] = 111
      units = norm
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    KeyboardComponent KDFlankerR
      allowedKeys = '0','2'
      correctAns = $flankercevap
      forceEndRoutine = True
      startVal [frame N] = 0
      stopVal [frame N] = 111
      storeCorrect = True
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    CodeComponent CD1850
      Code Type = Auto->JS
  Routine LD3000msR
    ImageComponent IDLoadBackgroundR
      image [set every repeat] = $pozisyonhedef
      size = (2.0, 2.0)
      startVal [frame N] = 0
      stopVal [frame N] = 180
      units = norm
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    TextComponent TDLoadR
      font = Times New Roman
      letterHeight = 0.00
      startVal [frame N] = 0
      stopVal [frame N] = 180
      text [set every repeat] = $yuk
      units = norm
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    TextComponent TDPosR
      font = Times New Roman
      letterHeight = 0.00
      startVal [frame N] = 0
      stopVal [frame N] = 180
      text [set every repeat] = $pozisyonsembol
      units = norm
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    TextComponent TD1R
      color = black
      font = Times New Roman
      letterHeight = 0.00
      pos = (0,0.75)
      startVal [frame N] = 0
      stopVal [frame N] = 180
      units = norm
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    TextComponent TD4R
      color = black
      font = Times New Roman
      letterHeight = 0.00
      pos = (0,-0.75)
      startVal [frame N] = 0
      stopVal [frame N] = 180
      units = norm
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    TextComponent TD6R
      color = black
      font = Times New Roman
      letterHeight = 0.00
      pos = (-0.350, 0.350)
      startVal [frame N] = 0
      stopVal [frame N] = 180
      units = norm
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    TextComponent TDtext
      font = Times New Roman
      letterHeight = 0.00
      startVal [frame N] = 0
      stopVal [frame N] = 180
      text [set every repeat] = $taskcevap
      units = norm
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    KeyboardComponent KDLoadR
      allowedKeys = 'a','s'
      correctAns = $taskcevap
      forceEndRoutine = True
      startVal [frame N] = 0
      stopVal [frame N] = 180
      storeCorrect = True
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    SoundComponent SDFlankerR
      sound = yanlis.wav
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    CodeComponent CDLoadR
      Code Type = Auto->JS
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      Begin Routine:
        FRate = 1000 / int(round(win.getActualFrameRate(),2))
        FrameN = int(3000 / FRate)
        frame = 0

        YanitD = 0
        YanitY = 0

        dizi = [1,4,6]
        shuffle(dizi)

        if TDLoadR.text == "high":
            if TDtext.text == "s":
                if dizi[0] == 1:
                    TD1R.text = TD1L.text
                    TD1R.height = 0.18
                if dizi[0] == 4:
                    TD4R.text = TD4L.text
                    TD4R.height = 0.18
                if dizi[0] == 6:
                    TD6R.text = TD6L.text
                    TD6R.height = 0.18
            else:
                if dizi[0] == 1:
                    TD1R.text = TDBosL.text
                    TD1R.height = 0.18
                if dizi[0] == 4:
                    TD4R.text = TDBosL.text
                    TD4R.height = 0.18
                if dizi[0] == 6:
                    TD6R.text = TDBosL.text
                    TD6R.height = 0.18

        else:
            if TD1L.height == 0.18:
                if TDtext.text == "s":
                    TD1R.text = TD1L.text
                    TD1R.height = 0.18
                else:
                    TD1R.text = TDBosL.text
                    TD1R.height = 0.18
            if TD4L.height == 0.18:
                if TDtext.text == "s":
                    TD4R.text = TD4L.text
                    TD4R.height = 0.18
                else:
                    TD4R.text = TDBosL.text
                    TD4R.height = 0.18
            if TD6L.height == 0.18:
                if TDtext.text == "s":
                    TD6R.text = TD6L.text
                    TD6R.height = 0.18
                else:
                    TD6R.text = TDBosL.text
                    TD6R.height = 0.18
      Each Frame:
        frame = frame + 1
        requirement = 3000 / FRate
        if frame >= requirement:
            continueRoutine = False
      End Routine:
        if KDLoadR.corr == 0:
            SDFlankerR.play()
  Routine LA3000msR
    ImageComponent IALoadBackgroundR
      image [set every repeat] = $pozisyonhedef
      size = (2.0, 2.0)
      startVal [frame N] = 0
      stopVal [frame N] = 180
      units = norm
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    TextComponent TALoadR
      font = Times New Roman
      letterHeight = 0.00
      startVal [frame N] = 0
      stopVal [frame N] = 180
      text [set every repeat] = $yuk
      units = norm
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    TextComponent TAPosR
      font = Times New Roman
      letterHeight = 0.00
      startVal [frame N] = 0
      stopVal [frame N] = 180
      text [set every repeat] = $pozisyonsembol
      units = norm
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    TextComponent TA1R
      color = black
      font = Times New Roman
      letterHeight = 0.00
      pos = (0,0.75)
      startVal [frame N] = 0
      stopVal [frame N] = 180
      units = norm
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    TextComponent TA4R
      color = black
      font = Times New Roman
      letterHeight = 0.00
      pos = (0,-0.75)
      startVal [frame N] = 0
      stopVal [frame N] = 180
      units = norm
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    TextComponent TA6R
      color = black
      font = Times New Roman
      letterHeight = 0.00
      pos = (-0.350, 0.350)
      startVal [frame N] = 0
      stopVal [frame N] = 180
      units = norm
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    TextComponent TAtext
      font = Times New Roman
      letterHeight = 0.00
      startVal [frame N] = 0
      stopVal [frame N] = 180
      text [set every repeat] = $taskcevap
      units = norm
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    KeyboardComponent KALoadR
      allowedKeys = 'a','s'
      correctAns = $taskcevap
      forceEndRoutine = True
      startVal [frame N] = 0.0
      stopVal [frame N] = 180
      storeCorrect = True
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    SoundComponent SAFlankerR
      sound = yanlis.wav
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    CodeComponent CALoadR
      Code Type = Auto->JS
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      Begin Routine:
        FRate = 1000 / int(round(win.getActualFrameRate(),2))
        FrameN = int(3000 / FRate)
        frame = 0

        YanitD = 0
        YanitY = 0

        dizi = [1,4,6]
        shuffle(dizi)

        if TALoadR.text == "high":
            if TAtext.text == "s":
                if dizi[0] == 1:
                    TA1R.text = TA1L.text
                    TA1R.height = 0.18
                if dizi[0] == 4:
                    TA4R.text = TA4L.text
                    TA4R.height = 0.18
                if dizi[0] == 6:
                    TA6R.text = TA6L.text
                    TA6R.height = 0.18
            else:
                if dizi[0] == 1:
                    TA1R.text = TABosL.text
                    TA1R.height = 0.18
                if dizi[0] == 4:
                    TA4R.text = TABosL.text
                    TA4R.height = 0.18
                if dizi[0] == 6:
                    TA6R.text = TABosL.text
                    TA6R.height = 0.18

        else:
            if TA1L.height == 0.18:
                if TAtext.text == "s":
                    TA1R.text = TA1L.text
                    TA1R.height = 0.18
                else:
                    TA1R.text = TABosL.text
                    TA1R.height = 0.18
            if TA4L.height == 0.18:
                if TAtext.text == "s":
                    TA4R.text = TA4L.text
                    TA4R.height = 0.18
                else:
                    TA4R.text = TABosL.text
                    TA4R.height = 0.18
            if TA6L.height == 0.18:
                if TAtext.text == "s":
                    TA6R.text = TA6L.text
                    TA6R.height = 0.18
                else:
                    TA6R.text = TABosL.text
                    TA6R.height = 0.18
      Each Frame:
        frame = frame + 1
        requirement = 3000 / FRate
        if frame >= requirement:
            continueRoutine = False
      End Routine:
        if KALoadR.corr == 0:
            SAFlankerR.play()

        if counter == 16:
            LoopAlistirma.finished = True
Flow
  Routine Yonerge
  LoopInitiator LoopAlistirma loopType="TrialHandler"
    conditionsFile = replication_of_konstantinaou_beal_and_lavie_exp2b.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'yuk': 'low', 'hedef': 'N', 'celdirici': 'Z', 'pozisyonhedef': 'load.png', 'pozisyonceldirici': (0.5, 0), 'pozisyonsembol': (0, 0.75), 'pozisyonharf': (0.35, 0.35), 'flankercevap': 0, 'taskcevap': 's'},
      {'yuk': 'low', 'hedef': 'Z', 'celdirici': 'N', 'pozisyonhedef': 'load.png', 'pozisyonceldirici': (0.5, 0), 'pozisyonsembol': (0, 0.75), 'pozisyonharf': (0.35, 0.35), 'flankercevap': 2, 'taskcevap': 'a'},
      {'yuk': 'low', 'hedef': 'N', 'celdirici': 'N', 'pozisyonhedef': 'load.png', 'pozisyonceldirici': (0.5, 0), 'pozisyonsembol': (0, 0.75), 'pozisyonharf': (0.35, 0.35), 'flankercevap': 0, 'taskcevap': 'a'},
      {'yuk': 'low', 'hedef': 'Z', 'celdirici': 'Z', 'pozisyonhedef': 'load.png', 'pozisyonceldirici': (0.5, 0), 'pozisyonsembol': (0, 0.75), 'pozisyonharf': (0.35, 0.35), 'flankercevap': 2, 'taskcevap': 's'},
      {'yuk': 'low', 'hedef': 'N', 'celdirici': 'Z', 'pozisyonhedef': 'load.png', 'pozisyonceldirici': (-0.5, 0), 'pozisyonsembol': (0, 0.75), 'pozisyonharf': (0.35, 0.35), 'flankercevap': 0, 'taskcevap': 'a'},
      {'yuk': 'low', 'hedef': 'Z', 'celdirici': 'N', 'pozisyonhedef': 'load.png', 'pozisyonceldirici': (-0.5, 0), 'pozisyonsembol': (0, 0.75), 'pozisyonharf': (0.35, 0.35), 'flankercevap': 2, 'taskcevap': 's'},
      {'yuk': 'low', 'hedef': 'N', 'celdirici': 'N', 'pozisyonhedef': 'load.png', 'pozisyonceldirici': (-0.5, 0), 'pozisyonsembol': (0, 0.75), 'pozisyonharf': (0.35, 0.35), 'flankercevap': 0, 'taskcevap': 's'}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
    Routine CA500ms
    Routine LA500msL
    Routine CA2000ms
    Routine FA150msL
    Routine FA1850msR
    Routine LA3000msR
  LoopTerminator LoopAlistirma
  Routine DeneyGecis
  LoopInitiator LoopDeney loopType="TrialHandler"
    conditionsFile = replication_of_konstantinaou_beal_and_lavie_exp2b.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'yuk': 'low', 'hedef': 'N', 'celdirici': 'Z', 'pozisyonhedef': 'load.png', 'pozisyonceldirici': (0.5, 0), 'pozisyonsembol': (0, 0.75), 'pozisyonharf': (0.35, 0.35), 'flankercevap': 0, 'taskcevap': 's'},
      {'yuk': 'low', 'hedef': 'Z', 'celdirici': 'N', 'pozisyonhedef': 'load.png', 'pozisyonceldirici': (0.5, 0), 'pozisyonsembol': (0, 0.75), 'pozisyonharf': (0.35, 0.35), 'flankercevap': 2, 'taskcevap': 'a'},
      {'yuk': 'low', 'hedef': 'N', 'celdirici': 'N', 'pozisyonhedef': 'load.png', 'pozisyonceldirici': (0.5, 0), 'pozisyonsembol': (0, 0.75), 'pozisyonharf': (0.35, 0.35), 'flankercevap': 0, 'taskcevap': 'a'},
      {'yuk': 'low', 'hedef': 'Z', 'celdirici': 'Z', 'pozisyonhedef': 'load.png', 'pozisyonceldirici': (0.5, 0), 'pozisyonsembol': (0, 0.75), 'pozisyonharf': (0.35, 0.35), 'flankercevap': 2, 'taskcevap': 's'},
      {'yuk': 'low', 'hedef': 'N', 'celdirici': 'Z', 'pozisyonhedef': 'load.png', 'pozisyonceldirici': (-0.5, 0), 'pozisyonsembol': (0, 0.75), 'pozisyonharf': (0.35, 0.35), 'flankercevap': 0, 'taskcevap': 'a'},
      {'yuk': 'low', 'hedef': 'Z', 'celdirici': 'N', 'pozisyonhedef': 'load.png', 'pozisyonceldirici': (-0.5, 0), 'pozisyonsembol': (0, 0.75), 'pozisyonharf': (0.35, 0.35), 'flankercevap': 2, 'taskcevap': 's'},
      {'yuk': 'low', 'hedef': 'N', 'celdirici': 'N', 'pozisyonhedef': 'load.png', 'pozisyonceldirici': (-0.5, 0), 'pozisyonsembol': (0, 0.75), 'pozisyonharf': (0.35, 0.35), 'flankercevap': 0, 'taskcevap': 's'}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
    Routine CD500ms
    Routine LD500msL
    Routine CD2000ms
    Routine FD150msL
    Routine FD1850msR
    Routine LD3000msR
  LoopTerminator LoopDeney
