PsychoPy2experiment version="2023.1.2"
Settings
  Audio latency priority = 4
  Audio lib = pygame
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Use version = 2023.1.0
  Window size (pixels) = [1920, 1080]
  expName = replication_of_lee_and_jeong_exp3
  keyboardBackend = ioHub
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Routines
  Routine Yonerge
    KeyboardComponent Yonergee
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent TextYonerge
      font = Times New Roman
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        Welcome to our study.

        You will soon be presented with some colors in a tile on your screen. You are expected to remember the colors with their positions and perform the flanker task.

        While you are trying to remember the color and position information, two letters (H and S) in different positions will be presented on your screen as part of the flanker task. In this task, you are expected to pay attention to which letter is closer to the center, press the relevant key on the keyboard as fast as you can and reject the other letter.

        After the Flanker task, you will once again be presented with some colors in a tile on your screen. You are expected to press the "z" key if the current screen matches the first one exactly in color and position, or the "x" key if it does not, as fast as you can.

        The first 16 trials are practice and after the 16th trial the main trial will begin.

        Click on any key to move to the practice phase.
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
  Routine ConditionLNStart
    KeyboardComponent KeyboardStart
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent TextStart
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Click on any button when you are ready to proceed to the experiment phase.
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  Routine Alistirma_Fixation800ms
    ImageComponent image800Alistirma
      image = small circle.png
      size = (2, 2)
      startVal [frame N] = 0
      stopVal [frame N] = 48
      units = norm
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    TextComponent kosulAlistirma
      font = Times New Roman
      letterHeight = 0.00
      startVal [frame N] = 0
      stopVal [frame N] = 48
      text [set every repeat] = $condition
      units = norm
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    TextComponent cevapAlistirma
      font = Times New Roman
      letterHeight = 0.00
      startVal [frame N] = 0
      stopVal [frame N] = 48
      text [set every repeat] = $taskcevap
      units = norm
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    CodeComponent Code800Alistirma
      Code Type = Auto->JS
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      Begin Experiment:
        counter = 0

        r1 = 0
        g1 = 0
        b1 = 0
        r2 = 0
        g2 = 0
        b2 = 0
        r3 = 0
        g3 = 0
        b3 = 0
        r4 = 0
        g4 = 0
        b4 = 0
        r5 = 0
        g5 = 0
        b5 = 0
      End Routine:
        counter = counter + 1

        r1 = float(round(random(),4))
        g1 = float(round(random(),4))
        b1 = float(round(random(),4))

        r2 = float(round(random(),4))
        g2 = float(round(random(),4))
        b2 = float(round(random(),4))

        r3 = float(round(random(),4))
        g3 = float(round(random(),4))
        b3 = float(round(random(),4))

        r4 = float(round(random(),4))
        g4 = float(round(random(),4))
        b4 = float(round(random(),4))

        r5 = float(round(random(),4))
        g5 = float(round(random(),4))
        b5 = float(round(random(),4))
  Routine Alistirma_Load200ms
    ImageComponent image1Alistirma
      color [set every repeat] = $[r1,g1,b1]
      image = white.png
      size = (0, 0)
      startVal [frame N] = 0
      stopVal [frame N] = 12
      texture resolution = 512
      units = norm
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    ImageComponent image2Alistirma
      color [set every repeat] = $[r2,g2,b2]
      image = white.png
      size = (0, 0)
      startVal [frame N] = 0
      stopVal [frame N] = 12
      units = norm
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    ImageComponent image3Alistirma
      color [set every repeat] = $[r3,g3,b3]
      image = white.png
      size = (0, 0)
      startVal [frame N] = 0
      stopVal [frame N] = 12
      units = norm
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    ImageComponent image4Alistirma
      color [set every repeat] = $[r4,g4,b4]
      image = white.png
      size = (0, 0)
      startVal [frame N] = 0
      stopVal [frame N] = 12
      units = norm
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    CodeComponent CodeLoadAlistirma
      Code Type = Auto->JS
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      Begin Experiment:
        degisken = 0
      Begin Routine:
        if kosulAlistirma.text == "LN":
            dizi = [1,2,3,4]
            shuffle(dizi)

            if dizi[0] == 1:
                image2Alistirma.color = "white"
                image3Alistirma.color = "white"
                image4Alistirma.color = "white"
                degisken = 1
            elif dizi[0] == 2:
                image1Alistirma.color = "white"
                image3Alistirma.color = "white"
                image4Alistirma.color = "white"
                degisken = 2
            elif dizi[0] == 3:
                image1Alistirma.color = "white"
                image2Alistirma.color = "white"
                image4Alistirma.color = "white"
                degisken = 3
            elif dizi[0] == 4:
                image1Alistirma.color = "white"
                image2Alistirma.color = "white"
                image3Alistirma.color = "white"
                degisken = 4

            image1Alistirma.size = (0.023, 0.042)
            image1Alistirma.pos = (-0.0195,0.036)
            image2Alistirma.size = (0.023, 0.042)
            image2Alistirma.pos = (0.0195,0.036)
            image3Alistirma.size = (0.023, 0.042)
            image3Alistirma.pos = (-0.0195,-0.036)
            image4Alistirma.size = (0.023, 0.042)
            image4Alistirma.pos = (0.0195,-0.036)

        elif kosulAlistirma.text == "LW":
            dizi = [1,2,3,4]
            shuffle(dizi)

            if dizi[0] == 1:
                image2Alistirma.color = "white"
                image3Alistirma.color = "white"
                image4Alistirma.color = "white"
                degisken = 1
            elif dizi[0] == 2:
                image1Alistirma.color = "white"
                image3Alistirma.color = "white"
                image4Alistirma.color = "white"
                degisken = 2
            elif dizi[0] == 3:
                image1Alistirma.color = "white"
                image2Alistirma.color = "white"
                image4Alistirma.color = "white"
                degisken = 3
            elif dizi[0] == 4:
                image1Alistirma.color = "white"
                image2Alistirma.color = "white"
                image3Alistirma.color = "white"
                degisken = 4

            image1Alistirma.size = (0.06, 0.1)
            image1Alistirma.pos = (-0.09,0.15)
            image2Alistirma.size = (0.06, 0.1)
            image2Alistirma.pos = (0.09,0.15)
            image3Alistirma.size = (0.06, 0.1)
            image3Alistirma.pos = (-0.09,-0.15)
            image4Alistirma.size = (0.06, 0.1)
            image4Alistirma.pos = (0.09,-0.15)

        elif kosulAlistirma.text == "HW":
            image1Alistirma.size = (0.06, 0.1)
            image1Alistirma.pos = (-0.09,0.15)
            image2Alistirma.size = (0.06, 0.1)
            image2Alistirma.pos = (0.09,0.15)
            image3Alistirma.size = (0.06, 0.1)
            image3Alistirma.pos = (-0.09,-0.15)
            image4Alistirma.size = (0.06, 0.1)
            image4Alistirma.pos = (0.09,-0.15)

        elif kosulAlistirma.text == "HN":
            image1Alistirma.size = (0.023, 0.042)
            image1Alistirma.pos = (-0.0195,0.036)
            image2Alistirma.size = (0.023, 0.042)
            image2Alistirma.pos = (0.0195,0.036)
            image3Alistirma.size = (0.023, 0.042)
            image3Alistirma.pos = (-0.0195,-0.036)
            image4Alistirma.size = (0.023, 0.042)
            image4Alistirma.pos = (0.0195,-0.036)
  Routine Alistirma_BlankScreen2000ms
    ImageComponent BlankAlistirma
      color = $[0,0,0]
      size = (2, 2)
      startVal [frame N] = 0
      stopVal [frame N] = 120
      units = norm
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    CodeComponent CodeBlankAlistirma
      Code Type = Auto->JS
  Routine Alistirma_FlankerTask2000ms
    TextComponent HedefAlistirma
      font = Times New Roman
      letterHeight = 0.07
      pos [set every repeat] = pozisyonhedef
      startVal [frame N] = 0
      stopVal [frame N] = 120
      text [set every repeat] = $hedef
      units = norm
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    TextComponent CeldiriciAlistirma
      font = Times New Roman
      letterHeight = 0.095
      pos [set every repeat] = pozisyonceldirici
      startVal [frame N] = 0
      stopVal [frame N] = 120
      text [set every repeat] = $celdirici
      units = norm
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    KeyboardComponent KeyAlistirma
      allowedKeys = 'h','s'
      correctAns = $flankercevap
      forceEndRoutine = True
      startVal [frame N] = 0
      stopVal [frame N] = 120
      store = first key
      storeCorrect = True
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    SoundComponent SoundAlistirma
      sound = yanlis.wav
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    CodeComponent CodeFlankerAlistirma
      Code Type = Auto->JS
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      Begin Routine:
        FRate = 1000 / int(round(win.getActualFrameRate(),2))
        FrameN = int(2000 / FRate)
        frame = 0
      Each Frame:
        frame = frame + 1
        requirement = 2000 / FRate
        if frame >= requirement:
            continueRoutine = False
      End Routine:
        if KeyAlistirma.keys == None:
            SoundAlistirma.play()
  Routine Alistirma_Fixation500ms
    ImageComponent FlankerAlistirmaFix
      image = small circle.png
      size = (2, 2)
      startVal [frame N] = 0
      stopVal [frame N] = 30
      units = norm
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    CodeComponent CodeFlankerAlistirmaFix
      Code Type = Auto->JS
  Routine Alistirma_ChangeDetection
    ImageComponent image1Alistirma_2
      color [set every repeat] = $[r1,g1,b1]
      image = white.png
      size = (0, 0)
      startVal [frame N] = 0
      texture resolution = 512
      units = norm
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    ImageComponent image2Alistirma_2
      color [set every repeat] = $[r2,g2,b2]
      image = white.png
      size = (0, 0)
      startVal [frame N] = 0
      units = norm
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    ImageComponent image3Alistirma_2
      color [set every repeat] = $[r3,g3,b3]
      image = white.png
      size = (0, 0)
      startVal [frame N] = 0
      units = norm
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    ImageComponent image4Alistirma_2
      color [set every repeat] = $[r4,g4,b4]
      image = white.png
      size = (0, 0)
      startVal [frame N] = 0
      units = norm
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    PolygonComponent Poli1Alistirma
      fillColor = $[0,0,0]
      lineColor = black
      shape = regular polygon...
      size = (0, 0)
      startVal [frame N] = 0
      units = norm
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    PolygonComponent Poli2Alistirma
      fillColor = $[0,0,0]
      lineColor = black
      shape = regular polygon...
      size = (0, 0)
      startVal [frame N] = 0
      units = norm
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    PolygonComponent Poli3Alistirma
      fillColor = $[0,0,0]
      lineColor = black
      shape = regular polygon...
      size = (0, 0)
      startVal [frame N] = 0
      units = norm
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    PolygonComponent Poli4Alistirma
      fillColor = $[0,0,0]
      lineColor = black
      shape = regular polygon...
      size = (0, 0)
      startVal [frame N] = 0
      units = norm
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    KeyboardComponent KeyAlistirma_2
      allowedKeys = 'z','x'
      correctAns = $taskcevap
      forceEndRoutine = True
      startVal [frame N] = 0
      storeCorrect = True
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    SoundComponent SoundAlistirma_2
      sound = yanlis.wav
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    CodeComponent CodeTaskAlistirma
      Code Type = Auto->JS
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      Begin Routine:
        image1Alistirma_2.size = (0, 0)
        image2Alistirma_2.size = (0, 0)
        image3Alistirma_2.size = (0, 0)
        image4Alistirma_2.size = (0, 0)
        Poli1Alistirma.size = (0, 0)
        Poli2Alistirma.size = (0, 0)
        Poli3Alistirma.size = (0, 0)
        Poli4Alistirma.size = (0, 0)

        if kosulAlistirma.text == "LN":
            if cevapAlistirma.text == "z":
                if degisken == 1:
                    image1Alistirma_2.setColor([r1,g1,b1], colorSpace='rgb')
                    image1Alistirma_2.pos = (-0.0195,0.036)
                    image1Alistirma_2.size = (0.023, 0.042)
                    Poli2Alistirma.size = (0.023, 0.042)
                    Poli2Alistirma.pos = (0.0195,0.036)
                    Poli3Alistirma.size = (0.023, 0.042)
                    Poli3Alistirma.pos = (-0.0195,-0.036)
                    Poli4Alistirma.size = (0.023, 0.042)
                    Poli4Alistirma.pos = (0.0195,-0.036)
                elif degisken == 2:
                    image2Alistirma_2.setColor([r2,g2,b2], colorSpace='rgb')
                    image2Alistirma_2.size = (0.023, 0.042)
                    image2Alistirma_2.pos = (0.0195,0.036)
                    Poli1Alistirma.size = (0.023, 0.042)
                    Poli1Alistirma.pos = (-0.0195,0.036)
                    Poli3Alistirma.size = (0.023, 0.042)
                    Poli3Alistirma.pos = (-0.0195,-0.036)
                    Poli4Alistirma.size = (0.023, 0.042)
                    Poli4Alistirma.pos = (0.0195,-0.036)
                elif degisken == 3:
                    image3Alistirma_2.setColor([r3,g3,b3], colorSpace='rgb')
                    image3Alistirma_2.size = (0.023, 0.042)
                    image3Alistirma_2.pos = (-0.0195,-0.036)
                    Poli1Alistirma.size = (0.023, 0.042)
                    Poli1Alistirma.pos = (-0.0195,0.036)
                    Poli2Alistirma.size = (0.023, 0.042)
                    Poli2Alistirma.pos = (0.0195,0.036)
                    Poli4Alistirma.size = (0.023, 0.042)
                    Poli4Alistirma.pos = (0.0195,-0.036)
                elif degisken == 4:
                    image4Alistirma_2.setColor([r4,g4,b4], colorSpace='rgb')
                    image4Alistirma_2.size = (0.023, 0.042)
                    image4Alistirma_2.pos = (0.0195,-0.036)
                    Poli1Alistirma.size = (0.023, 0.042)
                    Poli1Alistirma.pos = (-0.0195,0.036)
                    Poli2Alistirma.size = (0.023, 0.042)
                    Poli2Alistirma.pos = (0.0195,0.036)
                    Poli3Alistirma.size = (0.023, 0.042)
                    Poli3Alistirma.pos = (-0.0195,-0.036)

            if cevapAlistirma.text == "x":
                r1 = float(round(r1,4)) + 0.5333
                g1 = float(round(g1,4)) + 0.5333
                b1 = float(round(b1,4)) + 0.5333

                r2 = float(round(r2,4)) + 0.5333
                g2 = float(round(g2,4)) + 0.5333
                b2 = float(round(b2,4)) + 0.5333

                r3 = float(round(r3,4)) + 0.5333
                g3 = float(round(g3,4)) + 0.5333
                b3 = float(round(b3,4)) + 0.5333

                r4 = float(round(r4,4)) + 0.5333
                g4 = float(round(g4,4)) + 0.5333
                b4 = float(round(b4,4)) + 0.5333

                if r1 > 1:
                    r1 = r1 - 0.5333
                    p1 = 1 - r1
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r1 = -float(round(p4,4))

                if g1 > 1:
                    g1 = g1 - 0.5333
                    p1 = 1 - g1
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g1 = -float(round(p4,4))

                if b1 > 1:
                    b1 = b1 - 0.5333
                    p1 = 1 - b1
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b1 = -float(round(p4,4))

                if r2 > 1:
                    r2 = r2 - 0.5333
                    p1 = 1 - r2
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r2 = -float(round(p4,4))

                if g2 > 1:
                    g2 = g2 - 0.5333
                    p1 = 1 - g2
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g2 = -float(round(p4,4))

                if b2 > 1:
                    b2 = b2 - 0.5333
                    p1 = 1 - b2
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b2 = -float(round(p4,4))

                if r3 > 1:
                    r3 = r3 - 0.5333
                    p1 = 1 - r3
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r3 = -float(round(p4,4))

                if g3 > 1:
                    g3 = g3 - 0.5333
                    p1 = 1 - g3
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g3 = -float(round(p4,4))

                if b3 > 1:
                    b3 = b3 - 0.5333
                    p1 = 1 - b3
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b3 = -float(round(p4,4))

                if r4 > 1:
                    r4 = r4 - 0.5333
                    p1 = 1 - r4
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r4 = -float(round(p4,4))

                if g4 > 1:
                    g4 = g4 - 0.5333
                    p1 = 1 - g4
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g4 = -float(round(p4,4))

                if b4 > 1:
                    b4 = b4 - 0.5333
                    p1 = 1 - b4
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b4 = -float(round(p4,4))

                if degisken == 1:
                    image1Alistirma_2.setColor([r1,g1,b1], colorSpace='rgb')
                    image1Alistirma_2.pos = (-0.0195,0.036)
                    image1Alistirma_2.size = (0.023, 0.042)
                    Poli2Alistirma.size = (0.023, 0.042)
                    Poli2Alistirma.pos = (0.0195,0.036)
                    Poli3Alistirma.size = (0.023, 0.042)
                    Poli3Alistirma.pos = (-0.0195,-0.036)
                    Poli4Alistirma.size = (0.023, 0.042)
                    Poli4Alistirma.pos = (0.0195,-0.036)
                elif degisken == 2:
                    image2Alistirma_2.setColor([r2,g2,b2], colorSpace='rgb')
                    image2Alistirma_2.size = (0.023, 0.042)
                    image2Alistirma_2.pos = (0.0195,0.036)
                    Poli1Alistirma.size = (0.023, 0.042)
                    Poli1Alistirma.pos = (-0.0195,0.036)
                    Poli3Alistirma.size = (0.023, 0.042)
                    Poli3Alistirma.pos = (-0.0195,-0.036)
                    Poli4Alistirma.size = (0.023, 0.042)
                    Poli4Alistirma.pos = (0.0195,-0.036)
                elif degisken == 3:
                    image3Alistirma_2.setColor([r3,g3,b3], colorSpace='rgb')
                    image3Alistirma_2.size = (0.023, 0.042)
                    image3Alistirma_2.pos = (-0.0195,-0.036)
                    Poli1Alistirma.size = (0.023, 0.042)
                    Poli1Alistirma.pos = (-0.0195,0.036)
                    Poli2Alistirma.size = (0.023, 0.042)
                    Poli2Alistirma.pos = (0.0195,0.036)
                    Poli4Alistirma.size = (0.023, 0.042)
                    Poli4Alistirma.pos = (0.0195,-0.036)
                elif degisken == 4:
                    image4Alistirma_2.setColor([r4,g4,b4], colorSpace='rgb')
                    image4Alistirma_2.size = (0.023, 0.042)
                    image4Alistirma_2.pos = (0.0195,-0.036)
                    Poli1Alistirma.size = (0.023, 0.042)
                    Poli1Alistirma.pos = (-0.0195,0.036)
                    Poli2Alistirma.size = (0.023, 0.042)
                    Poli2Alistirma.pos = (0.0195,0.036)
                    Poli3Alistirma.size = (0.023, 0.042)
                    Poli3Alistirma.pos = (-0.0195,-0.036)



        elif kosulAlistirma.text == "HW":
            if cevapAlistirma.text == "z":
                dizi = [1,2,3,4]
                shuffle(dizi)
                if dizi[0] == 1:
                    image1Alistirma_2.setColor([r1,g1,b1], colorSpace='rgb')
                    image1Alistirma_2.size = (0.06, 0.1)
                    image1Alistirma_2.pos = (-0.09, 0.15)
                    image2Alistirma_2.setColor([r2,g2,g2], colorSpace='rgb')
                    image2Alistirma_2.size = (0, 0)
                    Poli2Alistirma.size = (0.06, 0.1)
                    Poli2Alistirma.pos = (0.09, 0.15)
                    image3Alistirma_2.setColor([r3,g3,g3], colorSpace='rgb')
                    image3Alistirma_2.size = (0, 0)
                    Poli3Alistirma.size = (0.06, 0.1)
                    Poli3Alistirma.pos = (-0.09,-0.15)
                    image4Alistirma_2.setColor([r4,g4,g4], colorSpace='rgb')
                    image4Alistirma_2.size = (0, 0)
                    Poli4Alistirma.size = (0.06, 0.1)
                    Poli4Alistirma.pos = (0.09,-0.15)
                elif dizi[0] == 2:
                    image2Alistirma_2.setColor([r2,g2,g2], colorSpace='rgb')
                    image2Alistirma_2.size = (0.06, 0.1)
                    image2Alistirma_2.pos = (0.09, 0.15)
                    image1Alistirma_2.setColor([r1,g1,b1], colorSpace='rgb')
                    image1Alistirma_2.size = (0, 0)
                    Poli1Alistirma.size = (0.06, 0.1)
                    Poli1Alistirma.pos = (-0.09, 0.15)
                    image3Alistirma_2.setColor([r3,g3,g3], colorSpace='rgb')
                    image3Alistirma_2.size = (0, 0)
                    Poli3Alistirma.size = (0.06, 0.1)
                    Poli3Alistirma.pos = (-0.09,-0.15)
                    image4Alistirma_2.setColor([r4,g4,g4], colorSpace='rgb')
                    image4Alistirma_2.size = (0, 0)
                    Poli4Alistirma.size = (0.06, 0.1)
                    Poli4Alistirma.pos = (0.09,-0.15)
                elif dizi[0] == 3:
                    image3Alistirma_2.setColor([r3,g3,b3], colorSpace='rgb')
                    image3Alistirma_2.size = (0.06, 0.1)
                    image3Alistirma_2.pos = (-0.09,-0.15)
                    image4Alistirma_2.setColor([r4,g4,g4], colorSpace='rgb')
                    image4Alistirma_2.size = (0, 0)
                    Poli4Alistirma.size = (0.06, 0.1)
                    Poli4Alistirma.pos = (0.09,-0.15)
                    image1Alistirma_2.setColor([r1,g1,b1], colorSpace='rgb')
                    image1Alistirma_2.size = (0, 0)
                    Poli1Alistirma.size = (0.06, 0.1)
                    Poli1Alistirma.pos = (-0.09, 0.15)
                    image2Alistirma_2.setColor([r2,g2,g2], colorSpace='rgb')
                    image2Alistirma_2.size = (0, 0)
                    Poli2Alistirma.size = (0.06, 0.1)
                    Poli2Alistirma.pos = (0.09, 0.15)
                elif dizi[0] == 4:
                    image4Alistirma_2.setColor([r4,g4,g4], colorSpace='rgb')
                    image4Alistirma_2.size = (0.06, 0.1)
                    image4Alistirma_2.pos = (0.09,-0.15)
                    image3Alistirma_2.setColor([r3,g3,g3], colorSpace='rgb')
                    image3Alistirma_2.size = (0, 0)
                    Poli3Alistirma.size = (0.06, 0.1)
                    Poli3Alistirma.pos = (-0.09,-0.15)
                    image1Alistirma_2.setColor([r1,g1,b1], colorSpace='rgb')
                    image1Alistirma_2.size = (0, 0)
                    Poli1Alistirma.size = (0.06, 0.1)
                    Poli1Alistirma.pos = (-0.09, 0.15)
                    image2Alistirma_2.setColor([r2,g2,g2], colorSpace='rgb')
                    image2Alistirma_2.size = (0, 0)
                    Poli2Alistirma.size = (0.06, 0.1)
                    Poli2Alistirma.pos = (0.09, 0.15)

            if cevapAlistirma.text == "x":
                r1 = float(round(r1,4)) + 0.5333
                g1 = float(round(g1,4)) + 0.5333
                b1 = float(round(b1,4)) + 0.5333

                r2 = float(round(r2,4)) + 0.5333
                g2 = float(round(g2,4)) + 0.5333
                b2 = float(round(b2,4)) + 0.5333

                r3 = float(round(r3,4)) + 0.5333
                g3 = float(round(g3,4)) + 0.5333
                b3 = float(round(b3,4)) + 0.5333

                r4 = float(round(r4,4)) + 0.5333
                g4 = float(round(g4,4)) + 0.5333
                b4 = float(round(b4,4)) + 0.5333

                if r1 > 1:
                    r1 = r1 - 0.5333
                    p1 = 1 - r1
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r1 = -float(round(p4,4))

                if g1 > 1:
                    g1 = g1 - 0.5333
                    p1 = 1 - g1
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g1 = -float(round(p4,4))

                if b1 > 1:
                    b1 = b1 - 0.5333
                    p1 = 1 - b1
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b1 = -float(round(p4,4))

                if r2 > 1:
                    r2 = r2 - 0.5333
                    p1 = 1 - r2
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r2 = -float(round(p4,4))

                if g2 > 1:
                    g2 = g2 - 0.5333
                    p1 = 1 - g2
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g2 = -float(round(p4,4))

                if b2 > 1:
                    b2 = b2 - 0.5333
                    p1 = 1 - b2
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b2 = -float(round(p4,4))

                if r3 > 1:
                    r3 = r3 - 0.5333
                    p1 = 1 - r3
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r3 = -float(round(p4,4))

                if g3 > 1:
                    g3 = g3 - 0.5333
                    p1 = 1 - g3
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g3 = -float(round(p4,4))

                if b3 > 1:
                    b3 = b3 - 0.5333
                    p1 = 1 - b3
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b3 = -float(round(p4,4))

                if r4 > 1:
                    r4 = r4 - 0.5333
                    p1 = 1 - r4
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r4 = -float(round(p4,4))

                if g4 > 1:
                    g4 = g4 - 0.5333
                    p1 = 1 - g4
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g4 = -float(round(p4,4))

                if b4 > 1:
                    b4 = b4 - 0.5333
                    p1 = 1 - b4
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b4 = -float(round(p4,4))

                dizi = [1,2,3,4]
                shuffle(dizi)
                if dizi[0] == 1:
                    image1Alistirma_2.setColor([r1,g1,b1], colorSpace='rgb')
                    image1Alistirma_2.size = (0.06, 0.1)
                    image1Alistirma_2.pos = (-0.09, 0.15)
                    image2Alistirma_2.setColor([r2,g2,g2], colorSpace='rgb')
                    image2Alistirma_2.size = (0, 0)
                    Poli2Alistirma.size = (0.06, 0.1)
                    Poli2Alistirma.pos = (0.09, 0.15)
                    image3Alistirma_2.setColor([r3,g3,g3], colorSpace='rgb')
                    image3Alistirma_2.size = (0, 0)
                    Poli3Alistirma.size = (0.06, 0.1)
                    Poli3Alistirma.pos = (-0.09,-0.15)
                    image4Alistirma_2.setColor([r4,g4,g4], colorSpace='rgb')
                    image4Alistirma_2.size = (0, 0)
                    Poli4Alistirma.size = (0.06, 0.1)
                    Poli4Alistirma.pos = (0.09,-0.15)
                elif dizi[0] == 2:
                    image2Alistirma_2.setColor([r2,g2,g2], colorSpace='rgb')
                    image2Alistirma_2.size = (0.06, 0.1)
                    image2Alistirma_2.pos = (0.09, 0.15)
                    image1Alistirma_2.setColor([r1,g1,b1], colorSpace='rgb')
                    image1Alistirma_2.size = (0, 0)
                    Poli1Alistirma.size = (0.06, 0.1)
                    Poli1Alistirma.pos = (-0.09, 0.15)
                    image3Alistirma_2.setColor([r3,g3,g3], colorSpace='rgb')
                    image3Alistirma_2.size = (0, 0)
                    Poli3Alistirma.size = (0.06, 0.1)
                    Poli3Alistirma.pos = (-0.09,-0.15)
                    image4Alistirma_2.setColor([r4,g4,g4], colorSpace='rgb')
                    image4Alistirma_2.size = (0, 0)
                    Poli4Alistirma.size = (0.06, 0.1)
                    Poli4Alistirma.pos = (0.09,-0.15)
                elif dizi[0] == 3:
                    image3Alistirma_2.setColor([r3,g3,b3], colorSpace='rgb')
                    image3Alistirma_2.size = (0.06, 0.1)
                    image3Alistirma_2.pos = (-0.09,-0.15)
                    image4Alistirma_2.setColor([r4,g4,g4], colorSpace='rgb')
                    image4Alistirma_2.size = (0, 0)
                    Poli4Alistirma.size = (0.06, 0.1)
                    Poli4Alistirma.pos = (0.09,-0.15)
                    image1Alistirma_2.setColor([r1,g1,b1], colorSpace='rgb')
                    image1Alistirma_2.size = (0, 0)
                    Poli1Alistirma.size = (0.06, 0.1)
                    Poli1Alistirma.pos = (-0.09, 0.15)
                    image2Alistirma_2.setColor([r2,g2,g2], colorSpace='rgb')
                    image2Alistirma_2.size = (0, 0)
                    Poli2Alistirma.size = (0.06, 0.1)
                    Poli2Alistirma.pos = (0.09, 0.15)
                elif dizi[0] == 4:
                    image4Alistirma_2.setColor([r4,g4,g4], colorSpace='rgb')
                    image4Alistirma_2.size = (0.06, 0.1)
                    image4Alistirma_2.pos = (0.09,-0.15)
                    image3Alistirma_2.setColor([r3,g3,g3], colorSpace='rgb')
                    image3Alistirma_2.size = (0, 0)
                    Poli3Alistirma.size = (0.06, 0.1)
                    Poli3Alistirma.pos = (-0.09,-0.15)
                    image1Alistirma_2.setColor([r1,g1,b1], colorSpace='rgb')
                    image1Alistirma_2.size = (0, 0)
                    Poli1Alistirma.size = (0.06, 0.1)
                    Poli1Alistirma.pos = (-0.09, 0.15)
                    image2Alistirma_2.setColor([r2,g2,g2], colorSpace='rgb')
                    image2Alistirma_2.size = (0, 0)
                    Poli2Alistirma.size = (0.06, 0.1)
                    Poli2Alistirma.pos = (0.09, 0.15)

        elif kosulAlistirma.text == "LW":
            if cevapAlistirma.text == "z":
                if degisken == 1:
                    image1Alistirma_2.setColor([r1,g1,b1], colorSpace='rgb')
                    image1Alistirma_2.size = (0.06, 0.1)
                    image1Alistirma_2.pos = (-0.09, 0.15)
                    Poli2Alistirma.size = (0.06, 0.1)
                    Poli2Alistirma.pos = (0.09, 0.15)
                    Poli3Alistirma.size = (0.06, 0.1)
                    Poli3Alistirma.pos = (-0.09,-0.15)
                    Poli4Alistirma.size = (0.06, 0.1)
                    Poli4Alistirma.pos = (0.09,-0.15)

                elif degisken == 2:
                    image2Alistirma_2.setColor([r2,g2,b2], colorSpace='rgb')
                    image2Alistirma_2.size = (0.06, 0.1)
                    image2Alistirma_2.pos = (0.09, 0.15)
                    Poli1Alistirma.size = (0.06, 0.1)
                    Poli1Alistirma.pos = (-0.09, 0.15)
                    Poli3Alistirma.size = (0.06, 0.1)
                    Poli3Alistirma.pos = (-0.09,-0.15)
                    Poli4Alistirma.size = (0.06, 0.1)
                    Poli4Alistirma.pos = (0.09,-0.15)

                elif degisken == 3:
                    image3Alistirma_2.setColor([r3,g3,b3], colorSpace='rgb')
                    image3Alistirma_2.size = (0.06, 0.1)
                    image3Alistirma_2.pos = (-0.09,-0.15)
                    Poli1Alistirma.size = (0.06, 0.1)
                    Poli1Alistirma.pos = (-0.09, 0.15)
                    Poli2Alistirma.size = (0.06, 0.1)
                    Poli2Alistirma.pos = (0.09, 0.15)
                    Poli4Alistirma.size = (0.06, 0.1)
                    Poli4Alistirma.pos = (0.09,-0.15)

                elif degisken == 4:
                    image4Alistirma_2.setColor([r4,g4,b4], colorSpace='rgb')
                    image4Alistirma_2.size = (0.06, 0.1)
                    image4Alistirma_2.pos = (0.09,-0.15)
                    Poli1Alistirma.size = (0.06, 0.1)
                    Poli1Alistirma.pos = (-0.09, 0.15)
                    Poli2Alistirma.size = (0.06, 0.1)
                    Poli2Alistirma.pos = (0.09, 0.15)
                    Poli3Alistirma.size = (0.06, 0.1)
                    Poli3Alistirma.pos = (-0.09,-0.15)

            if cevapAlistirma.text == "x":
                r1 = float(round(r1,4)) + 0.5333
                g1 = float(round(g1,4)) + 0.5333
                b1 = float(round(b1,4)) + 0.5333

                r2 = float(round(r2,4)) + 0.5333
                g2 = float(round(g2,4)) + 0.5333
                b2 = float(round(b2,4)) + 0.5333

                r3 = float(round(r3,4)) + 0.5333
                g3 = float(round(g3,4)) + 0.5333
                b3 = float(round(b3,4)) + 0.5333

                r4 = float(round(r4,4)) + 0.5333
                g4 = float(round(g4,4)) + 0.5333
                b4 = float(round(b4,4)) + 0.5333

                if r1 > 1:
                    r1 = r1 - 0.5333
                    p1 = 1 - r1
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r1 = -float(round(p4,4))

                if g1 > 1:
                    g1 = g1 - 0.5333
                    p1 = 1 - g1
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g1 = -float(round(p4,4))

                if b1 > 1:
                    b1 = b1 - 0.5333
                    p1 = 1 - b1
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b1 = -float(round(p4,4))

                if r2 > 1:
                    r2 = r2 - 0.5333
                    p1 = 1 - r2
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r2 = -float(round(p4,4))

                if g2 > 1:
                    g2 = g2 - 0.5333
                    p1 = 1 - g2
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g2 = -float(round(p4,4))

                if b2 > 1:
                    b2 = b2 - 0.5333
                    p1 = 1 - b2
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b2 = -float(round(p4,4))

                if r3 > 1:
                    r3 = r3 - 0.5333
                    p1 = 1 - r3
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r3 = -float(round(p4,4))

                if g3 > 1:
                    g3 = g3 - 0.5333
                    p1 = 1 - g3
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g3 = -float(round(p4,4))

                if b3 > 1:
                    b3 = b3 - 0.5333
                    p1 = 1 - b3
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b3 = -float(round(p4,4))

                if r4 > 1:
                    r4 = r4 - 0.5333
                    p1 = 1 - r4
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r4 = -float(round(p4,4))

                if g4 > 1:
                    g4 = g4 - 0.5333
                    p1 = 1 - g4
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g4 = -float(round(p4,4))

                if b4 > 1:
                    b4 = b4 - 0.5333
                    p1 = 1 - b4
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b4 = -float(round(p4,4))


                if degisken == 1:
                    image1Alistirma_2.setColor([r1,g1,b1], colorSpace='rgb')
                    image1Alistirma_2.size = (0.06, 0.1)
                    image1Alistirma_2.pos = (-0.09, 0.15)
                    Poli2Alistirma.size = (0.06, 0.1)
                    Poli2Alistirma.pos = (0.09, 0.15)
                    Poli3Alistirma.size = (0.06, 0.1)
                    Poli3Alistirma.pos = (-0.09,-0.15)
                    Poli4Alistirma.size = (0.06, 0.1)
                    Poli4Alistirma.pos = (0.09,-0.15)

                elif degisken == 2:
                    image2Alistirma_2.setColor([r2,g2,b2], colorSpace='rgb')
                    image2Alistirma_2.size = (0.06, 0.1)
                    image2Alistirma_2.pos = (0.09, 0.15)
                    Poli1Alistirma.size = (0.06, 0.1)
                    Poli1Alistirma.pos = (-0.09, 0.15)
                    Poli3Alistirma.size = (0.06, 0.1)
                    Poli3Alistirma.pos = (-0.09,-0.15)
                    Poli4Alistirma.size = (0.06, 0.1)
                    Poli4Alistirma.pos = (0.09,-0.15)

                elif degisken == 3:
                    image3Alistirma_2.setColor([r3,g3,b3], colorSpace='rgb')
                    image3Alistirma_2.size = (0.06, 0.1)
                    image3Alistirma_2.pos = (-0.09,-0.15)
                    Poli1Alistirma.size = (0.06, 0.1)
                    Poli1Alistirma.pos = (-0.09, 0.15)
                    Poli2Alistirma.size = (0.06, 0.1)
                    Poli2Alistirma.pos = (0.09, 0.15)
                    Poli4Alistirma.size = (0.06, 0.1)
                    Poli4Alistirma.pos = (0.09,-0.15)

                elif degisken == 4:
                    image4Alistirma_2.setColor([r4,g4,b4], colorSpace='rgb')
                    image4Alistirma_2.size = (0.06, 0.1)
                    image4Alistirma_2.pos = (0.09,-0.15)
                    Poli1Alistirma.size = (0.06, 0.1)
                    Poli1Alistirma.pos = (-0.09, 0.15)
                    Poli2Alistirma.size = (0.06, 0.1)
                    Poli2Alistirma.pos = (0.09, 0.15)
                    Poli3Alistirma.size = (0.06, 0.1)
                    Poli3Alistirma.pos = (-0.09,-0.15)


        if kosulAlistirma.text == "HN":
            if cevapAlistirma.text == "z":
                dizi = [1,2,3,4]
                shuffle(dizi)
                if dizi[0] == 1:
                    image1Alistirma_2.setColor([r1,g1,b1], colorSpace='rgb')
                    image1Alistirma_2.size = (0.023, 0.042)
                    image1Alistirma_2.pos = (-0.0195,0.036)
                    image2Alistirma_2.setColor([r2,g2,g2], colorSpace='rgb')
                    image2Alistirma_2.size = (0, 0)
                    Poli2Alistirma.size = (0.023, 0.042)
                    Poli2Alistirma.pos = (0.0195,0.036)
                    image3Alistirma_2.setColor([r3,g3,g3], colorSpace='rgb')
                    image3Alistirma_2.size = (0, 0)
                    Poli3Alistirma.size = (0.023, 0.042)
                    Poli3Alistirma.pos = (-0.0195,-0.036)
                    image4Alistirma_2.setColor([r4,g4,g4], colorSpace='rgb')
                    image4Alistirma_2.size = (0, 0)
                    Poli4Alistirma.size = (0.023, 0.042)
                    Poli4Alistirma.pos = (0.0195,-0.036)
                elif dizi[0] == 2:
                    image2Alistirma_2.setColor([r2,g2,g2], colorSpace='rgb')
                    image2Alistirma_2.size = (0.023, 0.042)
                    image2Alistirma_2.pos = (0.0195,0.036)
                    image1Alistirma_2.setColor([r1,g1,b1], colorSpace='rgb')
                    image1Alistirma_2.size = (0, 0)
                    Poli1Alistirma.size = (0.023, 0.042)
                    Poli1Alistirma.pos = (-0.0195,0.036)
                    image3Alistirma_2.setColor([r3,g3,g3], colorSpace='rgb')
                    image3Alistirma_2.size = (0, 0)
                    Poli3Alistirma.size = (0.023, 0.042)
                    Poli3Alistirma.pos = (-0.0195,-0.036)
                    image4Alistirma_2.setColor([r4,g4,g4], colorSpace='rgb')
                    image4Alistirma_2.size = (0, 0)
                    Poli4Alistirma.size = (0.023, 0.042)
                    Poli4Alistirma.pos = (0.0195,-0.036)
                elif dizi[0] == 3:
                    image3Alistirma_2.setColor([r3,g3,b3], colorSpace='rgb')
                    image3Alistirma_2.size = (0.023, 0.042)
                    image3Alistirma_2.pos = (-0.0195,-0.036)
                    image4Alistirma_2.setColor([r4,g4,g4], colorSpace='rgb')
                    image4Alistirma_2.size = (0, 0)
                    Poli4Alistirma.size = (0.023, 0.042)
                    Poli4Alistirma.pos = (0.0195,-0.036)
                    image1Alistirma_2.setColor([r1,g1,g1], colorSpace='rgb')
                    Iimage1Alistirma_2.size = (0, 0)
                    Poli1Alistirma.size = (0.023, 0.042)
                    Poli1Alistirma.pos = (-0.0195,0.036)
                    image2Alistirma_2.setColor([r2,g2,g2], colorSpace='rgb')
                    image2Alistirma_2.size = (0, 0)
                    Poli2Alistirma.size = (0.023, 0.042)
                    Poli2Alistirma.pos = (0.0195,0.036)
                elif dizi[0] == 4:
                    image4Alistirma_2.setColor([r4,g4,g4], colorSpace='rgb')
                    image4Alistirma_2.size = (0.023, 0.042)
                    image4Alistirma_2.pos = (0.0195,-0.036)
                    image3Alistirma_2.setColor([r3,g3,b3], colorSpace='rgb')
                    image3Alistirma_2.size = (0, 0)
                    Poli3Alistirma.size = (0.023, 0.042)
                    Poli3Alistirma.pos = (-0.0195,-0.036)
                    image1Alistirma_2.setColor([r1,g1,g1], colorSpace='rgb')
                    image1Alistirma_2.size = (0, 0)
                    Poli1Alistirma.size = (0.023, 0.042)
                    Poli1Alistirma.pos = (-0.0195,0.036)
                    image2Alistirma_2.setColor([r2,g2,g2], colorSpace='rgb')
                    image2Alistirma_2.size = (0, 0)
                    Poli2Alistirma.size = (0.023, 0.042)
                    Poli2Alistirma.pos = (0.0195,0.036)

            if cevapAlistirma.text == "x":
                r1 = float(round(r1,4)) + 0.5333
                g1 = float(round(g1,4)) + 0.5333
                b1 = float(round(b1,4)) + 0.5333

                r2 = float(round(r2,4)) + 0.5333
                g2 = float(round(g2,4)) + 0.5333
                b2 = float(round(b2,4)) + 0.5333

                r3 = float(round(r3,4)) + 0.5333
                g3 = float(round(g3,4)) + 0.5333
                b3 = float(round(b3,4)) + 0.5333

                r4 = float(round(r4,4)) + 0.5333
                g4 = float(round(g4,4)) + 0.5333
                b4 = float(round(b4,4)) + 0.5333

                if r1 > 1:
                    r1 = r1 - 0.5333
                    p1 = 1 - r1
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r1 = -float(round(p4,4))

                if g1 > 1:
                    g1 = g1 - 0.5333
                    p1 = 1 - g1
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g1 = -float(round(p4,4))

                if b1 > 1:
                    b1 = b1 - 0.5333
                    p1 = 1 - b1
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b1 = -float(round(p4,4))

                if r2 > 1:
                    r2 = r2 - 0.5333
                    p1 = 1 - r2
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r2 = -float(round(p4,4))

                if g2 > 1:
                    g2 = g2 - 0.5333
                    p1 = 1 - g2
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g2 = -float(round(p4,4))

                if b2 > 1:
                    b2 = b2 - 0.5333
                    p1 = 1 - b2
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b2 = -float(round(p4,4))

                if r3 > 1:
                    r3 = r3 - 0.5333
                    p1 = 1 - r3
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r3 = -float(round(p4,4))

                if g3 > 1:
                    g3 = g3 - 0.5333
                    p1 = 1 - g3
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g3 = -float(round(p4,4))

                if b3 > 1:
                    b3 = b3 - 0.5333
                    p1 = 1 - b3
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b3 = -float(round(p4,4))

                if r4 > 1:
                    r4 = r4 - 0.5333
                    p1 = 1 - r4
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r4 = -float(round(p4,4))

                if g4 > 1:
                    g4 = g4 - 0.5333
                    p1 = 1 - g4
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g4 = -float(round(p4,4))

                if b4 > 1:
                    b4 = b4 - 0.5333
                    p1 = 1 - b4
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b4 = -float(round(p4,4))

                dizi = [1,2,3,4]
                shuffle(dizi)
                if dizi[0] == 1:
                    image1Alistirma_2.setColor([r1,g1,b1], colorSpace='rgb')
                    image1Alistirma_2.size = (0.023, 0.042)
                    image1Alistirma_2.pos = (-0.0195,0.036)
                    image2Alistirma_2.setColor([r2,g2,g2], colorSpace='rgb')
                    image2Alistirma_2.size = (0, 0)
                    Poli2Alistirma.size = (0.023, 0.042)
                    Poli2Alistirma.pos = (0.0195,0.036)
                    image3Alistirma_2.setColor([r3,g3,g3], colorSpace='rgb')
                    image3Alistirma_2.size = (0, 0)
                    Poli3Alistirma.size = (0.023, 0.042)
                    Poli3Alistirma.pos = (-0.0195,-0.036)
                    image4Alistirma_2.setColor([r4,g4,g4], colorSpace='rgb')
                    image4Alistirma_2.size = (0, 0)
                    Poli4Alistirma.size = (0.023, 0.042)
                    Poli4Alistirma.pos = (0.0195,-0.036)
                elif dizi[0] == 2:
                    image2Alistirma_2.setColor([r2,g2,g2], colorSpace='rgb')
                    image2Alistirma_2.size = (0.023, 0.042)
                    image2Alistirma_2.pos = (0.0195,0.036)
                    image1Alistirma_2.setColor([r1,g1,b1], colorSpace='rgb')
                    image1Alistirma_2.size = (0, 0)
                    Poli1Alistirma.size = (0.023, 0.042)
                    Poli1Alistirma.pos = (-0.0195,0.036)
                    image3Alistirma_2.setColor([r3,g3,g3], colorSpace='rgb')
                    image3Alistirma_2.size = (0, 0)
                    Poli3Alistirma.size = (0.023, 0.042)
                    Poli3Alistirma.pos = (-0.0195,-0.036)
                    image4Alistirma_2.setColor([r4,g4,g4], colorSpace='rgb')
                    image4Alistirma_2.size = (0, 0)
                    Poli4Alistirma.size = (0.023, 0.042)
                    Poli4Alistirma.pos = (0.0195,-0.036)
                elif dizi[0] == 3:
                    image3Alistirma_2.setColor([r3,g3,b3], colorSpace='rgb')
                    image3Alistirma_2.size = (0.023, 0.042)
                    image3Alistirma_2.pos = (-0.0195,-0.036)
                    image4Alistirma_2.setColor([r4,g4,g4], colorSpace='rgb')
                    image4Alistirma_2.size = (0, 0)
                    Poli4Alistirma.size = (0.023, 0.042)
                    Poli4Alistirma.pos = (0.0195,-0.036)
                    image1Alistirma_2.setColor([r1,g1,g1], colorSpace='rgb')
                    Iimage1Alistirma_2.size = (0, 0)
                    Poli1Alistirma.size = (0.023, 0.042)
                    Poli1Alistirma.pos = (-0.0195,0.036)
                    image2Alistirma_2.setColor([r2,g2,g2], colorSpace='rgb')
                    image2Alistirma_2.size = (0, 0)
                    Poli2Alistirma.size = (0.023, 0.042)
                    Poli2Alistirma.pos = (0.0195,0.036)
                elif dizi[0] == 4:
                    image4Alistirma_2.setColor([r4,g4,g4], colorSpace='rgb')
                    image4Alistirma_2.size = (0.023, 0.042)
                    image4Alistirma_2.pos = (0.0195,-0.036)
                    image3Alistirma_2.setColor([r3,g3,b3], colorSpace='rgb')
                    image3Alistirma_2.size = (0, 0)
                    Poli3Alistirma.size = (0.023, 0.042)
                    Poli3Alistirma.pos = (-0.0195,-0.036)
                    image1Alistirma_2.setColor([r1,g1,g1], colorSpace='rgb')
                    image1Alistirma_2.size = (0, 0)
                    Poli1Alistirma.size = (0.023, 0.042)
                    Poli1Alistirma.pos = (-0.0195,0.036)
                    image2Alistirma_2.setColor([r2,g2,g2], colorSpace='rgb')
                    image2Alistirma_2.size = (0, 0)
                    Poli2Alistirma.size = (0.023, 0.042)
                    Poli2Alistirma.pos = (0.0195,0.036)
      End Routine:
        if KeyAlistirma_2.corr == 0:
            SoundAlistirma_2.play()

        if counter == 16:
            ConditionAlistirma.finished = True
  Routine Deney_Fixation800ms
    ImageComponent image800Deney
      image = small circle.png
      size = (2, 2)
      startVal [frame N] = 0
      stopVal [frame N] = 48
      units = norm
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    TextComponent kosulDeney
      font = Times New Roman
      letterHeight = 0.00
      startVal [frame N] = 0
      stopVal [frame N] = 48
      text [set every repeat] = $condition
      units = norm
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    TextComponent cevapDeney
      font = Times New Roman
      letterHeight = 0.00
      startVal [frame N] = 0
      stopVal [frame N] = 48
      text [set every repeat] = $taskcevap
      units = norm
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    CodeComponent Code800Deney
      Code Type = Auto->JS
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      Begin Experiment:
        r1 = 0
        g1 = 0
        b1 = 0
        r2 = 0
        g2 = 0
        b2 = 0
        r3 = 0
        g3 = 0
        b3 = 0
        r4 = 0
        g4 = 0
        b4 = 0
      End Routine:
        r1 = float(round(random(),4))
        g1 = float(round(random(),4))
        b1 = float(round(random(),4))

        r2 = float(round(random(),4))
        g2 = float(round(random(),4))
        b2 = float(round(random(),4))

        r3 = float(round(random(),4))
        g3 = float(round(random(),4))
        b3 = float(round(random(),4))

        r4 = float(round(random(),4))
        g4 = float(round(random(),4))
        b4 = float(round(random(),4))
  Routine Deney_Load200ms
    ImageComponent image1Deney
      color [set every repeat] = $[r1,g1,b1]
      image = white.png
      pos = (-0.09,0.15)
      size = (0, 0)
      startVal [frame N] = 0
      stopVal [frame N] = 12
      texture resolution = 512
      units = norm
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    ImageComponent image2Deney
      color [set every repeat] = $[r2,g2,b2]
      image = white.png
      pos = (0.09,0.15)
      size = (0, 0)
      startVal [frame N] = 0
      stopVal [frame N] = 12
      units = norm
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    ImageComponent image3Deney
      color [set every repeat] = $[r3,g3,b3]
      image = white.png
      pos = (-0.09,-0.15)
      size = (0, 0)
      startVal [frame N] = 0
      stopVal [frame N] = 12
      units = norm
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    ImageComponent image4Deney
      color [set every repeat] = $[r4,g4,b4]
      image = white.png
      pos = (0.09,-0.15)
      size = (0, 0)
      startVal [frame N] = 0
      stopVal [frame N] = 12
      units = norm
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    CodeComponent CodeLoadDeney
      Code Type = Auto->JS
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      Begin Experiment:
        degisken = 0
      Begin Routine:
        if kosulDeney.text == "LN":
            dizi = [1,2,3,4]
            shuffle(dizi)

            if dizi[0] == 1:
                image2Deney.color = "white"
                image3Deney.color = "white"
                image4Deney.color = "white"
                degisken = 1
            elif dizi[0] == 2:
                image1Deney.color = "white"
                image3Deney.color = "white"
                image4Deney.color = "white"
                degisken = 2
            elif dizi[0] == 3:
                image1Deney.color = "white"
                image2Deney.color = "white"
                image4Deney.color = "white"
                degisken = 3
            elif dizi[0] == 4:
                image1Deney.color = "white"
                image2Deney.color = "white"
                image3Deney.color = "white"
                degisken = 4

            image1Deney.size = (0.023, 0.042)
            image1Deney.pos = (-0.0195,0.036)
            image2Deney.size = (0.023, 0.042)
            image2Deney.pos = (0.0195,0.036)
            image3Deney.size = (0.023, 0.042)
            image3Deney.pos = (-0.0195,-0.036)
            image4Deney.size = (0.023, 0.042)
            image4Deney.pos = (0.0195,-0.036)

        elif kosulDeney.text == "LW":
            dizi = [1,2,3,4]
            shuffle(dizi)

            if dizi[0] == 1:
                image2Deney.color = "white"
                image3Deney.color = "white"
                image4Deney.color = "white"
                degisken = 1
            elif dizi[0] == 2:
                image1Deney.color = "white"
                image3Deney.color = "white"
                image4Deney.color = "white"
                degisken = 2
            elif dizi[0] == 3:
                image1Deney.color = "white"
                image2Deney.color = "white"
                image4Deney.color = "white"
                degisken = 3
            elif dizi[0] == 4:
                image1Deney.color = "white"
                image2Deney.color = "white"
                image3Deney.color = "white"
                degisken = 4

            image1Deney.size = (0.06, 0.1)
            image1Deney.pos = (-0.09,0.15)
            image2Deney.size = (0.06, 0.1)
            image2Deney.pos = (0.09,0.15)
            image3Deney.size = (0.06, 0.1)
            image3Deney.pos = (-0.09,-0.15)
            image4Deney.size = (0.06, 0.1)
            image4Deney.pos = (0.09,-0.15)

        elif kosulDeney.text == "HW":
            image1Deney.size = (0.06, 0.1)
            image1Deney.pos = (-0.09,0.15)
            image2Deney.size = (0.06, 0.1)
            image2Deney.pos = (0.09,0.15)
            image3Deney.size = (0.06, 0.1)
            image3Deney.pos = (-0.09,-0.15)
            image4Deney.size = (0.06, 0.1)
            image4Deney.pos = (0.09,-0.15)

        elif kosulDeney.text == "HN":
            image1Deney.size = (0.023, 0.042)
            image1Deney.pos = (-0.0195,0.036)
            image2Deney.size = (0.023, 0.042)
            image2Deney.pos = (0.0195,0.036)
            image3Deney.size = (0.023, 0.042)
            image3Deney.pos = (-0.0195,-0.036)
            image4Deney.size = (0.023, 0.042)
            image4Deney.pos = (0.0195,-0.036)
  Routine Deney_BlankScreen2000ms
    ImageComponent BlankDeney
      color = $[0,0,0]
      size = (2, 2)
      startVal [frame N] = 0
      stopVal [frame N] = 120
      units = norm
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    CodeComponent CodeBlankDeney
      Code Type = Auto->JS
  Routine Deney_FlankerTask2000ms
    TextComponent HedefDeney
      font = Times New Roman
      letterHeight = 0.07
      pos [set every repeat] = pozisyonhedef
      startVal [frame N] = 0
      stopVal [frame N] = 120
      text [set every repeat] = $hedef
      units = norm
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    TextComponent CeldiriciDeney
      font = Times New Roman
      letterHeight = 0.095
      pos [set every repeat] = pozisyonceldirici
      startVal [frame N] = 0
      stopVal [frame N] = 120
      text [set every repeat] = $celdirici
      units = norm
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    KeyboardComponent KeyDeney
      allowedKeys = 'h','s'
      correctAns = $flankercevap
      forceEndRoutine = True
      startVal [frame N] = 0
      stopVal [frame N] = 120
      store = first key
      storeCorrect = True
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    SoundComponent SoundDeney
      sound = yanlis.wav
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    CodeComponent CodeFlankerDeney
      Code Type = Auto->JS
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      Begin Routine:
        FRate = 1000 / int(round(win.getActualFrameRate(),2))
        FrameN = int(2000 / FRate)
        frame = 0
      Each Frame:
        frame = frame + 1
        requirement = 2000 / FRate
        if frame >= requirement:
            continueRoutine = False
      End Routine:
        if KeyDeney.keys == None:
            SoundDeney.play()
  Routine Deney_Fixation500ms
    ImageComponent FlankerDeneyFix
      image = small circle.png
      size = (2, 2)
      startVal [frame N] = 0
      stopVal [frame N] = 30
      units = norm
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    CodeComponent CodeFlankerDeneyFix
      Code Type = Auto->JS
  Routine Deney_ChangeDetection
    ImageComponent image1Deney_2
      color [set every repeat] = $[r1,g1,b1]
      image = white.png
      pos = (-0.09,0.15)
      size = (0, 0)
      startVal [frame N] = 0
      texture resolution = 512
      units = norm
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    ImageComponent image2Deney_2
      color [set every repeat] = $[r2,g2,b2]
      image = white.png
      pos = (0.09,0.15)
      size = (0, 0)
      startVal [frame N] = 0
      units = norm
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    ImageComponent image3Deney_2
      color [set every repeat] = $[r3,g3,b3]
      image = white.png
      pos = (-0.09,-0.15)
      size = (0, 0)
      startVal [frame N] = 0
      units = norm
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    ImageComponent image4Deney_2
      color [set every repeat] = $[r4,g4,b4]
      image = white.png
      pos = (0.09,-0.15)
      size = (0, 0)
      startVal [frame N] = 0
      units = norm
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    PolygonComponent Poli1Deney
      fillColor = $[0,0,0]
      lineColor = black
      pos = (-0.09,0.15)
      shape = regular polygon...
      size = (0, 0)
      startVal [frame N] = 0
      units = norm
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    PolygonComponent Poli2Deney
      fillColor = $[0,0,0]
      lineColor = black
      pos = (0.09,0.15)
      shape = regular polygon...
      size = (0, 0)
      startVal [frame N] = 0
      units = norm
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    PolygonComponent Poli3Deney
      fillColor = $[0,0,0]
      lineColor = black
      pos = (-0.09,-0.15)
      shape = regular polygon...
      size = (0, 0)
      startVal [frame N] = 0
      units = norm
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    PolygonComponent Poli4Deney
      fillColor = $[0,0,0]
      lineColor = black
      pos = (0.09,-0.15)
      shape = regular polygon...
      size = (0, 0)
      startVal [frame N] = 0
      units = norm
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    KeyboardComponent KeyDeney_2
      allowedKeys = 'z','x'
      correctAns = $taskcevap
      forceEndRoutine = True
      startVal [frame N] = 0
      storeCorrect = True
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    SoundComponent SoundDeney_2
      sound = yanlis.wav
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    CodeComponent CodeTaskDeney
      Code Type = Auto->JS
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      Begin Routine:
        image1Deney_2.size = (0, 0)
        image2Deney_2.size = (0, 0)
        image3Deney_2.size = (0, 0)
        image4Deney_2.size = (0, 0)
        Poli1Deney.size = (0, 0)
        Poli2Deney.size = (0, 0)
        Poli3Deney.size = (0, 0)
        Poli4Deney.size = (0, 0)

        if kosulDeney.text == "LN":
            if cevapDeney.text == "z":
                if degisken == 1:
                    image1Deney_2.setColor([r1,g1,b1], colorSpace='rgb')
                    image1Deney_2.pos = (-0.0195,0.036)
                    image1Deney_2.size = (0.023, 0.042)
                    Poli2Deney.size = (0.023, 0.042)
                    Poli2Deney.pos = (0.0195,0.036)
                    Poli3Deney.size = (0.023, 0.042)
                    Poli3Deney.pos = (-0.0195,-0.036)
                    Poli4Deney.size = (0.023, 0.042)
                    Poli4Deney.pos = (0.0195,-0.036)
                elif degisken == 2:
                    image2Deney_2.setColor([r2,g2,b2], colorSpace='rgb')
                    image2Deney_2.size = (0.023, 0.042)
                    image2Deney_2.pos = (0.0195,0.036)
                    Poli1Deney.size = (0.023, 0.042)
                    Poli1Deney.pos = (-0.0195,0.036)
                    Poli3Deney.size = (0.023, 0.042)
                    Poli3Deney.pos = (-0.0195,-0.036)
                    Poli4Deney.size = (0.023, 0.042)
                    Poli4Deney.pos = (0.0195,-0.036)
                elif degisken == 3:
                    image3Deney_2.setColor([r3,g3,b3], colorSpace='rgb')
                    image3Deney_2.size = (0.023, 0.042)
                    image3Deney_2.pos = (-0.0195,-0.036)
                    Poli1Deney.size = (0.023, 0.042)
                    Poli1Deney.pos = (-0.0195,0.036)
                    Poli2Deney.size = (0.023, 0.042)
                    Poli2Deney.pos = (0.0195,0.036)
                    Poli4Deney.size = (0.023, 0.042)
                    Poli4Deney.pos = (0.0195,-0.036)
                elif degisken == 4:
                    image4Deney_2.setColor([r4,g4,b4], colorSpace='rgb')
                    image4Deney_2.size = (0.023, 0.042)
                    image4Deney_2.pos = (0.0195,-0.036)
                    Poli1Deney.size = (0.023, 0.042)
                    Poli1Deney.pos = (-0.0195,0.036)
                    Poli2Deney.size = (0.023, 0.042)
                    Poli2Deney.pos = (0.0195,0.036)
                    Poli3Deney.size = (0.023, 0.042)
                    Poli3Deney.pos = (-0.0195,-0.036)

            if cevapDeney.text == "x":
                r1 = float(round(r1,4)) + 0.5333
                g1 = float(round(g1,4)) + 0.5333
                b1 = float(round(b1,4)) + 0.5333

                r2 = float(round(r2,4)) + 0.5333
                g2 = float(round(g2,4)) + 0.5333
                b2 = float(round(b2,4)) + 0.5333

                r3 = float(round(r3,4)) + 0.5333
                g3 = float(round(g3,4)) + 0.5333
                b3 = float(round(b3,4)) + 0.5333

                r4 = float(round(r4,4)) + 0.5333
                g4 = float(round(g4,4)) + 0.5333
                b4 = float(round(b4,4)) + 0.5333

                if r1 > 1:
                    r1 = r1 - 0.5333
                    p1 = 1 - r1
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r1 = -float(round(p4,4))

                if g1 > 1:
                    g1 = g1 - 0.5333
                    p1 = 1 - g1
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g1 = -float(round(p4,4))

                if b1 > 1:
                    b1 = b1 - 0.5333
                    p1 = 1 - b1
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b1 = -float(round(p4,4))

                if r2 > 1:
                    r2 = r2 - 0.5333
                    p1 = 1 - r2
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r2 = -float(round(p4,4))

                if g2 > 1:
                    g2 = g2 - 0.5333
                    p1 = 1 - g2
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g2 = -float(round(p4,4))

                if b2 > 1:
                    b2 = b2 - 0.5333
                    p1 = 1 - b2
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b2 = -float(round(p4,4))

                if r3 > 1:
                    r3 = r3 - 0.5333
                    p1 = 1 - r3
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r3 = -float(round(p4,4))

                if g3 > 1:
                    g3 = g3 - 0.5333
                    p1 = 1 - g3
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g3 = -float(round(p4,4))

                if b3 > 1:
                    b3 = b3 - 0.5333
                    p1 = 1 - b3
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b3 = -float(round(p4,4))

                if r4 > 1:
                    r4 = r4 - 0.5333
                    p1 = 1 - r4
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r4 = -float(round(p4,4))

                if g4 > 1:
                    g4 = g4 - 0.5333
                    p1 = 1 - g4
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g4 = -float(round(p4,4))

                if b4 > 1:
                    b4 = b4 - 0.5333
                    p1 = 1 - b4
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b4 = -float(round(p4,4))

                if degisken == 1:
                    image1Deney_2.setColor([r1,g1,b1], colorSpace='rgb')
                    image1Deney_2.pos = (-0.0195,0.036)
                    image1Deney_2.size = (0.023, 0.042)
                    Poli2Deney.size = (0.023, 0.042)
                    Poli2Deney.pos = (0.0195,0.036)
                    Poli3Deney.size = (0.023, 0.042)
                    Poli3Deney.pos = (-0.0195,-0.036)
                    Poli4Deney.size = (0.023, 0.042)
                    Poli4Deney.pos = (0.0195,-0.036)
                elif degisken == 2:
                    image2Deney_2.setColor([r2,g2,b2], colorSpace='rgb')
                    image2Deney_2.size = (0.023, 0.042)
                    image2Deney_2.pos = (0.0195,0.036)
                    Poli1Deney.size = (0.023, 0.042)
                    Poli1Deney.pos = (-0.0195,0.036)
                    Poli3Deney.size = (0.023, 0.042)
                    Poli3Deney.pos = (-0.0195,-0.036)
                    Poli4Deney.size = (0.023, 0.042)
                    Poli4Deney.pos = (0.0195,-0.036)
                elif degisken == 3:
                    image3Deney_2.setColor([r3,g3,b3], colorSpace='rgb')
                    image3Deney_2.size = (0.023, 0.042)
                    image3Deney_2.pos = (-0.0195,-0.036)
                    Poli1Deney.size = (0.023, 0.042)
                    Poli1Deney.pos = (-0.0195,0.036)
                    Poli2Deney.size = (0.023, 0.042)
                    Poli2Deney.pos = (0.0195,0.036)
                    Poli4Deney.size = (0.023, 0.042)
                    Poli4Deney.pos = (0.0195,-0.036)
                elif degisken == 4:
                    image4Deney_2.setColor([r4,g4,b4], colorSpace='rgb')
                    image4Deney_2.size = (0.023, 0.042)
                    image4Deney_2.pos = (0.0195,-0.036)
                    Poli1Deney.size = (0.023, 0.042)
                    Poli1Deney.pos = (-0.0195,0.036)
                    Poli2Deney.size = (0.023, 0.042)
                    Poli2Deney.pos = (0.0195,0.036)
                    Poli3Deney.size = (0.023, 0.042)
                    Poli3Deney.pos = (-0.0195,-0.036)



        elif kosulDeney.text == "HW":
            if cevapDeney.text == "z":
                dizi = [1,2,3,4]
                shuffle(dizi)
                if dizi[0] == 1:
                    image1Deney_2.setColor([r1,g1,b1], colorSpace='rgb')
                    image1Deney_2.size = (0.06, 0.1)
                    image1Deney_2.pos = (-0.09, 0.15)
                    image2Deney_2.setColor([r2,g2,g2], colorSpace='rgb')
                    image2Deney_2.size = (0, 0)
                    Poli2Deney.size = (0.06, 0.1)
                    Poli2Deney.pos = (0.09, 0.15)
                    image3Deney_2.setColor([r3,g3,g3], colorSpace='rgb')
                    image3Deney_2.size = (0, 0)
                    Poli3Deney.size = (0.06, 0.1)
                    Poli3Deney.pos = (-0.09,-0.15)
                    image4Deney_2.setColor([r4,g4,g4], colorSpace='rgb')
                    image4Deney_2.size = (0, 0)
                    Poli4Deney.size = (0.06, 0.1)
                    Poli4Deney.pos = (0.09,-0.15)
                elif dizi[0] == 2:
                    image2Deney_2.setColor([r2,g2,g2], colorSpace='rgb')
                    image2Deney_2.size = (0.06, 0.1)
                    image2Deney_2.pos = (0.09, 0.15)
                    image1Deney_2.setColor([r1,g1,g1], colorSpace='rgb')
                    image1Deney_2.size = (0, 0)
                    Poli1Deney.size = (0.06, 0.1)
                    Poli1Deney.pos = (-0.09, 0.15)
                    image3Deney_2.setColor([r3,g3,g3], colorSpace='rgb')
                    image3Deney_2.size = (0, 0)
                    Poli3Deney.size = (0.06, 0.1)
                    Poli3Deney.pos = (-0.09,-0.15)
                    image4Deney_2.setColor([r4,g4,g4], colorSpace='rgb')
                    image4Deney_2.size = (0, 0)
                    Poli4Deney.size = (0.06, 0.1)
                    Poli4Deney.pos = (0.09,-0.15)
                elif dizi[0] == 3:
                    image3Deney_2.setColor([r3,g3,b3], colorSpace='rgb')
                    image3Deney_2.size = (0.06, 0.1)
                    image3Deney_2.pos = (-0.09,-0.15)
                    image4Deney_2.setColor([r4,g4,g4], colorSpace='rgb')
                    image4Deney_2.size = (0, 0)
                    Poli4Deney.size = (0.06, 0.1)
                    Poli4Deney.pos = (0.09,-0.15)
                    image1Deney_2.setColor([r1,g1,g1], colorSpace='rgb')
                    image1Deney_2.size = (0, 0)
                    Poli1Deney.size = (0.06, 0.1)
                    Poli1Deney.pos = (-0.09, 0.15)
                    image2Deney_2.setColor([r2,g2,g2], colorSpace='rgb')
                    image2Deney_2.size = (0, 0)
                    Poli2Deney.size = (0.06, 0.1)
                    Poli2Deney.pos = (0.09, 0.15)
                elif dizi[0] == 4:
                    image4Deney_2.setColor([r4,g4,g4], colorSpace='rgb')
                    image4Deney_2.size = (0.06, 0.1)
                    image4Deney_2.pos = (0.09,-0.15)
                    image3Deney_2.setColor([r3,g3,g3], colorSpace='rgb')
                    image3Deney_2.size = (0, 0)
                    Poli3Deney.size = (0.06, 0.1)
                    Poli3Deney.pos = (-0.09,-0.15)
                    image1Deney_2.setColor([r1,g1,g1], colorSpace='rgb')
                    image1Deney_2.size = (0, 0)
                    Poli1Deney.size = (0.06, 0.1)
                    Poli1Deney.pos = (-0.09, 0.15)
                    image2Deney_2.setColor([r2,g2,g2], colorSpace='rgb')
                    image2Deney_2.size = (0, 0)
                    Poli2Deney.size = (0.06, 0.1)
                    Poli2Deney.pos = (0.09, 0.15)

            if cevapDeney.text == "x":
                r1 = float(round(r1,4)) + 0.5333
                g1 = float(round(g1,4)) + 0.5333
                b1 = float(round(b1,4)) + 0.5333

                r2 = float(round(r2,4)) + 0.5333
                g2 = float(round(g2,4)) + 0.5333
                b2 = float(round(b2,4)) + 0.5333

                r3 = float(round(r3,4)) + 0.5333
                g3 = float(round(g3,4)) + 0.5333
                b3 = float(round(b3,4)) + 0.5333

                r4 = float(round(r4,4)) + 0.5333
                g4 = float(round(g4,4)) + 0.5333
                b4 = float(round(b4,4)) + 0.5333

                if r1 > 1:
                    r1 = r1 - 0.5333
                    p1 = 1 - r1
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r1 = -float(round(p4,4))

                if g1 > 1:
                    g1 = g1 - 0.5333
                    p1 = 1 - g1
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g1 = -float(round(p4,4))

                if b1 > 1:
                    b1 = b1 - 0.5333
                    p1 = 1 - b1
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b1 = -float(round(p4,4))

                if r2 > 1:
                    r2 = r2 - 0.5333
                    p1 = 1 - r2
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r2 = -float(round(p4,4))

                if g2 > 1:
                    g2 = g2 - 0.5333
                    p1 = 1 - g2
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g2 = -float(round(p4,4))

                if b2 > 1:
                    b2 = b2 - 0.5333
                    p1 = 1 - b2
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b2 = -float(round(p4,4))

                if r3 > 1:
                    r3 = r3 - 0.5333
                    p1 = 1 - r3
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r3 = -float(round(p4,4))

                if g3 > 1:
                    g3 = g3 - 0.5333
                    p1 = 1 - g3
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g3 = -float(round(p4,4))

                if b3 > 1:
                    b3 = b3 - 0.5333
                    p1 = 1 - b3
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b3 = -float(round(p4,4))

                if r4 > 1:
                    r4 = r4 - 0.5333
                    p1 = 1 - r4
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r4 = -float(round(p4,4))

                if g4 > 1:
                    g4 = g4 - 0.5333
                    p1 = 1 - g4
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g4 = -float(round(p4,4))

                if b4 > 1:
                    b4 = b4 - 0.5333
                    p1 = 1 - b4
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b4 = -float(round(p4,4))

                dizi = [1,2,3,4]
                shuffle(dizi)
                if dizi[0] == 1:
                    image1Deney_2.setColor([r1,g1,b1], colorSpace='rgb')
                    image1Deney_2.size = (0.06, 0.1)
                    image1Deney_2.pos = (-0.09, 0.15)
                    image2Deney_2.setColor([r2,g2,g2], colorSpace='rgb')
                    image2Deney_2.size = (0, 0)
                    Poli2Deney.size = (0.06, 0.1)
                    Poli2Deney.pos = (0.09, 0.15)
                    image3Deney_2.setColor([r3,g3,g3], colorSpace='rgb')
                    image3Deney_2.size = (0, 0)
                    Poli3Deney.size = (0.06, 0.1)
                    Poli3Deney.pos = (-0.09,-0.15)
                    image4Deney_2.setColor([r4,g4,g4], colorSpace='rgb')
                    image4Deney_2.size = (0, 0)
                    Poli4Deney.size = (0.06, 0.1)
                    Poli4Deney.pos = (0.09,-0.15)
                elif dizi[0] == 2:
                    image2Deney_2.setColor([r2,g2,g2], colorSpace='rgb')
                    image2Deney_2.size = (0.06, 0.1)
                    image2Deney_2.pos = (0.09, 0.15)
                    image1Deney_2.setColor([r1,g1,g1], colorSpace='rgb')
                    image1Deney_2.size = (0, 0)
                    Poli1Deney.size = (0.06, 0.1)
                    Poli1Deney.pos = (-0.09, 0.15)
                    image3Deney_2.setColor([r3,g3,g3], colorSpace='rgb')
                    image3Deney_2.size = (0, 0)
                    Poli3Deney.size = (0.06, 0.1)
                    Poli3Deney.pos = (-0.09,-0.15)
                    image4Deney_2.setColor([r4,g4,g4], colorSpace='rgb')
                    image4Deney_2.size = (0, 0)
                    Poli4Deney.size = (0.06, 0.1)
                    Poli4Deney.pos = (0.09,-0.15)
                elif dizi[0] == 3:
                    image3Deney_2.setColor([r3,g3,b3], colorSpace='rgb')
                    image3Deney_2.size = (0.06, 0.1)
                    image3Deney_2.pos = (-0.09,-0.15)
                    image4Deney_2.setColor([r4,g4,g4], colorSpace='rgb')
                    image4Deney_2.size = (0, 0)
                    Poli4Deney.size = (0.06, 0.1)
                    Poli4Deney.pos = (0.09,-0.15)
                    image1Deney_2.setColor([r1,g1,g1], colorSpace='rgb')
                    image1Deney_2.size = (0, 0)
                    Poli1Deney.size = (0.06, 0.1)
                    Poli1Deney.pos = (-0.09, 0.15)
                    image2Deney_2.setColor([r2,g2,g2], colorSpace='rgb')
                    image2Deney_2.size = (0, 0)
                    Poli2Deney.size = (0.06, 0.1)
                    Poli2Deney.pos = (0.09, 0.15)
                elif dizi[0] == 4:
                    image4Deney_2.setColor([r4,g4,g4], colorSpace='rgb')
                    image4Deney_2.size = (0.06, 0.1)
                    image4Deney_2.pos = (0.09,-0.15)
                    image3Deney_2.setColor([r3,g3,g3], colorSpace='rgb')
                    image3Deney_2.size = (0, 0)
                    Poli3Deney.size = (0.06, 0.1)
                    Poli3Deney.pos = (-0.09,-0.15)
                    image1Deney_2.setColor([r1,g1,g1], colorSpace='rgb')
                    image1Deney_2.size = (0, 0)
                    Poli1Deney.size = (0.06, 0.1)
                    Poli1Deney.pos = (-0.09, 0.15)
                    image2Deney_2.setColor([r2,g2,g2], colorSpace='rgb')
                    image2Deney_2.size = (0, 0)
                    Poli2Deney.size = (0.06, 0.1)
                    Poli2Deney.pos = (0.09, 0.15)

        elif kosulDeney.text == "LW":
            if cevapDeney.text == "z":
                if degisken == 1:
                    image1Deney_2.setColor([r1,g1,b1], colorSpace='rgb')
                    image1Deney_2.size = (0.06, 0.1)
                    image1Deney_2.pos = (-0.09, 0.15)
                    Poli2Deney.size = (0.06, 0.1)
                    Poli2Deney.pos = (0.09, 0.15)
                    Poli3Deney.size = (0.06, 0.1)
                    Poli3Deney.pos = (-0.09,-0.15)
                    Poli4Deney.size = (0.06, 0.1)
                    Poli4Deney.pos = (0.09,-0.15)

                elif degisken == 2:
                    image2Deney_2.setColor([r2,g2,b2], colorSpace='rgb')
                    image2Deney_2.size = (0.06, 0.1)
                    image2Deney_2.pos = (0.09, 0.15)
                    Poli1Deney.size = (0.06, 0.1)
                    Poli1Deney.pos = (-0.09, 0.15)
                    Poli3Deney.size = (0.06, 0.1)
                    Poli3Deney.pos = (-0.09,-0.15)
                    Poli4Deney.size = (0.06, 0.1)
                    Poli4Deney.pos = (0.09,-0.15)

                elif degisken == 3:
                    image3Deney_2.setColor([r3,g3,b3], colorSpace='rgb')
                    image3Deney_2.size = (0.06, 0.1)
                    image3Deney_2.pos = (-0.09,-0.15)
                    Poli1Deney.size = (0.06, 0.1)
                    Poli1Deney.pos = (-0.09, 0.15)
                    Poli2Deney.size = (0.06, 0.1)
                    Poli2Deney.pos = (0.09, 0.15)
                    Poli4Deney.size = (0.06, 0.1)
                    Poli4Deney.pos = (0.09,-0.15)

                elif degisken == 4:
                    image4Deney_2.setColor([r4,g4,b4], colorSpace='rgb')
                    image4Deney_2.size = (0.06, 0.1)
                    image4Deney_2.pos = (0.09,-0.15)
                    Poli1Deney.size = (0.06, 0.1)
                    Poli1Deney.pos = (-0.09, 0.15)
                    Poli2Deney.size = (0.06, 0.1)
                    Poli2Deney.pos = (0.09, 0.15)
                    Poli3Deney.size = (0.06, 0.1)
                    Poli3Deney.pos = (-0.09,-0.15)

            if cevapDeney.text == "x":
                r1 = float(round(r1,4)) + 0.5333
                g1 = float(round(g1,4)) + 0.5333
                b1 = float(round(b1,4)) + 0.5333

                r2 = float(round(r2,4)) + 0.5333
                g2 = float(round(g2,4)) + 0.5333
                b2 = float(round(b2,4)) + 0.5333

                r3 = float(round(r3,4)) + 0.5333
                g3 = float(round(g3,4)) + 0.5333
                b3 = float(round(b3,4)) + 0.5333

                r4 = float(round(r4,4)) + 0.5333
                g4 = float(round(g4,4)) + 0.5333
                b4 = float(round(b4,4)) + 0.5333

                if r1 > 1:
                    r1 = r1 - 0.5333
                    p1 = 1 - r1
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r1 = -float(round(p4,4))

                if g1 > 1:
                    g1 = g1 - 0.5333
                    p1 = 1 - g1
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g1 = -float(round(p4,4))

                if b1 > 1:
                    b1 = b1 - 0.5333
                    p1 = 1 - b1
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b1 = -float(round(p4,4))

                if r2 > 1:
                    r2 = r2 - 0.5333
                    p1 = 1 - r2
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r2 = -float(round(p4,4))

                if g2 > 1:
                    g2 = g2 - 0.5333
                    p1 = 1 - g2
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g2 = -float(round(p4,4))

                if b2 > 1:
                    b2 = b2 - 0.5333
                    p1 = 1 - b2
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b2 = -float(round(p4,4))

                if r3 > 1:
                    r3 = r3 - 0.5333
                    p1 = 1 - r3
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r3 = -float(round(p4,4))

                if g3 > 1:
                    g3 = g3 - 0.5333
                    p1 = 1 - g3
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g3 = -float(round(p4,4))

                if b3 > 1:
                    b3 = b3 - 0.5333
                    p1 = 1 - b3
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b3 = -float(round(p4,4))

                if r4 > 1:
                    r4 = r4 - 0.5333
                    p1 = 1 - r4
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r4 = -float(round(p4,4))

                if g4 > 1:
                    g4 = g4 - 0.5333
                    p1 = 1 - g4
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g4 = -float(round(p4,4))

                if b4 > 1:
                    b4 = b4 - 0.5333
                    p1 = 1 - b4
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b4 = -float(round(p4,4))


                if degisken == 1:
                    image1Deney_2.setColor([r1,g1,b1], colorSpace='rgb')
                    image1Deney_2.size = (0.06, 0.1)
                    image1Deney_2.pos = (-0.09, 0.15)
                    Poli2Deney.size = (0.06, 0.1)
                    Poli2Deney.pos = (0.09, 0.15)
                    Poli3Deney.size = (0.06, 0.1)
                    Poli3Deney.pos = (-0.09,-0.15)
                    Poli4Deney.size = (0.06, 0.1)
                    Poli4Deney.pos = (0.09,-0.15)

                elif degisken == 2:
                    image2Deney_2.setColor([r2,g2,b2], colorSpace='rgb')
                    image2Deney_2.size = (0.06, 0.1)
                    image2Deney_2.pos = (0.09, 0.15)
                    Poli1Deney.size = (0.06, 0.1)
                    Poli1Deney.pos = (-0.09, 0.15)
                    Poli3Deney.size = (0.06, 0.1)
                    Poli3Deney.pos = (-0.09,-0.15)
                    Poli4Deney.size = (0.06, 0.1)
                    Poli4Deney.pos = (0.09,-0.15)

                elif degisken == 3:
                    image3Deney_2.setColor([r3,g3,b3], colorSpace='rgb')
                    image3Deney_2.size = (0.06, 0.1)
                    image3Deney_2.pos = (-0.09,-0.15)
                    Poli1Deney.size = (0.06, 0.1)
                    Poli1Deney.pos = (-0.09, 0.15)
                    Poli2Deney.size = (0.06, 0.1)
                    Poli2Deney.pos = (0.09, 0.15)
                    Poli4Deney.size = (0.06, 0.1)
                    Poli4Deney.pos = (0.09,-0.15)

                elif degisken == 4:
                    image4Deney_2.setColor([r4,g4,b4], colorSpace='rgb')
                    image4Deney_2.size = (0.06, 0.1)
                    image4Deney_2.pos = (0.09,-0.15)
                    Poli1Deney.size = (0.06, 0.1)
                    Poli1Deney.pos = (-0.09, 0.15)
                    Poli2Deney.size = (0.06, 0.1)
                    Poli2Deney.pos = (0.09, 0.15)
                    Poli3Deney.size = (0.06, 0.1)
                    Poli3Deney.pos = (-0.09,-0.15)

        if kosulDeney.text == "HN":
            if cevapDeney.text == "z":
                dizi = [1,2,3,4]
                shuffle(dizi)
                if dizi[0] == 1:
                    image1Deney_2.setColor([r1,g1,b1], colorSpace='rgb')
                    image1Deney_2.size = (0.023, 0.042)
                    image1Deney_2.pos = (-0.0195,0.036)
                    image2Deney_2.setColor([r2,g2,g2], colorSpace='rgb')
                    image2Deney_2.size = (0, 0)
                    Poli2Deney.size = (0.023, 0.042)
                    Poli2Deney.pos = (0.0195,0.036)
                    image3Deney_2.setColor([r3,g3,g3], colorSpace='rgb')
                    image3Deney_2.size = (0, 0)
                    Poli3Deney.size = (0.023, 0.042)
                    Poli3Deney.pos = (-0.0195,-0.036)
                    image4Deney_2.setColor([r4,g4,g4], colorSpace='rgb')
                    image4Deney_2.size = (0, 0)
                    Poli4Deney.size = (0.023, 0.042)
                    Poli4Deney.pos = (0.0195,-0.036)
                elif dizi[0] == 2:
                    image2Deney_2.setColor([r2,g2,g2], colorSpace='rgb')
                    image2Deney_2.size = (0.023, 0.042)
                    image2Deney_2.pos = (0.0195,0.036)
                    image1Deney_2.setColor([r1,g1,b1], colorSpace='rgb')
                    image1Deney_2.size = (0, 0)
                    Poli1Deney.size = (0.023, 0.042)
                    Poli1Deney.pos = (-0.0195,0.036)
                    image3Deney_2.setColor([r3,g3,g3], colorSpace='rgb')
                    image3Deney_2.size = (0, 0)
                    Poli3Deney.size = (0.023, 0.042)
                    Poli3Deney.pos = (-0.0195,-0.036)
                    image4Deney_2.setColor([r4,g4,g4], colorSpace='rgb')
                    image4Deney_2.size = (0, 0)
                    Poli4Deney.size = (0.023, 0.042)
                    Poli4Deney.pos = (0.0195,-0.036)
                elif dizi[0] == 3:
                    image3Deney_2.setColor([r3,g3,b3], colorSpace='rgb')
                    image3Deney_2.size = (0.023, 0.042)
                    image3Deney_2.pos = (-0.0195,-0.036)
                    image4Deney_2.setColor([r4,g4,g4], colorSpace='rgb')
                    image4Deney_2.size = (0, 0)
                    Poli4Deney.size = (0.023, 0.042)
                    Poli4Deney.pos = (0.0195,-0.036)
                    image1Deney_2.setColor([r1,g1,g1], colorSpace='rgb')
                    image1Deney_2.size = (0, 0)
                    Poli1Deney.size = (0.023, 0.042)
                    Poli1Deney.pos = (-0.0195,0.036)
                    image2Deney_2.setColor([r2,g2,g2], colorSpace='rgb')
                    image2Deney_2.size = (0, 0)
                    Poli2Deney.size = (0.023, 0.042)
                    Poli2Deney.pos = (0.0195,0.036)
                elif dizi[0] == 4:
                    image4Deney_2.setColor([r4,g4,g4], colorSpace='rgb')
                    image4Deney_2.size = (0.023, 0.042)
                    image4Deney_2.pos = (0.0195,-0.036)
                    image3Deney_2.setColor([r3,g3,b3], colorSpace='rgb')
                    image3Deney_2.size = (0, 0)
                    Poli3Deney.size = (0.023, 0.042)
                    Poli3Deney.pos = (-0.0195,-0.036)
                    image1Deney_2.setColor([r1,g1,g1], colorSpace='rgb')
                    image1Deney_2size = (0, 0)
                    Poli1Deney.size = (0.023, 0.042)
                    Poli1Deney.pos = (-0.0195,0.036)
                    image2Deney_2.setColor([r2,g2,g2], colorSpace='rgb')
                    image2Deney_2.size = (0, 0)
                    Poli2Deney.size = (0.023, 0.042)
                    Poli2Deney.pos = (0.0195,0.036)
            if cevapDeney.text == "x":
                r1 = float(round(r1,4)) + 0.5333
                g1 = float(round(g1,4)) + 0.5333
                b1 = float(round(b1,4)) + 0.5333

                r2 = float(round(r2,4)) + 0.5333
                g2 = float(round(g2,4)) + 0.5333
                b2 = float(round(b2,4)) + 0.5333

                r3 = float(round(r3,4)) + 0.5333
                g3 = float(round(g3,4)) + 0.5333
                b3 = float(round(b3,4)) + 0.5333

                r4 = float(round(r4,4)) + 0.5333
                g4 = float(round(g4,4)) + 0.5333
                b4 = float(round(b4,4)) + 0.5333

                if r1 > 1:
                    r1 = r1 - 0.5333
                    p1 = 1 - r1
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r1 = -float(round(p4,4))

                if g1 > 1:
                    g1 = g1 - 0.5333
                    p1 = 1 - g1
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g1 = -float(round(p4,4))

                if b1 > 1:
                    b1 = b1 - 0.5333
                    p1 = 1 - b1
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b1 = -float(round(p4,4))

                if r2 > 1:
                    r2 = r2 - 0.5333
                    p1 = 1 - r2
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r2 = -float(round(p4,4))

                if g2 > 1:
                    g2 = g2 - 0.5333
                    p1 = 1 - g2
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g2 = -float(round(p4,4))

                if b2 > 1:
                    b2 = b2 - 0.5333
                    p1 = 1 - b2
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b2 = -float(round(p4,4))

                if r3 > 1:
                    r3 = r3 - 0.5333
                    p1 = 1 - r3
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r3 = -float(round(p4,4))

                if g3 > 1:
                    g3 = g3 - 0.5333
                    p1 = 1 - g3
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g3 = -float(round(p4,4))

                if b3 > 1:
                    b3 = b3 - 0.5333
                    p1 = 1 - b3
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b3 = -float(round(p4,4))

                if r4 > 1:
                    r4 = r4 - 0.5333
                    p1 = 1 - r4
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r4 = -float(round(p4,4))

                if g4 > 1:
                    g4 = g4 - 0.5333
                    p1 = 1 - g4
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g4 = -float(round(p4,4))

                if b4 > 1:
                    b4 = b4 - 0.5333
                    p1 = 1 - b4
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b4 = -float(round(p4,4))

                dizi = [1,2,3,4]
                shuffle(dizi)
                if dizi[0] == 1:
                    image1Deney_2.setColor([r1,g1,b1], colorSpace='rgb')
                    image1Deney_2.size = (0.023, 0.042)
                    image1Deney_2.pos = (-0.0195,0.036)
                    image2Deney_2.setColor([r2,g2,g2], colorSpace='rgb')
                    image2Deney_2.size = (0, 0)
                    Poli2Deney.size = (0.023, 0.042)
                    Poli2Deney.pos = (0.0195,0.036)
                    image3Deney_2.setColor([r3,g3,g3], colorSpace='rgb')
                    image3Deney_2.size = (0, 0)
                    Poli3Deney.size = (0.023, 0.042)
                    Poli3Deney.pos = (-0.0195,-0.036)
                    image4Deney_2.setColor([r4,g4,g4], colorSpace='rgb')
                    image4Deney_2.size = (0, 0)
                    Poli4Deney.size = (0.023, 0.042)
                    Poli4Deney.pos = (0.0195,-0.036)
                elif dizi[0] == 2:
                    image2Deney_2.setColor([r2,g2,g2], colorSpace='rgb')
                    image2Deney_2.size = (0.023, 0.042)
                    image2Deney_2.pos = (0.0195,0.036)
                    image1Deney_2.setColor([r1,g1,b1], colorSpace='rgb')
                    image1Deney_2.size = (0, 0)
                    Poli1Deney.size = (0.023, 0.042)
                    Poli1Deney.pos = (-0.0195,0.036)
                    image3Deney_2.setColor([r3,g3,g3], colorSpace='rgb')
                    image3Deney_2.size = (0, 0)
                    Poli3Deney.size = (0.023, 0.042)
                    Poli3Deney.pos = (-0.0195,-0.036)
                    image4Deney_2.setColor([r4,g4,g4], colorSpace='rgb')
                    image4Deney_2.size = (0, 0)
                    Poli4Deney.size = (0.023, 0.042)
                    Poli4Deney.pos = (0.0195,-0.036)
                elif dizi[0] == 3:
                    image3Deney_2.setColor([r3,g3,b3], colorSpace='rgb')
                    image3Deney_2.size = (0.023, 0.042)
                    image3Deney_2.pos = (-0.0195,-0.036)
                    image4Deney_2.setColor([r4,g4,g4], colorSpace='rgb')
                    image4Deney_2.size = (0, 0)
                    Poli4Deney.size = (0.023, 0.042)
                    Poli4Deney.pos = (0.0195,-0.036)
                    image1Deney_2.setColor([r1,g1,g1], colorSpace='rgb')
                    image1Deney_2.size = (0, 0)
                    Poli1Deney.size = (0.023, 0.042)
                    Poli1Deney.pos = (-0.0195,0.036)
                    image2Deney_2.setColor([r2,g2,g2], colorSpace='rgb')
                    image2Deney_2.size = (0, 0)
                    Poli2Deney.size = (0.023, 0.042)
                    Poli2Deney.pos = (0.0195,0.036)
                elif dizi[0] == 4:
                    image4Deney_2.setColor([r4,g4,g4], colorSpace='rgb')
                    image4Deney_2.size = (0.023, 0.042)
                    image4Deney_2.pos = (0.0195,-0.036)
                    image3Deney_2.setColor([r3,g3,b3], colorSpace='rgb')
                    image3Deney_2.size = (0, 0)
                    Poli3Deney.size = (0.023, 0.042)
                    Poli3Deney.pos = (-0.0195,-0.036)
                    image1Deney_2.setColor([r1,g1,g1], colorSpace='rgb')
                    image1Deney_2size = (0, 0)
                    Poli1Deney.size = (0.023, 0.042)
                    Poli1Deney.pos = (-0.0195,0.036)
                    image2Deney_2.setColor([r2,g2,g2], colorSpace='rgb')
                    image2Deney_2.size = (0, 0)
                    Poli2Deney.size = (0.023, 0.042)
                    Poli2Deney.pos = (0.0195,0.036)
      End Routine:
        if KeyDeney_2.corr == 0:
            SoundDeney_2.play()
Flow
  Routine Yonerge
  LoopInitiator ConditionAlistirma loopType="TrialHandler"
    conditionsFile = replication_of_lee_and_jeong_exp3.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'hedef': 'S', 'celdirici': 'H', 'pozisyonceldirici': (0, -0.125), 'pozisyonhedef': (0, 0), 'flankercevap': 's', 'taskcevap': 'z', 'condition': 'LN'},
      {'hedef': 'S', 'celdirici': 'H', 'pozisyonceldirici': (0, 0.22), 'pozisyonhedef': (-0.03, 0), 'flankercevap': 's', 'taskcevap': 'z', 'condition': 'LN'},
      {'hedef': 'S', 'celdirici': 'H', 'pozisyonceldirici': (0, -0.125), 'pozisyonhedef': (0.03, 0), 'flankercevap': 's', 'taskcevap': 'z', 'condition': 'LN'},
      {'hedef': 'S', 'celdirici': 'H', 'pozisyonceldirici': (0, 0.22), 'pozisyonhedef': (0, 0), 'flankercevap': 's', 'taskcevap': 'z', 'condition': 'LN'},
      {'hedef': 'S', 'celdirici': 'H', 'pozisyonceldirici': (0, 0.22), 'pozisyonhedef': (-0.03, 0), 'flankercevap': 's', 'taskcevap': 'z', 'condition': 'LN'},
      {'hedef': 'S', 'celdirici': 'H', 'pozisyonceldirici': (0, -0.125), 'pozisyonhedef': (0.03, 0), 'flankercevap': 's', 'taskcevap': 'z', 'condition': 'LN'},
      {'hedef': 'H', 'celdirici': 'S', 'pozisyonceldirici': (0, -0.125), 'pozisyonhedef': (0, 0), 'flankercevap': 'h', 'taskcevap': 'z', 'condition': 'LN'},
      {'hedef': 'H', 'celdirici': 'S', 'pozisyonceldirici': (0, 0.22), 'pozisyonhedef': (-0.03, 0), 'flankercevap': 'h', 'taskcevap': 'z', 'condition': 'LN'},
      {'hedef': 'H', 'celdirici': 'S', 'pozisyonceldirici': (0, -0.125), 'pozisyonhedef': (0.03, 0), 'flankercevap': 'h', 'taskcevap': 'z', 'condition': 'LN'}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
    Routine Alistirma_Fixation800ms
    Routine Alistirma_Load200ms
    Routine Alistirma_BlankScreen2000ms
    Routine Alistirma_FlankerTask2000ms
    Routine Alistirma_Fixation500ms
    Routine Alistirma_ChangeDetection
  LoopTerminator ConditionAlistirma
  Routine ConditionLNStart
  LoopInitiator ConditionDeney loopType="TrialHandler"
    conditionsFile = replication_of_lee_and_jeong_exp3.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'hedef': 'S', 'celdirici': 'H', 'pozisyonceldirici': (0, -0.125), 'pozisyonhedef': (0, 0), 'flankercevap': 's', 'taskcevap': 'z', 'condition': 'LN'},
      {'hedef': 'S', 'celdirici': 'H', 'pozisyonceldirici': (0, 0.22), 'pozisyonhedef': (-0.03, 0), 'flankercevap': 's', 'taskcevap': 'z', 'condition': 'LN'},
      {'hedef': 'S', 'celdirici': 'H', 'pozisyonceldirici': (0, -0.125), 'pozisyonhedef': (0.03, 0), 'flankercevap': 's', 'taskcevap': 'z', 'condition': 'LN'},
      {'hedef': 'S', 'celdirici': 'H', 'pozisyonceldirici': (0, 0.22), 'pozisyonhedef': (0, 0), 'flankercevap': 's', 'taskcevap': 'z', 'condition': 'LN'},
      {'hedef': 'S', 'celdirici': 'H', 'pozisyonceldirici': (0, 0.22), 'pozisyonhedef': (-0.03, 0), 'flankercevap': 's', 'taskcevap': 'z', 'condition': 'LN'},
      {'hedef': 'S', 'celdirici': 'H', 'pozisyonceldirici': (0, -0.125), 'pozisyonhedef': (0.03, 0), 'flankercevap': 's', 'taskcevap': 'z', 'condition': 'LN'},
      {'hedef': 'H', 'celdirici': 'S', 'pozisyonceldirici': (0, -0.125), 'pozisyonhedef': (0, 0), 'flankercevap': 'h', 'taskcevap': 'z', 'condition': 'LN'},
      {'hedef': 'H', 'celdirici': 'S', 'pozisyonceldirici': (0, 0.22), 'pozisyonhedef': (-0.03, 0), 'flankercevap': 'h', 'taskcevap': 'z', 'condition': 'LN'},
      {'hedef': 'H', 'celdirici': 'S', 'pozisyonceldirici': (0, -0.125), 'pozisyonhedef': (0.03, 0), 'flankercevap': 'h', 'taskcevap': 'z', 'condition': 'LN'}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
    Routine Deney_Fixation800ms
    Routine Deney_Load200ms
    Routine Deney_BlankScreen2000ms
    Routine Deney_FlankerTask2000ms
    Routine Deney_Fixation500ms
    Routine Deney_ChangeDetection
  LoopTerminator ConditionDeney
