PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = norm
  Use version = 2023.1.0
  Window size (pixels) = [1920, 1080]
  color = white
  expName = replication_of_zhang_and_luck
  keyboardBackend = ioHub
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Routines
  Routine DeneyGecis
    KeyboardComponent KDYonerge
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent TDYonerge
      color = black
      font = Times New Roman
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text = Click on any button when you are ready to proceed to the experiment phase.
      units = norm
      wrapWidth = 1.5
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  Routine Yonerge
    KeyboardComponent KAYonerge
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent TAYonerge
      color = black
      font = Times New Roman
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        Welcome to our study.

        Some colored tiles will be presented on your screen soon. You are expected to keep in mind the color and location information of the tiles on your screen.

        After that, three letters (X, Z and N) will be presented on your screen and you will be expected to press the key of whichever letter is horizontally aligned, then one of the tiles presented on the first screen will be presented and you will be expected to answer whether the color and location information is correct or not (S if there is a match, C if there is no match).

        The first 16 trials are as practice and the experiment will start after the 16th trial.

        Click on any button when you are ready to proceed to the practice phase.
  Routine bitis
    TextComponent TextBitis
      font = Times New Roman
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Çalışma bitmiştir, iyi günler dileriz.
      units = norm
      wrapWidth = 1.5
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  Routine Fixation800ms
    ImageComponent A_image800
      image = fixation.png
      size = (2, 2)
      startVal [frame N] = 0
      stopVal [frame N] = 48
      units = norm
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    TextComponent A_kosul
      font = Times New Roman
      letterHeight = 0.00
      startVal [frame N] = 0
      stopVal [duration (frames)] = 48
      text [set every repeat] = $condition
      units = norm
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    TextComponent A_cevap
      font = Times New Roman
      letterHeight = 0.00
      startVal [time (s)] = 0
      stopVal [duration (frames)] = 48
      text [set every repeat] = $taskcevap
      units = norm
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    CodeComponent A_code800
      Code Type = Auto->JS
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      Begin Experiment:
        counter = 0

        r1 = 0
        g1 = 0
        b1 = 0
        r2 = 0
        g2 = 0
        b2 = 0
        r3 = 0
        g3 = 0
        b3 = 0
        r4 = 0
        g4 = 0
        b4 = 0
        r5 = 0
        g5 = 0
        b5 = 0
        r6 = 0
        g6 = 0
        b6 = 0
      End Routine:
        counter = counter + 1

        r1 = float(round(random(),4))
        g1 = float(round(random(),4))
        b1 = float(round(random(),4))

        r2 = float(round(random(),4))
        g2 = float(round(random(),4))
        b2 = float(round(random(),4))

        r3 = float(round(random(),4))
        g3 = float(round(random(),4))
        b3 = float(round(random(),4))

        r4 = float(round(random(),4))
        g4 = float(round(random(),4))
        b4 = float(round(random(),4))

        r5 = float(round(random(),4))
        g5 = float(round(random(),4))
        b5 = float(round(random(),4))

        r6 = float(round(random(),4))
        g6 = float(round(random(),4))
        b6 = float(round(random(),4))
  Routine VWMLoad200ms
    ImageComponent A_Background1
      image = fixation.png
      size = (2.0, 2.0)
      startVal [frame N] = 0
      stopVal [frame N] = 12
      units = norm
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    ImageComponent A_image1
      color [set every repeat] = $[r1,g1,b1]
      image = white.png
      pos = (-0.176, 0)
      size = (0, 0)
      startVal [frame N] = 0
      stopVal [frame N] = 12
      units = norm
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    ImageComponent A_image2
      color [set every repeat] = $[r2,g2,b2]
      image = white.png
      pos = (-0.118, 0)
      size = (0, 0)
      startVal [frame N] = 0
      stopVal [frame N] = 12
      units = norm
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    ImageComponent A_image3
      color [set every repeat] = $[r3,g3,b3]
      image = white.png
      pos = (0.118, 0)
      size = (0, 0)
      startVal [frame N] = 0
      stopVal [frame N] = 12
      units = norm
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    ImageComponent A_image4
      color [set every repeat] = $[r4,g4,b4]
      image = white.png
      pos = (0.176, 0)
      size = (0, 0)
      startVal [frame N] = 0
      stopVal [frame N] = 12
      units = norm
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    ImageComponent A_image5
      color [set every repeat] = $[r5,g5,b5]
      image = white.png
      pos = (-0.147, 0)
      size = (0, 0)
      startVal [frame N] = 0
      stopVal [frame N] = 12
      units = norm
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    ImageComponent A_image6
      color [set every repeat] = $[r6,g6,b6]
      image = white.png
      pos = (0.147, 0)
      size = (0, 0)
      startVal [frame N] = 0
      stopVal [frame N] = 12
      units = norm
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    CodeComponent A_code200
      Code Type = Auto->JS
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      Begin Routine:
        if A_kosul.text == "LL":
            A_image5.size = (0.053, 0.093)
            A_image6.size = (0.053, 0.093)
        elif A_kosul.text == "HL":
            A_image1.size = (0.053, 0.093)
            A_image2.size = (0.053, 0.093)
            A_image3.size = (0.053, 0.093)
            A_image4.size = (0.053, 0.093)
        elif A_kosul.text == "LS":
            A_image5.size = (0.053, 0.093)
            A_image6.size = (0.053, 0.093)
  Routine BlankScreen2000ms
    ImageComponent A_image
      image = white.png
      size = (2, 2)
      startVal [frame N] = 0
      stopVal [frame N] = 120
      units = norm
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    CodeComponent A_code2000
      Code Type = Auto->JS
  Routine Flanker2000ms
    ImageComponent A_Background2
      image = fixation.png
      size = (2.0, 2.0)
      startVal [frame N] = 0
      stopVal [frame N] = 120
      units = norm
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    TextComponent A_Hedef
      color = black
      font = Times New Roman
      letterHeight = 0.130
      pos [set every repeat] = pozisyonhedef
      startVal [frame N] = 0
      stopVal [frame N] = 120
      text [set every repeat] = $hedef
      units = norm
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    TextComponent A_Celdirici
      color = black
      font = Times New Roman
      letterHeight = 0.186
      pos [set every repeat] = pozisyonceldirici
      startVal [frame N] = 0
      stopVal [frame N] = 120
      text [set every repeat] = $celdirici
      units = norm
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    KeyboardComponent A_Key
      allowedKeys = 'x','z','n'
      correctAns = $flankercevap
      forceEndRoutine = True
      startVal [frame N] = 0
      stopVal [frame N] = 120
      storeCorrect = True
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    SoundComponent A_Sound
      sound = yanlis.wav
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    CodeComponent A_code2000_flanker
      Code Type = Auto->JS
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      Begin Routine:
        FRate = 1000 / int(round(win.getActualFrameRate(),2))
        FrameN = int(2000 / FRate)
        frame = 0
      Each Frame:
        frame = frame + 1
        requirement = 2000 / FRate
        if frame >= requirement:
            continueRoutine = False
      End Routine:
        if A_Key.keys == None:
            A_Sound.play()
  Routine FlankerFixation500ms
    ImageComponent A_500
      image = fixation.png
      size = (2, 2)
      startVal [frame N] = 0
      stopVal [frame N] = 30
      units = norm
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    CodeComponent A_500_code
      Code Type = Auto->JS
  Routine VWMLoadTask
    ImageComponent A_Background1_2
      image = fixation.png
      size = (2.0, 2.0)
      startVal [frame N] = 0
      units = norm
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    ImageComponent A_image1_2
      color [set every repeat] = $[r1,g1,b1]
      image = white.png
      pos = (-0.176, 0)
      size = (0, 0)
      startVal [frame N] = 0
      units = norm
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    ImageComponent A_image2_2
      color [set every repeat] = $[r2,g2,b2]
      image = white.png
      pos = (-0.118, 0)
      size = (0, 0)
      startVal [frame N] = 0
      units = norm
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    ImageComponent A_image3_2
      color [set every repeat] = $[r3,g3,b3]
      image = white.png
      pos = (0.118, 0)
      size = (0, 0)
      startVal [frame N] = 0
      units = norm
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    ImageComponent A_image4_2
      color [set every repeat] = $[r4,g4,b4]
      image = white.png
      pos = (0.176, 0)
      size = (0, 0)
      startVal [frame N] = 0
      units = norm
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    ImageComponent A_image5_2
      color [set every repeat] = $[r5,g5,b5]
      image = white.png
      pos = (-0.147, 0)
      size = (0, 0)
      startVal [frame N] = 0
      units = norm
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    ImageComponent A_image6_2
      color [set every repeat] = $[r6,g6,b6]
      image = white.png
      pos = (0.147, 0)
      size = (0, 0)
      startVal [frame N] = 0
      units = norm
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    PolygonComponent A_Poli1
      fillColor = white
      lineColor = black
      pos = (-0.176, 0)
      shape = regular polygon...
      size = (0, 0)
      startVal [frame N] = 0
      units = norm
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    PolygonComponent A_Poli2
      fillColor = white
      lineColor = black
      pos = (-0.118, 0)
      shape = regular polygon...
      size = (0, 0)
      startVal [frame N] = 0
      units = norm
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    PolygonComponent A_Poli3
      fillColor = white
      lineColor = black
      pos = (0.118, 0)
      shape = regular polygon...
      size = (0, 0)
      startVal [frame N] = 0
      units = norm
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    PolygonComponent A_Poli4
      fillColor = white
      lineColor = black
      pos = (0.176, 0)
      shape = regular polygon...
      size = (0, 0)
      startVal [frame N] = 0
      units = norm
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    PolygonComponent A_Poli5
      fillColor = white
      lineColor = black
      pos = (-0.147, 0)
      shape = regular polygon...
      size = (0, 0)
      startVal [frame N] = 0
      units = norm
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    PolygonComponent A_Poli6
      fillColor = white
      lineColor = black
      pos = (0.147, 0)
      shape = regular polygon...
      size = (0, 0)
      startVal [frame N] = 0
      units = norm
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    KeyboardComponent A_Key_2
      allowedKeys = 'ö','ç'
      correctAns = $taskcevap
      forceEndRoutine = True
      startVal [frame N] = 0
      storeCorrect = True
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    SoundComponent A_Sound_2
      sound = yanlis.wav
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    CodeComponent A_Code_VWM
      Code Type = Auto->JS
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      Begin Routine:
        A_image1_2.size = (0, 0)
        A_image2_2.size = (0, 0)
        A_image3_2.size = (0, 0)
        A_image4_2.size = (0, 0)
        A_image5_2.size = (0, 0)
        A_image6_2.size = (0, 0)
        A_Poli1.size = (0, 0)
        A_Poli2.size = (0, 0)
        A_Poli3.size = (0, 0)
        A_Poli4.size = (0, 0)
        A_Poli5.size = (0, 0)
        A_Poli6.size = (0, 0)

        if A_kosul.text == "LL":
            if A_cevap.text == "ö":
                dizi = [5,6]
                shuffle(dizi)
                if dizi[0] == 5:
                    A_image5_2.setColor([r5,g5,b5], colorSpace='rgb')
                    A_image5_2.size = (0.053, 0.093)
                    A_image6_2.setColor([r6,g6,g6], colorSpace='rgb')
                    A_image6_2.size = (0, 0)
                    A_Poli6.size = (0.053, 0.093)
                elif dizi[0] == 6:
                    A_image6_2.setColor([r6,g6,g6], colorSpace='rgb')
                    A_image6_2.size = (0.053, 0.093)
                    A_image5_2.setColor([r5,g5,b5], colorSpace='rgb')
                    A_image5_2.size = (0, 0)
                    A_Poli5.size = (0.053, 0.093)

            if A_cevap.text == "ç":
                r5 = float(round(r5,4)) + 0.5333
                g5 = float(round(g5,4)) + 0.5333
                b5 = float(round(b5,4)) + 0.5333

                r6 = float(round(r6,4)) + 0.5333
                g6 = float(round(g6,4)) + 0.5333
                b6 = float(round(b6,4)) + 0.5333

                if r5 > 1:
                    r5 = r5 - 0.5333
                    p1 = 1 - r5
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r5 = -float(round(p4,4))

                if g5 > 1:
                    g5 = g5 - 0.5333
                    p1 = 1 - g5
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g5 = -float(round(p4,4))

                if b5 > 1:
                    b5 = b5 - 0.5333
                    p1 = 1 - b5
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b5 = -float(round(p4,4))

                if r6 > 1:
                    r6 = r6 - 0.5333
                    p1 = 1 - r6
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r6 = -float(round(p4,4))

                if g6 > 1:
                    g6 = g6 - 0.5333
                    p1 = 1 - g6
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g6 = -float(round(p4,4))

                if b6 > 1:
                    b6 = b6 - 0.5333
                    p1 = 1 - b6
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b6 = -float(round(p4,4))

                dizi = [5,6]
                shuffle(dizi)
                if dizi[0] == 5:
                    A_image5_2.setColor([r5,g5,b5], colorSpace='rgb')
                    A_image5_2.size = (0.053, 0.093)
                    A_image6_2.setColor([r6,g6,g6], colorSpace='rgb')
                    A_image6_2.size = (0, 0)
                    A_Poli6.size = (0.053, 0.093)
                elif dizi[0] == 6:
                    A_image6_2.setColor([r6,g6,g6], colorSpace='rgb')
                    A_image6_2.size = (0.053, 0.093)
                    A_image5_2.setColor([r5,g5,b5], colorSpace='rgb')
                    A_image5_2.size = (0, 0)
                    A_Poli5.size = (0.053, 0.093)


        elif A_kosul.text == "HL":
            if A_cevap.text == "ö":
                dizi = [1,2,3,4]
                shuffle(dizi)
                if dizi[0] == 1:
                    A_image1_2.setColor([r1,g1,b1], colorSpace='rgb')
                    A_image1_2.size = (0.053, 0.093)
                    A_image2_2.setColor([r2,g2,g2], colorSpace='rgb')
                    A_image2_2.size = (0, 0)
                    A_Poli2.size = (0.053, 0.093)
                    A_image3_2.setColor([r3,g3,g3], colorSpace='rgb')
                    A_image3_2.size = (0, 0)
                    A_Poli3.size = (0.053, 0.093)
                    A_image4_2.setColor([r4,g4,g4], colorSpace='rgb')
                    A_image4_2.size = (0, 0)
                    A_Poli4.size = (0.053, 0.093)
                elif dizi[0] == 2:
                    A_image2_2.setColor([r2,g2,g2], colorSpace='rgb')
                    A_image2_2.size = (0.053, 0.093)
                    A_image1_2.setColor([r1,g1,b1], colorSpace='rgb')
                    A_image1_2.size = (0, 0)
                    A_Poli1.size = (0.053, 0.093)
                    A_image3_2.setColor([r3,g3,g3], colorSpace='rgb')
                    A_image3_2.size = (0, 0)
                    A_Poli3.size = (0.053, 0.093)
                    A_image4_2.setColor([r4,g4,g4], colorSpace='rgb')
                    A_image4_2.size = (0, 0)
                    A_Poli4.size = (0.053, 0.093)
                elif dizi[0] == 3:
                    A_image3_2.setColor([r3,g3,b3], colorSpace='rgb')
                    A_image3_2.size = (0.053, 0.093)
                    A_image4_2.setColor([r4,g4,g4], colorSpace='rgb')
                    A_image4_2.size = (0, 0)
                    A_Poli4.size = (0.053, 0.093)
                    A_image1_2.setColor([r1,g1,g1], colorSpace='rgb')
                    A_image1_2.size = (0, 0)
                    A_Poli1.size = (0.053, 0.093)
                    A_image2_2.setColor([r2,g2,g2], colorSpace='rgb')
                    A_image2_2.size = (0, 0)
                    A_Poli2.size = (0.053, 0.093)
                elif dizi[0] == 4:
                    A_image4_2.setColor([r4,g4,g4], colorSpace='rgb')
                    A_image4_2.size = (0.053, 0.093)
                    A_image3_2.setColor([r3,g3,b3], colorSpace='rgb')
                    A_image3_2.size = (0, 0)
                    A_Poli3.size = (0.053, 0.093)
                    A_image1_2.setColor([r1,g1,g1], colorSpace='rgb')
                    A_image1_2.size = (0, 0)
                    A_Poli1.size = (0.053, 0.093)
                    A_image2_2.setColor([r2,g2,g2], colorSpace='rgb')
                    A_image2_2.size = (0, 0)
                    A_Poli2.size = (0.053, 0.093)

            if A_cevap.text == "ç":
                r1 = float(round(r1,4)) + 0.5333
                g1 = float(round(g1,4)) + 0.5333
                b1 = float(round(b1,4)) + 0.5333

                r2 = float(round(r2,4)) + 0.5333
                g2 = float(round(g2,4)) + 0.5333
                b2 = float(round(b2,4)) + 0.5333

                r3 = float(round(r3,4)) + 0.5333
                g3 = float(round(g3,4)) + 0.5333
                b3 = float(round(b3,4)) + 0.5333

                r4 = float(round(r4,4)) + 0.5333
                g4 = float(round(g4,4)) + 0.5333
                b4 = float(round(b4,4)) + 0.5333

                if r1 > 1:
                    r1 = r1 - 0.5333
                    p1 = 1 - r1
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r1 = -float(round(p4,4))

                if g1 > 1:
                    g1 = g1 - 0.5333
                    p1 = 1 - g1
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g1 = -float(round(p4,4))

                if b1 > 1:
                    b1 = b1 - 0.5333
                    p1 = 1 - b1
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b1 = -float(round(p4,4))

                if r2 > 1:
                    r2 = r2 - 0.5333
                    p1 = 1 - r2
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r2 = -float(round(p4,4))

                if g2 > 1:
                    g2 = g2 - 0.5333
                    p1 = 1 - g2
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g2 = -float(round(p4,4))

                if b2 > 1:
                    b2 = b2 - 0.5333
                    p1 = 1 - b2
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b2 = -float(round(p4,4))

                if r3 > 1:
                    r3 = r3 - 0.5333
                    p1 = 1 - r3
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r3 = -float(round(p4,4))

                if g3 > 1:
                    g3 = g3 - 0.5333
                    p1 = 1 - g3
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g3 = -float(round(p4,4))

                if b3 > 1:
                    b3 = b3 - 0.5333
                    p1 = 1 - b3
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b3 = -float(round(p4,4))

                if r4 > 1:
                    r4 = r4 - 0.5333
                    p1 = 1 - r4
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r4 = -float(round(p4,4))

                if g4 > 1:
                    g4 = g4 - 0.5333
                    p1 = 1 - g4
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g4 = -float(round(p4,4))

                if b4 > 1:
                    b4 = b4 - 0.5333
                    p1 = 1 - b4
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b4 = -float(round(p4,4))

                dizi = [1,2,3,4]
                shuffle(dizi)
                if dizi[0] == 1:
                    A_image1_2.setColor([r1,g1,b1], colorSpace='rgb')
                    A_image1_2.size = (0.053, 0.093)
                    A_image2_2.setColor([r2,g2,g2], colorSpace='rgb')
                    A_image2_2.size = (0, 0)
                    A_Poli2.size = (0.053, 0.093)
                    A_image3_2.setColor([r3,g3,g3], colorSpace='rgb')
                    A_image3_2.size = (0, 0)
                    A_Poli3.size = (0.053, 0.093)
                    A_image4_2.setColor([r4,g4,g4], colorSpace='rgb')
                    A_image4_2.size = (0, 0)
                    A_Poli4.size = (0.053, 0.093)
                elif dizi[0] == 2:
                    A_image2_2.setColor([r2,g2,g2], colorSpace='rgb')
                    A_image2_2.size = (0.053, 0.093)
                    A_image1_2.setColor([r1,g1,b1], colorSpace='rgb')
                    A_image1_2.size = (0, 0)
                    A_Poli1.size = (0.053, 0.093)
                    A_image3_2.setColor([r3,g3,g3], colorSpace='rgb')
                    A_image3_2.size = (0, 0)
                    A_Poli3.size = (0.053, 0.093)
                    A_image4_2.setColor([r4,g4,g4], colorSpace='rgb')
                    A_image4_2.size = (0, 0)
                    A_Poli4.size = (0.053, 0.093)
                elif dizi[0] == 3:
                    A_image3_2.setColor([r3,g3,b3], colorSpace='rgb')
                    A_image3_2.size = (0.053, 0.093)
                    A_image4_2.setColor([r4,g4,g4], colorSpace='rgb')
                    A_image4_2.size = (0, 0)
                    A_Poli4.size = (0.053, 0.093)
                    A_image1_2.setColor([r1,g1,g1], colorSpace='rgb')
                    A_image1_2.size = (0, 0)
                    A_Poli1.size = (0.053, 0.093)
                    A_image2_2.setColor([r2,g2,g2], colorSpace='rgb')
                    A_image2_2.size = (0, 0)
                    A_Poli2.size = (0.053, 0.093)
                elif dizi[0] == 4:
                    A_image4_2.setColor([r4,g4,g4], colorSpace='rgb')
                    A_image4_2.size = (0.053, 0.093)
                    A_image3_2.setColor([r3,g3,b3], colorSpace='rgb')
                    A_image3_2.size = (0, 0)
                    A_Poli3.size = (0.053, 0.093)
                    A_image1_2.setColor([r1,g1,g1], colorSpace='rgb')
                    A_image1_2.size = (0, 0)
                    A_Poli1.size = (0.053, 0.093)
                    A_image2_2.setColor([r2,g2,g2], colorSpace='rgb')
                    A_image2_2.size = (0, 0)
                    A_Poli2.size = (0.053, 0.093)

        elif A_kosul.text == "LS":
            if A_cevap.text == "ö":
                dizi = [5,6]
                shuffle(dizi)
                if dizi[0] == 5:
                    A_image5_2.setColor([r5,g5,b5], colorSpace='rgb')
                    A_image5_2.size = (0.053, 0.093)
                    A_image6_2.setColor([r6,g6,g6], colorSpace='rgb')
                    A_image6_2.size = (0, 0)
                    A_Poli6.size = (0.053, 0.093)
                elif dizi[0] == 6:
                    A_image6_2.setColor([r6,g6,g6], colorSpace='rgb')
                    A_image6_2.size = (0.053, 0.093)
                    A_image5_2.setColor([r5,g5,b5], colorSpace='rgb')
                    A_image5_2.size = (0, 0)
                    A_Poli5.size = (0.053, 0.093)

            if A_cevap.text == "ç":
                r5 = float(round(r5,4)) + 0.1333
                g5 = float(round(g5,4)) + 0.1333
                b5 = float(round(b5,4)) + 0.1333

                r6 = float(round(r6,4)) + 0.1333
                g6 = float(round(g6,4)) + 0.1333
                b6 = float(round(b6,4)) + 0.1333

                if r5 > 1:
                    r5 = r5 - 0.1333
                    p1 = 1 - r5
                    p2 = 0.1333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r5 = -float(round(p4,4))

                if g5 > 1:
                    g5 = g5 - 0.1333
                    p1 = 1 - g5
                    p2 = 0.1333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g5 = -float(round(p4,4))

                if b5 > 1:
                    b5 = b5 - 0.1333
                    p1 = 1 - b5
                    p2 = 0.1333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b5 = -float(round(p4,4))

                if r6 > 1:
                    r6 = r6 - 0.1333
                    p1 = 1 - r6
                    p2 = 0.1333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r6 = -float(round(p4,4))

                if g6 > 1:
                    g6 = g6 - 0.1333
                    p1 = 1 - g6
                    p2 = 0.1333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g6 = -float(round(p4,4))

                if b6 > 1:
                    b6 = b6 - 0.1333
                    p1 = 1 - b6
                    p2 = 0.1333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b6 = -float(round(p4,4))

                dizi = [5,6]
                shuffle(dizi)
                if dizi[0] == 5:
                    A_image5_2.setColor([r5,g5,b5], colorSpace='rgb')
                    A_image5_2.size = (0.053, 0.093)
                    A_image6_2.setColor([r6,g6,g6], colorSpace='rgb')
                    A_image6_2.size = (0, 0)
                    A_Poli6.size = (0.053, 0.093)
                elif dizi[0] == 6:
                    A_image6_2.setColor([r6,g6,g6], colorSpace='rgb')
                    A_image6_2.size = (0.053, 0.093)
                    A_image5_2.setColor([r5,g5,b5], colorSpace='rgb')
                    A_image5_2.size = (0, 0)
                    A_Poli5.size = (0.053, 0.093)
      End Routine:
        if A_Key_2.corr == 0:
            A_Sound_2.play()

        if counter == 16:
            LoopAlistirma.finished = True
  Routine D_Fixation800ms
    ImageComponent D_image800
      image = fixation.png
      size = (2, 2)
      startVal [frame N] = 0
      stopVal [frame N] = 48
      units = norm
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    TextComponent D_kosul
      font = Times New Roman
      letterHeight = 0.00
      startVal [frame N] = 0
      stopVal [frame N] = 48
      text [set every repeat] = $condition
      units = norm
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    TextComponent D_cevap
      font = Times New Roman
      letterHeight = 0.00
      startVal [frame N] = 0
      stopVal [frame N] = 48
      text [set every repeat] = $taskcevap
      units = norm
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    CodeComponent D_code800
      Code Type = Auto->JS
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      Begin Experiment:
        r1 = 0
        g1 = 0
        b1 = 0
        r2 = 0
        g2 = 0
        b2 = 0
        r3 = 0
        g3 = 0
        b3 = 0
        r4 = 0
        g4 = 0
        b4 = 0
        r5 = 0
        g5 = 0
        b5 = 0
        r6 = 0
        g6 = 0
        b6 = 0
      End Routine:
        r1 = float(round(random(),4))
        g1 = float(round(random(),4))
        b1 = float(round(random(),4))

        r2 = float(round(random(),4))
        g2 = float(round(random(),4))
        b2 = float(round(random(),4))

        r3 = float(round(random(),4))
        g3 = float(round(random(),4))
        b3 = float(round(random(),4))

        r4 = float(round(random(),4))
        g4 = float(round(random(),4))
        b4 = float(round(random(),4))

        r5 = float(round(random(),4))
        g5 = float(round(random(),4))
        b5 = float(round(random(),4))

        r6 = float(round(random(),4))
        g6 = float(round(random(),4))
        b6 = float(round(random(),4))
  Routine D_VWMLoad200ms
    ImageComponent D_Background1
      image = fixation.png
      size = (2.0, 2.0)
      startVal [frame N] = 0
      stopVal [frame N] = 12
      units = norm
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    ImageComponent D_image1
      color [set every repeat] = $[r1,g1,b1]
      image = white.png
      pos = (-0.176, 0)
      size = (0, 0)
      startVal [frame N] = 0
      stopVal [frame N] = 12
      units = norm
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    ImageComponent D_image2
      color [set every repeat] = $[r2,g2,b2]
      image = white.png
      pos = (-0.118, 0)
      size = (0, 0)
      startVal [frame N] = 0
      stopVal [frame N] = 12
      units = norm
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    ImageComponent D_image3
      color [set every repeat] = $[r3,g3,b3]
      image = white.png
      pos = (0.118, 0)
      size = (0, 0)
      startVal [frame N] = 0
      stopVal [frame N] = 12
      units = norm
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    ImageComponent D_image4
      color [set every repeat] = $[r4,g4,b4]
      image = white.png
      pos = (0.176, 0)
      size = (0, 0)
      startVal [frame N] = 0
      stopVal [frame N] = 12
      units = norm
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    ImageComponent D_image5
      color [set every repeat] = $[r5,g5,b5]
      image = white.png
      pos = (-0.147, 0)
      size = (0, 0)
      startVal [frame N] = 0
      stopVal [frame N] = 12
      units = norm
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    ImageComponent D_image6
      color [set every repeat] = $[r6,g6,b6]
      image = white.png
      pos = (0.147, 0)
      size = (0, 0)
      startVal [frame N] = 0
      stopVal [frame N] = 12
      units = norm
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    CodeComponent D_code200
      Code Type = Auto->JS
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      Begin Routine:
        if D_kosul.text == "LL": #LOW LOAD LARGE COLOR CHANGE
            D_image5.size = (0.053, 0.093)
            D_image6.size = (0.053, 0.093)
        elif D_kosul.text == "HL": #HİGH LOAD LARGE COLOR CHANGE
            D_image1.size = (0.053, 0.093)
            D_image2.size = (0.053, 0.093)
            D_image3.size = (0.053, 0.093)
            D_image4.size = (0.053, 0.093)
        elif D_kosul.text == "LS": # LOW LOAD SMALL COLOR CHANGE
            D_image5.size = (0.053, 0.093)
            D_image6.size = (0.053, 0.093)
  Routine D_BlankScreen2000ms
    ImageComponent D_image
      image = white.png
      size = (2, 2)
      startVal [frame N] = 0
      stopVal [frame N] = 120
      units = norm
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    CodeComponent D_code2000
      Code Type = Auto->JS
  Routine D_Flanker2000ms
    ImageComponent D_Background2
      image = fixation.png
      size = (2.0, 2.0)
      startVal [frame N] = 0
      stopVal [frame N] = 120
      units = norm
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    TextComponent D_Hedef
      color = black
      font = Times New Roman
      letterHeight = 0.130
      pos [set every repeat] = pozisyonhedef
      startVal [frame N] = 0
      stopVal [frame N] = 120
      text [set every repeat] = $hedef
      units = norm
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    TextComponent D_Celdirici
      color = black
      font = Times New Roman
      letterHeight = 0.186
      pos [set every repeat] = pozisyonceldirici
      startVal [frame N] = 0
      stopVal [frame N] = 120
      text [set every repeat] = $celdirici
      units = norm
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    KeyboardComponent D_Key
      allowedKeys = 'x','z','n'
      correctAns = $flankercevap
      forceEndRoutine = True
      startVal [frame N] = 0
      stopVal [frame N] = 120
      storeCorrect = True
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    SoundComponent D_Sound
      sound = yanlis.wav
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    CodeComponent D_code2000_flanker
      Code Type = Auto->JS
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      Begin Routine:
        FRate = 1000 / int(round(win.getActualFrameRate(),2))
        FrameN = int(2000 / FRate)
        frame = 0
      Each Frame:
        frame = frame + 1
        requirement = 2000 / FRate
        if frame >= requirement:
            continueRoutine = False
      End Routine:
        if D_Key.keys == None:
            D_Sound.play()
  Routine D_FlankerFixation500ms
    ImageComponent D_500
      image = fixation.png
      size = (2, 2)
      startVal [frame N] = 0
      stopVal [frame N] = 30
      units = norm
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    CodeComponent D_500_code
      Code Type = Auto->JS
  Routine D_VWMLoadTask
    ImageComponent D_Background1_2
      image = fixation.png
      size = (2.0, 2.0)
      startVal [frame N] = 0
      units = norm
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    ImageComponent D_image1_2
      color [set every repeat] = $[r1,g1,b1]
      image = white.png
      pos = (-0.176, 0)
      size = (0, 0)
      startVal [frame N] = 0
      units = norm
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    ImageComponent D_image2_2
      color [set every repeat] = $[r2,g2,b2]
      image = white.png
      pos = (-0.118, 0)
      size = (0, 0)
      startVal [frame N] = 0
      units = norm
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    ImageComponent D_image3_2
      color [set every repeat] = $[r3,g3,b3]
      image = white.png
      pos = (0.118, 0)
      size = (0, 0)
      startVal [frame N] = 0
      units = norm
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    ImageComponent D_image4_2
      color [set every repeat] = $[r4,g4,b4]
      image = white.png
      pos = (0.176, 0)
      size = (0, 0)
      startVal [frame N] = 0
      units = norm
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    ImageComponent D_image5_2
      color [set every repeat] = $[r5,g5,b5]
      image = white.png
      pos = (-0.147, 0)
      size = (0, 0)
      startVal [frame N] = 0
      units = norm
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    ImageComponent D_image6_2
      color [set every repeat] = $[r6,g6,b6]
      image = white.png
      pos = (0.147, 0)
      size = (0, 0)
      startVal [frame N] = 0
      units = norm
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    PolygonComponent D_Poli1
      fillColor = white
      lineColor = black
      pos = (-0.176, 0)
      shape = regular polygon...
      size = (0, 0)
      startVal [frame N] = 0
      units = norm
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    PolygonComponent D_Poli2
      fillColor = white
      lineColor = black
      pos = (-0.118, 0)
      shape = regular polygon...
      size = (0, 0)
      startVal [frame N] = 0
      units = norm
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    PolygonComponent D_Poli3
      fillColor = white
      lineColor = black
      pos = (0.118, 0)
      shape = regular polygon...
      size = (0, 0)
      startVal [frame N] = 0
      units = norm
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    PolygonComponent D_Poli4
      fillColor = white
      lineColor = black
      pos = (0.176, 0)
      shape = regular polygon...
      size = (0, 0)
      startVal [frame N] = 0
      units = norm
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    PolygonComponent D_Poli5
      fillColor = white
      lineColor = black
      pos = (-0.147, 0)
      shape = regular polygon...
      size = (0, 0)
      startVal [frame N] = 0
      units = norm
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    PolygonComponent D_Poli6
      fillColor = white
      lineColor = black
      pos = (0.147, 0)
      shape = regular polygon...
      size = (0, 0)
      startVal [frame N] = 0
      units = norm
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    KeyboardComponent D_Key_2
      allowedKeys = 'ö','ç'
      correctAns = $taskcevap
      forceEndRoutine = True
      startVal [frame N] = 0
      storeCorrect = True
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    SoundComponent D_Sound_2
      sound = yanlis.wav
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    CodeComponent D_Code_VWM
      Code Type = Auto->JS
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      Begin Routine:
        D_image1_2.size = (0, 0)
        D_image2_2.size = (0, 0)
        D_image3_2.size = (0, 0)
        D_image4_2.size = (0, 0)
        D_image5_2.size = (0, 0)
        D_image6_2.size = (0, 0)
        D_Poli1.size = (0, 0)
        D_Poli2.size = (0, 0)
        D_Poli3.size = (0, 0)
        D_Poli4.size = (0, 0)
        D_Poli5.size = (0, 0)
        D_Poli6.size = (0, 0)

        if D_kosul.text == "LL":
            if D_cevap.text == "ö":
                dizi = [5,6]
                shuffle(dizi)
                if dizi[0] == 5:
                    D_image5_2.setColor([r5,g5,b5], colorSpace='rgb')
                    D_image5_2.size = (0.053, 0.093)
                    D_image6_2.setColor([r6,g6,g6], colorSpace='rgb')
                    D_image6_2.size = (0, 0)
                    D_Poli6.size = (0.053, 0.093)
                elif dizi[0] == 6:
                    D_image6_2.setColor([r6,g6,g6], colorSpace='rgb')
                    D_image6_2.size = (0.053, 0.093)
                    D_image5_2.setColor([r5,g5,b5], colorSpace='rgb')
                    D_image5_2.size = (0, 0)
                    D_Poli5.size = (0.053, 0.093)

            if D_cevap.text == "ç":
                r5 = float(round(r5,4)) + 0.5333
                g5 = float(round(g5,4)) + 0.5333
                b5 = float(round(b5,4)) + 0.5333

                r6 = float(round(r6,4)) + 0.5333
                g6 = float(round(g6,4)) + 0.5333
                b6 = float(round(b6,4)) + 0.5333

                if r5 > 1:
                    r5 = r5 - 0.5333
                    p1 = 1 - r5
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r5 = -float(round(p4,4))

                if g5 > 1:
                    g5 = g5 - 0.5333
                    p1 = 1 - g5
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g5 = -float(round(p4,4))

                if b5 > 1:
                    b5 = b5 - 0.5333
                    p1 = 1 - b5
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b5 = -float(round(p4,4))

                if r6 > 1:
                    r6 = r6 - 0.5333
                    p1 = 1 - r6
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r6 = -float(round(p4,4))

                if g6 > 1:
                    g6 = g6 - 0.5333
                    p1 = 1 - g6
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g6 = -float(round(p4,4))

                if b6 > 1:
                    b6 = b6 - 0.5333
                    p1 = 1 - b6
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b6 = -float(round(p4,4))

                dizi = [5,6]
                shuffle(dizi)
                if dizi[0] == 5:
                    D_image5_2.setColor([r5,g5,b5], colorSpace='rgb')
                    D_image5_2.size = (0.053, 0.093)
                    D_image6_2.setColor([r6,g6,g6], colorSpace='rgb')
                    D_image6_2.size = (0, 0)
                    D_Poli6.size = (0.053, 0.093)
                elif dizi[0] == 6:
                    D_image6_2.setColor([r6,g6,g6], colorSpace='rgb')
                    D_image6_2.size = (0.053, 0.093)
                    D_image5_2.setColor([r5,g5,b5], colorSpace='rgb')
                    D_image5_2.size = (0, 0)
                    D_Poli5.size = (0.053, 0.093)


        elif D_kosul.text == "HL":
            if D_cevap.text == "ö":
                dizi = [1,2,3,4]
                shuffle(dizi)
                if dizi[0] == 1:
                    D_image1_2.setColor([r1,g1,b1], colorSpace='rgb')
                    D_image1_2.size = (0.053, 0.093)
                    D_image2_2.setColor([r2,g2,g2], colorSpace='rgb')
                    D_image2_2.size = (0, 0)
                    D_Poli2.size = (0.053, 0.093)
                    D_image3_2.setColor([r3,g3,g3], colorSpace='rgb')
                    D_image3_2.size = (0, 0)
                    D_Poli3.size = (0.053, 0.093)
                    D_image4_2.setColor([r4,g4,g4], colorSpace='rgb')
                    D_image4_2.size = (0, 0)
                    D_Poli4.size = (0.053, 0.093)
                elif dizi[0] == 2:
                    D_image2_2.setColor([r2,g2,g2], colorSpace='rgb')
                    D_image2_2.size = (0.053, 0.093)
                    D_image1_2.setColor([r1,g1,b1], colorSpace='rgb')
                    D_image1_2.size = (0, 0)
                    D_Poli1.size = (0.053, 0.093)
                    D_image3_2.setColor([r3,g3,g3], colorSpace='rgb')
                    D_image3_2.size = (0, 0)
                    D_Poli3.size = (0.053, 0.093)
                    D_image4_2.setColor([r4,g4,g4], colorSpace='rgb')
                    D_image4_2.size = (0, 0)
                    D_Poli4.size = (0.053, 0.093)
                elif dizi[0] == 3:
                    D_image3_2.setColor([r3,g3,b3], colorSpace='rgb')
                    D_image3_2.size = (0.053, 0.093)
                    D_image4_2.setColor([r4,g4,g4], colorSpace='rgb')
                    D_image4_2.size = (0, 0)
                    D_Poli4.size = (0.053, 0.093)
                    D_image1_2.setColor([r1,g1,g1], colorSpace='rgb')
                    D_image1_2.size = (0, 0)
                    D_Poli1.size = (0.053, 0.093)
                    D_image2_2.setColor([r2,g2,g2], colorSpace='rgb')
                    D_image2_2.size = (0, 0)
                    D_Poli2.size = (0.053, 0.093)
                elif dizi[0] == 4:
                    D_image4_2.setColor([r4,g4,g4], colorSpace='rgb')
                    D_image4_2.size = (0.053, 0.093)
                    D_image3_2.setColor([r3,g3,b3], colorSpace='rgb')
                    D_image3_2.size = (0, 0)
                    D_Poli3.size = (0.053, 0.093)
                    D_image1_2.setColor([r1,g1,g1], colorSpace='rgb')
                    D_image1_2.size = (0, 0)
                    D_Poli1.size = (0.053, 0.093)
                    D_image2_2.setColor([r2,g2,g2], colorSpace='rgb')
                    D_image2_2.size = (0, 0)
                    D_Poli2.size = (0.053, 0.093)

            if D_cevap.text == "ç":
                r1 = float(round(r1,4)) + 0.5333
                g1 = float(round(g1,4)) + 0.5333
                b1 = float(round(b1,4)) + 0.5333

                r2 = float(round(r2,4)) + 0.5333
                g2 = float(round(g2,4)) + 0.5333
                b2 = float(round(b2,4)) + 0.5333

                r3 = float(round(r3,4)) + 0.5333
                g3 = float(round(g3,4)) + 0.5333
                b3 = float(round(b3,4)) + 0.5333

                r4 = float(round(r4,4)) + 0.5333
                g4 = float(round(g4,4)) + 0.5333
                b4 = float(round(b4,4)) + 0.5333

                if r1 > 1:
                    r1 = r1 - 0.5333
                    p1 = 1 - r1
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r1 = -float(round(p4,4))

                if g1 > 1:
                    g1 = g1 - 0.5333
                    p1 = 1 - g1
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g1 = -float(round(p4,4))

                if b1 > 1:
                    b1 = b1 - 0.5333
                    p1 = 1 - b1
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b1 = -float(round(p4,4))

                if r2 > 1:
                    r2 = r2 - 0.5333
                    p1 = 1 - r2
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r2 = -float(round(p4,4))

                if g2 > 1:
                    g2 = g2 - 0.5333
                    p1 = 1 - g2
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g2 = -float(round(p4,4))

                if b2 > 1:
                    b2 = b2 - 0.5333
                    p1 = 1 - b2
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b2 = -float(round(p4,4))

                if r3 > 1:
                    r3 = r3 - 0.5333
                    p1 = 1 - r3
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r3 = -float(round(p4,4))

                if g3 > 1:
                    g3 = g3 - 0.5333
                    p1 = 1 - g3
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g3 = -float(round(p4,4))

                if b3 > 1:
                    b3 = b3 - 0.5333
                    p1 = 1 - b3
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b3 = -float(round(p4,4))

                if r4 > 1:
                    r4 = r4 - 0.5333
                    p1 = 1 - r4
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r4 = -float(round(p4,4))

                if g4 > 1:
                    g4 = g4 - 0.5333
                    p1 = 1 - g4
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g4 = -float(round(p4,4))

                if b4 > 1:
                    b4 = b4 - 0.5333
                    p1 = 1 - b4
                    p2 = 0.5333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b4 = -float(round(p4,4))

                dizi = [1,2,3,4]
                shuffle(dizi)
                if dizi[0] == 1:
                    D_image1_2.setColor([r1,g1,b1], colorSpace='rgb')
                    D_image1_2.size = (0.053, 0.093)
                    D_image2_2.setColor([r2,g2,g2], colorSpace='rgb')
                    D_image2_2.size = (0, 0)
                    D_Poli2.size = (0.053, 0.093)
                    D_image3_2.setColor([r3,g3,g3], colorSpace='rgb')
                    D_image3_2.size = (0, 0)
                    D_Poli3.size = (0.053, 0.093)
                    D_image4_2.setColor([r4,g4,g4], colorSpace='rgb')
                    D_image4_2.size = (0, 0)
                    D_Poli4.size = (0.053, 0.093)
                elif dizi[0] == 2:
                    D_image2_2.setColor([r2,g2,g2], colorSpace='rgb')
                    D_image2_2.size = (0.053, 0.093)
                    D_image1_2.setColor([r1,g1,b1], colorSpace='rgb')
                    D_image1_2.size = (0, 0)
                    D_Poli1.size = (0.053, 0.093)
                    D_image3_2.setColor([r3,g3,g3], colorSpace='rgb')
                    D_image3_2.size = (0, 0)
                    D_Poli3.size = (0.053, 0.093)
                    D_image4_2.setColor([r4,g4,g4], colorSpace='rgb')
                    D_image4_2.size = (0, 0)
                    D_Poli4.size = (0.053, 0.093)
                elif dizi[0] == 3:
                    D_image3_2.setColor([r3,g3,b3], colorSpace='rgb')
                    D_image3_2.size = (0.053, 0.093)
                    D_image4_2.setColor([r4,g4,g4], colorSpace='rgb')
                    D_image4_2.size = (0, 0)
                    D_Poli4.size = (0.053, 0.093)
                    D_image1_2.setColor([r1,g1,g1], colorSpace='rgb')
                    D_image1_2.size = (0, 0)
                    D_Poli1.size = (0.053, 0.093)
                    D_image2_2.setColor([r2,g2,g2], colorSpace='rgb')
                    D_image2_2.size = (0, 0)
                    D_Poli2.size = (0.053, 0.093)
                elif dizi[0] == 4:
                    D_image4_2.setColor([r4,g4,g4], colorSpace='rgb')
                    D_image4_2.size = (0.053, 0.093)
                    D_image3_2.setColor([r3,g3,b3], colorSpace='rgb')
                    D_image3_2.size = (0, 0)
                    D_Poli3.size = (0.053, 0.093)
                    D_image1_2.setColor([r1,g1,g1], colorSpace='rgb')
                    D_image1_2.size = (0, 0)
                    D_Poli1.size = (0.053, 0.093)
                    D_image2_2.setColor([r2,g2,g2], colorSpace='rgb')
                    D_image2_2.size = (0, 0)
                    D_Poli2.size = (0.053, 0.093)

        elif D_kosul.text == "LS":
            if D_cevap.text == "ö":
                dizi = [5,6]
                shuffle(dizi)
                if dizi[0] == 5:
                    D_image5_2.setColor([r5,g5,b5], colorSpace='rgb')
                    D_image5_2.size = (0.053, 0.093)
                    D_image6_2.setColor([r6,g6,g6], colorSpace='rgb')
                    D_image6_2.size = (0, 0)
                    D_Poli6.size = (0.053, 0.093)
                elif dizi[0] == 6:
                    D_image6_2.setColor([r6,g6,g6], colorSpace='rgb')
                    D_image6_2.size = (0.053, 0.093)
                    D_image5_2.setColor([r5,g5,b5], colorSpace='rgb')
                    D_image5_2.size = (0, 0)
                    D_Poli5.size = (0.053, 0.093)

            if D_cevap.text == "ç":
                r5 = float(round(r5,4)) + 0.1333
                g5 = float(round(g5,4)) + 0.1333
                b5 = float(round(b5,4)) + 0.1333

                r6 = float(round(r6,4)) + 0.1333
                g6 = float(round(g6,4)) + 0.1333
                b6 = float(round(b6,4)) + 0.1333

                if r5 > 1:
                    r5 = r5 - 0.1333
                    p1 = 1 - r5
                    p2 = 0.1333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r5 = -float(round(p4,4))

                if g5 > 1:
                    g5 = g5 - 0.1333
                    p1 = 1 - g5
                    p2 = 0.1333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g5 = -float(round(p4,4))

                if b5 > 1:
                    b5 = b5 - 0.1333
                    p1 = 1 - b5
                    p2 = 0.1333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b5 = -float(round(p4,4))

                if r6 > 1:
                    r6 = r6 - 0.1333
                    p1 = 1 - r6
                    p2 = 0.1333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    r6 = -float(round(p4,4))

                if g6 > 1:
                    g6 = g6 - 0.1333
                    p1 = 1 - g6
                    p2 = 0.1333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    g6 = -float(round(p4,4))

                if b6 > 1:
                    b6 = b6 - 0.1333
                    p1 = 1 - b6
                    p2 = 0.1333 - float(round(p1,4))
                    p3 = abs(float(round(p2,4)) - float(round(p1,4)))
                    p4 = 1 - float(round(p3,4))
                    b6 = -float(round(p4,4))

                dizi = [5,6]
                shuffle(dizi)
                if dizi[0] == 5:
                    D_image5_2.setColor([r5,g5,b5], colorSpace='rgb')
                    D_image5_2.size = (0.053, 0.093)
                    D_image6_2.setColor([r6,g6,g6], colorSpace='rgb')
                    D_image6_2.size = (0, 0)
                    D_Poli6.size = (0.053, 0.093)
                elif dizi[0] == 6:
                    D_image6_2.setColor([r6,g6,g6], colorSpace='rgb')
                    D_image6_2.size = (0.053, 0.093)
                    D_image5_2.setColor([r5,g5,b5], colorSpace='rgb')
                    D_image5_2.size = (0, 0)
                    D_Poli5.size = (0.053, 0.093)
      End Routine:
        if D_Key_2.corr == 0:
            D_Sound_2.play()
Flow
  Routine Yonerge
  LoopInitiator LoopAlistirma loopType="TrialHandler"
    conditionsFile = replication_of_zhang_and_luck.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'hedef': 'X', 'celdirici': 'Z', 'pozisyonceldirici': (0, 0.186), 'pozisyonhedef': (0.292, 0), 'flankercevap': 'x', 'taskcevap': 'ö', 'condition': 'LL'},
      {'hedef': 'X', 'celdirici': 'N', 'pozisyonceldirici': (0, -0.186), 'pozisyonhedef': (0.146, 0), 'flankercevap': 'x', 'taskcevap': 'ö', 'condition': 'LL'},
      {'hedef': 'X', 'celdirici': 'X', 'pozisyonceldirici': (0, 0.186), 'pozisyonhedef': (0.088, 0), 'flankercevap': 'x', 'taskcevap': 'ö', 'condition': 'LL'},
      {'hedef': 'X', 'celdirici': 'Z', 'pozisyonceldirici': (0, -0.186), 'pozisyonhedef': (0.292, 0), 'flankercevap': 'x', 'taskcevap': 'ç', 'condition': 'LL'},
      {'hedef': 'X', 'celdirici': 'N', 'pozisyonceldirici': (0, 0.186), 'pozisyonhedef': (0.146, 0), 'flankercevap': 'x', 'taskcevap': 'ç', 'condition': 'LL'},
      {'hedef': 'X', 'celdirici': 'X', 'pozisyonceldirici': (0, -0.186), 'pozisyonhedef': (0.088, 0), 'flankercevap': 'x', 'taskcevap': 'ç', 'condition': 'LL'},
      {'hedef': 'Z', 'celdirici': 'X', 'pozisyonceldirici': (0, 0.186), 'pozisyonhedef': (0.292, 0), 'flankercevap': 'z', 'taskcevap': 'ö', 'condition': 'LL'},
      {'hedef': 'Z', 'celdirici': 'N', 'pozisyonceldirici': (0, -0.186), 'pozisyonhedef': (0.146, 0), 'flankercevap': 'z', 'taskcevap': 'ö', 'condition': 'LL'},
      {'hedef': 'Z', 'celdirici': 'Z', 'pozisyonceldirici': (0, 0.186), 'pozisyonhedef': (0.088, 0), 'flankercevap': 'z', 'taskcevap': 'ö', 'condition': 'LL'}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
    Routine Fixation800ms
    Routine VWMLoad200ms
    Routine BlankScreen2000ms
    Routine Flanker2000ms
    Routine FlankerFixation500ms
    Routine VWMLoadTask
  LoopTerminator LoopAlistirma
  Routine DeneyGecis
  LoopInitiator LoopDeney loopType="TrialHandler"
    conditionsFile = replication_of_zhang_and_luck.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'hedef': 'X', 'celdirici': 'Z', 'pozisyonceldirici': (0, 0.186), 'pozisyonhedef': (0.292, 0), 'flankercevap': 'x', 'taskcevap': 'ö', 'condition': 'LL'},
      {'hedef': 'X', 'celdirici': 'N', 'pozisyonceldirici': (0, -0.186), 'pozisyonhedef': (0.146, 0), 'flankercevap': 'x', 'taskcevap': 'ö', 'condition': 'LL'},
      {'hedef': 'X', 'celdirici': 'X', 'pozisyonceldirici': (0, 0.186), 'pozisyonhedef': (0.088, 0), 'flankercevap': 'x', 'taskcevap': 'ö', 'condition': 'LL'},
      {'hedef': 'X', 'celdirici': 'Z', 'pozisyonceldirici': (0, -0.186), 'pozisyonhedef': (0.292, 0), 'flankercevap': 'x', 'taskcevap': 'ç', 'condition': 'LL'},
      {'hedef': 'X', 'celdirici': 'N', 'pozisyonceldirici': (0, 0.186), 'pozisyonhedef': (0.146, 0), 'flankercevap': 'x', 'taskcevap': 'ç', 'condition': 'LL'},
      {'hedef': 'X', 'celdirici': 'X', 'pozisyonceldirici': (0, -0.186), 'pozisyonhedef': (0.088, 0), 'flankercevap': 'x', 'taskcevap': 'ç', 'condition': 'LL'},
      {'hedef': 'Z', 'celdirici': 'X', 'pozisyonceldirici': (0, 0.186), 'pozisyonhedef': (0.292, 0), 'flankercevap': 'z', 'taskcevap': 'ö', 'condition': 'LL'},
      {'hedef': 'Z', 'celdirici': 'N', 'pozisyonceldirici': (0, -0.186), 'pozisyonhedef': (0.146, 0), 'flankercevap': 'z', 'taskcevap': 'ö', 'condition': 'LL'},
      {'hedef': 'Z', 'celdirici': 'Z', 'pozisyonceldirici': (0, 0.186), 'pozisyonhedef': (0.088, 0), 'flankercevap': 'z', 'taskcevap': 'ö', 'condition': 'LL'}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
    Routine D_Fixation800ms
    Routine D_VWMLoad200ms
    Routine D_BlankScreen2000ms
    Routine D_Flanker2000ms
    Routine D_FlankerFixation500ms
    Routine D_VWMLoadTask
  LoopTerminator LoopDeney
